private function A_MethodInit( variable & o_blnSimMode, variable & o_blnAdmin, variable & o_blnAswStatusDialog, variable & o_blnSCAPs, variable & o_blnTiltModules, variable & o_blnHHSs, variable & o_strActiveRequestFolderPath, timer & o_tmrHepaFan, variable & o_arrTiltModules[], variable & o_arrHHSDevices[], variable & o_blnCentrifuge ) variable ;
private function B_GetWorklist( variable i_intTimeToWait, variable & o_strProcessType, variable & o_intUniqueSrcBCArraySize, variable & o_intUniqueDestBCArraySize, variable & o_arrWorklistBC[] ) variable ;
private function C_CreateSeq( sequence & o_arrAllSequences[], variable & o_arrAllLabwareTypes[] ) void ;
private function D_LoadInstructions( sequence & i_arrAllSequences[] ) void ;
private function E_PipettingSteps( variable & o_strCurrentStep ) variable ;
private function F_ProcessClose(  ) variable ;
private function MAP_SampTrack(  ) void ;
private function PIP_ChannelTransfer( sequence i_seqSource, sequence i_seqDestination, variable i_strLiquidClass, variable i_blnSrcIncrement, variable i_blnDestIncrement, variable i_fltPipettingVolume, variable i_blnFreshTipsPerLoop, variable i_blnEjectTips, variable i_intTiltAngle, variable & i_arrSrcSettings[], variable & i_arrDestSettings[], variable i_intModule_Src, variable i_intModule_Dest ) variable ;
private function Trp_DeckTransport( sequence i_seqSource, sequence i_seqDestination, variable i_blnToolType, variable i_blnParkTool, variable i_intThroughput, variable i_blnCheckOnGet, variable i_blnCheckOnPlace, variable i_strModuleControl_Src, variable i_strModuleControl_Dest ) variable ;
private function _GetActiveSequence( sequence & i_arrSeq[], variable i_strSearch, sequence & o_seq ) variable ;
private function _Module_Centrifuge( variable i_intCentrifugeSpeed, variable i_intCentrifugeTime, variable i_intCentrifugeAccel, variable i_intPositionToPresent ) variable ;
private function _Module_HHS( variable i_intHeat, variable i_intShake, variable i_blnPlateLock, variable i_intPositionSpecific ) variable ;
private function _Module_MediaFill(  ) void ;
private function _Module_Tilt( variable i_intSway, variable i_intAngle, variable i_intSpeed, variable i_blnPlateLock, variable i_intPositionSpecific ) variable ;
private function _RemoveSeqPositions( sequence & i_seq, variable i_blnPosToRemove ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  private variable _strVarType;
  private variable _strMessage;
  private variable _intHhsDeviceArraySize;
  private variable _intTiltingModulesArraySize;
  private variable _loopCounter1;
  private variable _loopCounter2;
  private variable _rtnCode;
  _strVarType = StrGetType(Translate("Wonder how I do this"));
  if (_strVarType == "i")
  {
    _strMessage = StrConcat2(Translate("Method aborted before pipetting started"), Translate(""));
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "textBlock2.Text", strCurrentStep );
  customDialog_1.ShowCustomDialog();
  if (blnAswStatusDialog_State == 1)
  {
    AswStatusDialog::Terminate();
  }
  if (blnTiltingModules_State == 1)
  {
    _intTiltingModulesArraySize=arrTiltingModules.GetSize();
    {
      for(_loopCounter1 = 0; _loopCounter1 < _intTiltingModulesArraySize;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltingModules.ElementAt( _loopCounter1 -1), 1, 0);
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter1 -1), Translate("] Step: "), Translate("Tilt"), Translate(""), Translate(""));
        }
        _rtnCode = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltingModules.ElementAt( _loopCounter1 -1));
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter1 -1), Translate("] Step: "), Translate("Close"), Translate(""), Translate(""));
        }
        _rtnCode = Hamilton_Tilt_Clamp_Module::Terminate(arrTiltingModules.ElementAt( _loopCounter1 -1));
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter1 -1), Translate("] Step: "), Translate("Terminate"), Translate(""), Translate(""));
        }
      }
    }
  }
  if (blnScaps_State == 1)
  {
    SCAP_STARPLUS::Disconnect();
  }
  if (blnHhsDevices_State == 1)
  {
    _intHhsDeviceArraySize=arrHhsDevices.GetSize();
    {
      for(_loopCounter2 = 0; _loopCounter2 < _intHhsDeviceArraySize;)
      {
        _loopCounter2 = _loopCounter2 + 1;
        _rtnCode = HSLHamHeaterShaker::StopTempCtrl(arrHhsDevices.ElementAt( _loopCounter2 -1));
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopTempCtrl"), Translate(" Error Code: "), rtnCode);
        }
        _rtnCode = HSLHamHeaterShaker::StopShaker(arrHhsDevices.ElementAt( _loopCounter2 -1));
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), rtnCode);
        }
        _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 0);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), rtnCode);
        }
      }
    }
    HSLHamHeaterShaker::Terminate();
  }
  SIASCENTRIFUGE::Terminate(121);
}

private function A_MethodInit( variable & o_blnSimMode, variable & o_blnAdmin, variable & o_blnAswStatusDialog, variable & o_blnSCAPs, variable & o_blnTiltModules, variable & o_blnHHSs, variable & o_strActiveRequestFolderPath, timer & o_tmrHepaFan, variable & o_arrTiltModules[], variable & o_arrHHSDevices[], variable & o_blnCentrifuge ) variable {
  private dialog customDialog_2;
  private variable _blnSCAPTraceLevel;
  private variable _strSimMode;
  private variable _rtnValue;
  private variable _strMessage;
  private variable _strUsersPreferredName;
  private variable _;
  private variable _intFanSpeed;
  private variable __[];
  private variable _intTiltCount;
  private variable _intTiltComport;
  private variable _strTilt;
  private variable _strModuleName;
  private variable _loopCounter2;
  private variable _rtnCode;
  private variable _intKennyTimeout;
  private variable _intKennyComport;
  private variable _strHHS;
  private variable _loopCounter3;
  private variable _intHHSCount;
  private variable _loopCounter4;
  private variable _loopCounter5;
  private variable _strMethodFolderPath;
  private variable _intActiveRequestArraySize;
  private variable _arrActiveRequestFilePaths[];
  private variable _arrSCAPComports[];
  private variable _intHHSArraySize;
  private variable _strActionProgress;
  private variable _strActionCompleteError;
  private variable _strActionComplete;
  private variable _strActionStart;
  private variable _intCentrifugeID;
  o_blnSimMode = 0;
  o_blnAdmin = 0;
  o_blnAswStatusDialog = 0;
  o_blnSCAPs = 0;
  o_blnTiltModules = 0;
  o_blnHHSs = 0;
  o_strActiveRequestFolderPath = 0;
  o_arrTiltModules.SetSize( 0);
  o_arrHHSDevices.SetSize( 0);
  o_blnCentrifuge = 0;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                         Method Initialisation - Start\n\n******************************************************************************************************************************************************"));
  TRACELEVEL::SetTraceLevel(intTrace);
  o_arrTiltModules.SetSize(0);
  o_arrHHSDevices.SetSize(0);
  o_blnAdmin = 0;
  o_blnSimMode = 0;
  o_blnAswStatusDialog = 0;
  o_blnSCAPs = 0;
  o_blnTiltModules = 0;
  o_blnHHSs = 0;
  o_strActiveRequestFolderPath = Translate("");
  MECC::TraceComment(Translate("========== Software Dependencies =========="));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Setting TraceLevel -----"), Translate(""));
  _strActionStart = Translate("/");
  _strActionProgress = Translate(" = ");
  _strActionComplete = Translate("*");
  _strActionCompleteError = Translate(" ^ ");
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, _strActionStart);
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::PROGRESS, _strActionProgress);
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, _strActionComplete);
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, _strActionCompleteError);
  _blnSCAPTraceLevel = 0;
  if (intTrace == 2)
  {
    _blnSCAPTraceLevel = 1;
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Start Indicator: '"), _strActionStart, Translate("'"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Progress Indicator: '"), _strActionProgress, Translate("'"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Complete Indicator: '"), _strActionComplete, Translate("'"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Complete w/ Error Indicator: '"), _strActionCompleteError, Translate("'"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> TraceLevel Initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Establishing AswStatusDialog -----"), Translate(""));
  o_blnAswStatusDialog = 1;
  SANGERGENERAL::StatusDisplay_Init(0);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> AswStatusDialog Initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Identifying User -----"), Translate(""));
  _strUsersPreferredName = Translate("Chris");
  o_blnAdmin = 1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Admin Level: "), o_blnAdmin);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- User: "), _strUsersPreferredName);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User Identified"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Get Run Mode -----"), Translate(""));
  o_blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (o_blnSimMode == 1)
  {
    _strSimMode = Translate("Sim");
    if (o_blnAdmin == 0)
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      _rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      if (_rtnValue == 2)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method ended by user"), Translate(""));
        return (1);
      }
    }
  }
  else
  {
    _strSimMode = Translate("Live");
  }
  if (blnTestingMode == 1)
  {
    _strMessage = Translate("Instrument: Testing Mode");
  }
  else
  {
    _strMessage = Translate("Instrument: Operational Mode");
  }
  SANGERGENERAL::StatusDisplay_Update(_strMessage, Translate(""), 0);
  SANGERGENERAL::StatusDisplay_Update(Translate("Instrument mode: "), _strSimMode, 0);
  if (o_blnSimMode == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Simulation Mode"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument Run Mode"), Translate(""));
  }
  MECC::TraceComment(Translate("========== Instrument Modules =========="));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> STARPlus Initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Initialise Hepa Filters -----"), Translate(""));
  _arrSCAPComports.SetSize(0);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,scapComports"), 0, _arrSCAPComports, _);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,fanSpeed"), 0, __, _intFanSpeed);
  SCAP_STARPLUS::Connect(_arrSCAPComports, _blnSCAPTraceLevel, o_blnSimMode, blnTestingMode);
  SCAP_STARPLUS::SetLightState(1);
  SCAP_STARPLUS::SetFanSpeed(_intFanSpeed);
  if (_intFanSpeed != 0)
  {
    SCAP_STARPLUS::SetFanState(1);
  }
  if( 0 == o_tmrHepaFan.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  o_blnSCAPs = 1;
  SANGERGENERAL::StatusDisplay_Update(Translate("Connected to Hepa filters"), Translate(""), 0);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> SCAP Filters Initialised "), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Initialise Kenny -----"), Translate(""));
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,kennyComport"), intTrace, __, _intKennyComport);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,kennyTimeout"), intTrace, __, _intKennyTimeout);
  _rtnCode = HSLBarcodeReader::SetSimulation(o_blnSimMode);
  if (_rtnCode != 0)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetSimulation"), Translate(""), Translate(""), Translate(""), Translate(""));
    return (1);
  }
  if (o_blnSimMode == 0)
  {
    _rtnCode = HSLBarcodeReader::SetComPort(_intKennyComport);
    if (_rtnCode != 0)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetComPort"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
    _rtnCode = HSLBarcodeReader::SetTimeout(_intKennyTimeout);
    if (_rtnCode != 0)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetTimeout"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
    _rtnCode = HSLBarcodeReader::SetErrorRecovery(2);
    if (_rtnCode != 0)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetErrorRecovery"), Translate(""), Translate(""), Translate(""), Translate(""));
      abort;
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Kenny initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Initialise Tilt Modules -----"), Translate(""));
  o_blnTiltModules = 1;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,tiltClampComport"), intTrace, __, _intTiltComport);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,tiltCount"), intTrace, __, _intTiltCount);
  {
    for(_loopCounter2 = 0; _loopCounter2 < _intTiltCount;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      _strTilt = StrConcat2(Translate("devTilt_"), _loopCounter2);
      o_arrTiltModules.AddAsLast(_strTilt);
      _strModuleName = StrConcat2(Translate("C"), _loopCounter2);
      _rtnCode = Hamilton_Tilt_Clamp_Module::Initialize(_intTiltComport, _strModuleName, o_blnSimMode, 0, o_arrTiltModules.ElementAt( _loopCounter2 -1));
      if (_rtnCode == 0)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrTiltModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("Initialise"), Translate(""), Translate(""));
        return (1);
      }
      _rtnCode = Hamilton_Tilt_Clamp_Module::SetTraceLevel(o_arrTiltModules.ElementAt( _loopCounter2 -1), intTrace);
      if (_rtnCode == 0)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrTiltModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetTraceLevel"), Translate(""), Translate(""));
        return (1);
      }
      if (o_blnSimMode == 0)
      {
        _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(o_arrTiltModules.ElementAt( _loopCounter2 -1), 10, 0);
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrTiltModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("TIlt"), Translate(""), Translate(""));
          return (1);
        }
      }
    }
  }
  SANGERGENERAL::StatusDisplay_Update(Translate("Connected to tilt modules"), Translate(""), 0);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("-- Tilt Module IDs"), o_arrTiltModules);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), _intTiltCount, Translate(" Tilt Modules Initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Initialise Heater Shakers -----"), Translate(""));
  o_blnHHSs = 1;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,hhsCount"), intTrace, __, _intHHSCount);
  if (o_blnSimMode == 0)
  {
    HSLHamHeaterShaker::SetSimulation(o_blnSimMode);
    HSLHamHeaterShaker::SetUSBTrace(_blnSCAPTraceLevel);
    {
      for(_loopCounter3 = 0; _loopCounter3 < _intHHSCount;)
      {
        _loopCounter3 = _loopCounter3 + 1;
        _strHHS = StrConcat2(Translate("devHHS_"), _loopCounter3);
        _rtnCode = HSLHamHeaterShaker::CreateUsbDevice(_loopCounter3, _strHHS);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), _strHHS, Translate("] Step: "), Translate("CreateUsbDevice"), Translate(" Error Code: "), _rtnCode);
          return (1);
        }
        _rtnCode = HSLHamHeaterShaker::StopShaker(_strHHS);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrHHSDevices.ElementAt( _loopCounter4 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), _rtnCode);
          return (1);
        }
        _rtnCode = HSLHamHeaterShaker::SetPlateLock(_strHHS, 0);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrHHSDevices.ElementAt( _loopCounter4 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
          return (1);
        }
        o_arrHHSDevices.AddAsLast(_strHHS);
      }
    }
  }
  else
  {
    {
      for(_loopCounter4 = 0; _loopCounter4 < _intHHSCount;)
      {
        _loopCounter4 = _loopCounter4 + 1;
        _strHHS = StrConcat2(Translate("devHHS_"), _loopCounter4);
        o_arrHHSDevices.AddAsLast(_strHHS);
      }
    }
  }
  _intHHSArraySize=o_arrHHSDevices.GetSize();
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("-- HHS Device IDs"), o_arrHHSDevices);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), _intHHSArraySize, Translate(" HHS Modules Initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Initialise Centrifuge -----"), Translate(""));
  o_blnCentrifuge = 1;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,centrifugeID"), intTrace, __, _intCentrifugeID);
  HSLSiasCentrifuge::SetSimulationMode(o_blnSimMode);
  if (o_blnSimMode == 0)
  {
    _rtnCode = HSLSiasCentrifuge::Initialize(_intCentrifugeID, Translate("Sias_Centrifuge"));
    if (_rtnCode != 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running '_Module_Centrifuge'."), Translate(" The method will abort"));
      return (1);
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Centrifuge ID: "), _intCentrifugeID);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), Translate("Centrifuge "), _intCentrifugeID, Translate(" Initialised."));
  MECC::TraceComment(Translate("========== Clear Old Worklists =========="));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Checking for past worklists..."), Translate(""));
  _strMethodFolderPath = GetMethodFolder(0);
  _arrActiveRequestFilePaths.SetSize(0);
  o_strActiveRequestFolderPath = StrConcat2(_strMethodFolderPath, Translate("Request Files\\"));
  _rtnCode = FileDirectoryLib::CheckIfDirectoryExists(o_strActiveRequestFolderPath);
  if (_rtnCode == 1)
  {
    _rtnCode = FileDirectoryLib::CreateDirectory(o_strActiveRequestFolderPath);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not create Directory: "), o_strActiveRequestFolderPath);
      return (1);
    }
  }
  FileDirectoryLib::GetFilesInDirectory(o_strActiveRequestFolderPath, Translate("*"), _arrActiveRequestFilePaths);
  _intActiveRequestArraySize=_arrActiveRequestFilePaths.GetSize();
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of old requests found: "), _intActiveRequestArraySize);
  if (_intActiveRequestArraySize >= 1)
  {
    {
      for(_loopCounter5 = 0; _loopCounter5 < _intActiveRequestArraySize;)
      {
        _loopCounter5 = _loopCounter5 + 1;
        _rtnCode = FileDirectoryLib::DeleteFile(_arrActiveRequestFilePaths.ElementAt( _loopCounter5 -1));
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not delete old worklist: "), _arrActiveRequestFilePaths.ElementAt( _loopCounter5 -1));
          return (1);
        }
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Old Worklist Folder: "), o_strActiveRequestFolderPath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Successfully cleared old requests"), Translate(""));
  return (0);
}

private function B_GetWorklist( variable i_intTimeToWait, variable & o_strProcessType, variable & o_intUniqueSrcBCArraySize, variable & o_intUniqueDestBCArraySize, variable & o_arrWorklistBC[] ) variable {
  private variable _arrPendingRequestFiles[];
  private variable _intPendingRequestArraySize;
  private variable _loopCounter1;
  private variable _strActiveRequestFilePath;
  private variable _intIndex;
  private variable _strPendingFolderPath;
  private variable _rtnValue;
  private variable _intWorklistPos;
  private variable _rtnCode;
  private timer _tmrWait;
  private variable _blnError;
  private variable _arrWorklist_Processes[];
  private variable _arrWorklist_Dates[];
  private variable _arrWorklist_DestWells[];
  private variable _arrWorklist_SrcBC[];
  private variable _arrWorklist_DestLabwares[];
  private variable _arrWorklist_SrcWells[];
  private variable _arrWorklist_SrcLabwares[];
  private variable _hndWorklist_Process;
  private variable _hndWorklist_SrcBC;
  private variable _hndWorklist_DestBC;
  private variable _hndWorklist_SrcWell;
  private variable _hndWorklist_DestLabware;
  private variable _hndWorklist_Date;
  private variable _hndWorklist_SrcLabware;
  private variable _loopCounter2;
  private variable _hndWorklist_DestWell;
  private file _hndWorklist;
  private variable __[];
  private variable _arrWorklist_DestBC[];
  private variable _intUniqueProcessesArraySize;
  private variable _arrUniqueProcesses[];
  private variable _intApprovedProcessesArraySize;
  private variable _blnPass;
  private variable _loopCounter3;
  private variable _;
  private variable _arrApprovedProcesses[];
  private variable _arrUniqueBC_Src[];
  private variable _arrUniqueBC_Dest[];
  private variable _strSrcLabware;
  private variable _strDestLabware;
  private variable _strCurrentRunFolderPath;
  private variable _strArchiveFilePath;
  private variable _intPreviousRunsArraySize;
  private variable _strArchiveFolderPath;
  private variable _intCurrentRunNum;
  private variable _strFolderDate;
  private variable _arrPreviousRuns[];
  private variable _str;
  private variable _loopCounter4;
  private variable _int;
  private variable _arrDisplayRequestFiles[];
  private variable _intLength;
  private variable _arrWorklistBC[];
  private dialog customDialog_3;
  o_strProcessType = 0;
  o_intUniqueSrcBCArraySize = 0;
  o_intUniqueDestBCArraySize = 0;
  o_arrWorklistBC.SetSize( 0);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Find Pending Request - Start\n\n******************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("========== Find Worklist =========="));
  _intIndex = 0;
  _arrPendingRequestFiles.SetSize(0);
  _arrDisplayRequestFiles.SetSize(0);
  _strPendingFolderPath = StrConcat2(strActiveRequestFolder, Translate("Pending Files\\"));
  _strActiveRequestFilePath = StrConcat2(strActiveRequestFolder, Translate("ActiveRequest.csv"));
  {
    _loopCounter1 = 0;
    while (1 == 1)
    {
      _loopCounter1 = _loopCounter1 + 1;
      if (_intIndex == 3)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> No Available Worklist"), Translate(""));
        return (1);
      }
      FileDirectoryLib::GetFilesInDirectory(_strPendingFolderPath, Translate("*.*"), _arrPendingRequestFiles);
      _intPendingRequestArraySize=_arrPendingRequestFiles.GetSize();
      {
        for(_loopCounter4 = 0; _loopCounter4 < _intPendingRequestArraySize;)
        {
          _loopCounter4 = _loopCounter4 + 1;
          _int = StrReverseFind(_arrPendingRequestFiles.ElementAt( _loopCounter4 -1), Translate("\\"));
          _intLength = StrGetLength(_arrPendingRequestFiles.ElementAt( _loopCounter4 -1));
          _int = _intLength - _int;
          _int = _int - 1;
          _str = StrRight(_arrPendingRequestFiles.ElementAt( _loopCounter4 -1), _int);
          _arrDisplayRequestFiles.AddAsLast(_str);
        }
      }
      if (_intPendingRequestArraySize >= 1)
      {
        if (blnTestingMode == 1)
        {
          _intWorklistPos = 6;
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _arrDisplayRequestFiles );
          customDialog_3.SetCustomDialogProperty( "comboBox1.SelectedIndex", _intWorklistPos );
          customDialog_3.ShowCustomDialog();
          _rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
          _intWorklistPos = customDialog_3.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
          if (_rtnValue == 2)
          {
            return (1);
          }
          _rtnCode = FileDirectoryLib::CopyFile(_arrPendingRequestFiles.ElementAt( _intWorklistPos -1), _strActiveRequestFilePath);
          if (_rtnCode == 1)
          {
            MECC::TraceComment(Translate("CopyFile of HSLFileDirectoryLib had an error"));
            return (1);
          }
        }
        else
        {
          _rtnCode = FileDirectoryLib::MoveFile(_arrPendingRequestFiles.ElementAt( 1 -1), _strActiveRequestFilePath);
          if (_rtnCode == 1)
          {
            MECC::TraceComment(Translate("MoveFile of HSLFileDirectoryLib had an error"));
            return (1);
          }
        }
        break;
      }
      else
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, Translate(""), Translate(""), Translate("Searching for worklist"));
        if( 0 == _tmrWait.SetTimer(i_intTimeToWait) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == _tmrWait.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _intIndex = _intIndex + 1;
      }
    }
  }
  if (blnTestingMode == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Filepath: "), _arrPendingRequestFiles.ElementAt( _intWorklistPos -1));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Filepath: "), _arrPendingRequestFiles.ElementAt( 1 -1));
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- New Worklist Filepath: "), _strActiveRequestFilePath);
  _blnError = 0;
  _arrWorklist_SrcBC.SetSize(0);
  _arrWorklist_DestBC.SetSize(0);
  _arrWorklist_Dates.SetSize(0);
  _arrWorklist_Processes.SetSize(0);
  _arrWorklist_SrcWells.SetSize(0);
  _arrWorklist_DestWells.SetSize(0);
  _arrWorklist_SrcLabwares.SetSize(0);
  _arrWorklist_DestLabwares.SetSize(0);
  _hndWorklist.AddField("Source Barcode", _hndWorklist_SrcBC, hslString, 255);
  _hndWorklist.AddField("Source Well ID", _hndWorklist_SrcWell, hslString, 255);
  _hndWorklist.AddField("Source Labware ID", _hndWorklist_SrcLabware, hslString, 255);
  _hndWorklist.AddField("Destination Barcode", _hndWorklist_DestBC, hslString, 255);
  _hndWorklist.AddField("Destination Well ID", _hndWorklist_DestWell, hslString, 255);
  _hndWorklist.AddField("Destination Labware ID", _hndWorklist_DestLabware, hslString, 255);
  _hndWorklist.AddField("Date", _hndWorklist_Date, hslString, 8);
  _hndWorklist.AddField("Process", _hndWorklist_Process, hslString, 255);
  _hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == _hndWorklist.Open(_strActiveRequestFilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strActiveRequestFilePath, "HxMetEdCompCmd");
  }
  {
    _loopCounter2 = 0;
    while (
       (_hndWorklist.Eof() == 0)
    )
    {
      _loopCounter2 = _loopCounter2 + 1;
      if( 0 == _hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_Process, 1);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with _hndWorklist_Process. Exiting loop "), Translate(""));
        break;
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_SrcBC, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Barcode"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_DestBC, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Barcode"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_Date, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Date"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_SrcWell, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Well ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_DestWell, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Well ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_SrcLabware, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Labware ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_DestLabware, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Labware ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      StrMakeLower(_hndWorklist_Process);
      StrMakeLower(_hndWorklist_SrcLabware);
      StrMakeLower(_hndWorklist_DestLabware);
      _arrWorklist_Processes.AddAsLast(_hndWorklist_Process);
      _arrWorklist_SrcBC.AddAsLast(_hndWorklist_SrcBC);
      _arrWorklist_DestBC.AddAsLast(_hndWorklist_DestBC);
      _arrWorklist_Dates.AddAsLast(_hndWorklist_Date);
      _arrWorklist_SrcWells.AddAsLast(_hndWorklist_SrcWell);
      _arrWorklist_DestWells.AddAsLast(_hndWorklist_DestWell);
      _arrWorklist_SrcLabwares.AddAsLast(_hndWorklist_SrcLabware);
      _arrWorklist_DestLabwares.AddAsLast(_hndWorklist_DestLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Worklist Line Count: "), _loopCounter2);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Date:                "), _hndWorklist_Date);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Process:             "), _hndWorklist_Process);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- SourceWellID:        "), _hndWorklist_SrcWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- SourceLabware:       "), _hndWorklist_SrcLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- SourceBarcode:       "), _hndWorklist_SrcBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- DestinationWellID:   "), _hndWorklist_DestWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- DestinationLabware:  "), _hndWorklist_DestLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- DestinationBarcode:  "), _hndWorklist_DestBC);
    }
  }
  if( 0 != _hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  _hndWorklist.RemoveFields();
  TRACEARRAY::TraceArray(Translate("Full Worklist Trace"), _arrWorklist_SrcBC, _arrWorklist_SrcWells, _arrWorklist_SrcLabwares, _arrWorklist_DestBC, _arrWorklist_DestWells, _arrWorklist_DestLabwares, _arrWorklist_Dates, _arrWorklist_Processes, __, __, __, __, __, __, __, __);
  MECC::TraceComment(Translate("========== Worklist Validation =========="));
  SANGERGENERAL::StatusDisplay_Update(Translate("----- Performing Worklist Checks -----"), Translate(""), 0);
  _arrUniqueProcesses.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(_arrWorklist_Processes, _arrUniqueProcesses, 0);
  _intUniqueProcessesArraySize=_arrUniqueProcesses.GetSize();
  if (_intUniqueProcessesArraySize != 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many processes in the active worklist. "), Translate("Please copy the worklist and split the processes types into individual worklists"));
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many process types in worklist"), Translate(""), 0);
    abort;
  }
  o_strProcessType = _arrUniqueProcesses.ElementAt( 1 -1);
  _arrApprovedProcesses.SetSize(0);
  _blnPass = 0;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("approvedProcessConfig"), 0, _arrApprovedProcesses, _);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), _arrApprovedProcesses);
  _intApprovedProcessesArraySize=_arrApprovedProcesses.GetSize();
  {
    for(_loopCounter3 = 0; _loopCounter3 < _intApprovedProcessesArraySize;)
    {
      _loopCounter3 = _loopCounter3 + 1;
      if (_arrApprovedProcesses.ElementAt( _loopCounter3 -1) == o_strProcessType)
      {
        _blnPass = 1;
        break;
      }
    }
  }
  if (_blnPass == 0)
  {
    MECC::TraceComment(Translate("----- Process is not on the approved list -----"));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Process: "), o_strProcessType);
  SANGERGENERAL::StatusDisplay_Update(Translate("Process Type: "), o_strProcessType, 0);
  _arrUniqueBC_Src.SetSize(0);
  _arrUniqueBC_Dest.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(_arrWorklist_SrcBC, _arrUniqueBC_Src, 0);
  UNIQUE_MEMBERS::Unique_members(_arrWorklist_DestBC, _arrUniqueBC_Dest, 0);
  o_intUniqueSrcBCArraySize=_arrUniqueBC_Src.GetSize();
  o_intUniqueDestBCArraySize=_arrUniqueBC_Dest.GetSize();
  _arrWorklistBC = HSLExtensions::Array::Concat(_arrUniqueBC_Src, _arrUniqueBC_Dest);
  UNIQUE_MEMBERS::Unique_members(_arrWorklistBC, o_arrWorklistBC, 0);
  TRACEARRAY::TraceArray(Translate(">> Unique Barcodes"), _arrUniqueBC_Src, _arrUniqueBC_Dest, __, __, __, __, __, __, __, __, __, __, __, __, __, __);
  _strSrcLabware=_arrWorklist_SrcLabwares.GetAt(1-1);
  _strDestLabware=_arrWorklist_DestLabwares.GetAt(1-1);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strSourceLabwareType = "), _strSrcLabware);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strDestinationLabwareType = "), _strDestLabware);
  MECC::TraceComment(Translate("========== Archive Worklist =========="));
  if (blnAdministrator != 1)
  {
    _strFolderDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
    _strArchiveFolderPath = StrConcat4(strActiveRequestFolder, Translate("Archive\\"), _strFolderDate, Translate("\\"));
    _rtnCode = FileDirectoryLib::CheckIfDirectoryExists(_strArchiveFolderPath);
    if (_rtnCode == 0)
    {
      _rtnCode = FileDirectoryLib::CreateDirectory(_strArchiveFolderPath);
      if (_rtnCode == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not create folder: "), _strArchiveFolderPath);
        return (1);
      }
    }
    _arrPreviousRuns.SetSize(0);
    FileDirectoryLib::GetSubdirectoriesOfDirectory(_strArchiveFolderPath, _arrPreviousRuns);
    _intPreviousRunsArraySize=_arrPreviousRuns.GetSize();
    _intCurrentRunNum = _intPreviousRunsArraySize + 1;
    _strCurrentRunFolderPath = StrConcat4(_strArchiveFolderPath, Translate("Run "), _intCurrentRunNum, Translate("\\"));
    _rtnCode = FileDirectoryLib::CheckIfDirectoryExists(_strCurrentRunFolderPath);
    if (_rtnCode == 0)
    {
      _rtnCode = FileDirectoryLib::CreateDirectory(_strCurrentRunFolderPath);
      if (_rtnCode == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not create folder: "), _strCurrentRunFolderPath);
        return (1);
      }
    }
    _strArchiveFilePath = StrConcat4(_strCurrentRunFolderPath, Translate(""), loopCounter1, Translate("_OriginalWorklist.csv"));
    _rtnCode = FileDirectoryLib::MoveFile(_strActiveRequestFilePath, _strArchiveFilePath);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("Could not move request file to archive folder"), Translate(""));
      return (1);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> File Location: "), _strArchiveFilePath);
  }
  return (0);
}

private function E_PipettingSteps( variable & o_strCurrentStep ) variable {
  private dialog customDialog_4;
  private variable _strJsonSearch;
  private variable _strCurrentStep_Event;
  private variable _arrActiveWorkflow[];
  private variable _;
  private variable _intFound;
  private variable _strStep;
  private variable _rtnValue;
  private variable _loopCounter3;
  private variable _intStepLength;
  private variable _int;
  private variable blnFirstLabwareTrp;
  private variable _strNextStep;
  private variable _intNumberOfWorkflowSteps;
  private variable _strStepToSearchFor;
  private variable _blnToolType;
  private variable _rtnCode;
  private variable _intCellConcentration;
  private variable _intCellTransferVolume;
  private variable _loopCounter4;
  private variable _intCellsToSeed;
  private variable _blnCheck;
  private dialog customDialog_5;
  private variable _intSwayTime;
  private variable _intTimerTime;
  private variable _intTimerDetails_HHS;
  private timer _tmrHHS;
  private variable _strDots;
  private variable _intElapsedTime;
  private variable _loopCounter5;
  private variable _intMinTimerDuration;
  private variable _fltWaitCompletion;
  private timer _tmrTemp;
  private variable _blnLogFileCheck;
  private variable _strLogFileCheck;
  private variable _strLogFileFolder;
  private variable _intShake;
  private variable _intHeat;
  private variable _intAllSequencesArraySize;
  private variable _intArrayPos;
  private variable _intSeqTotal;
  private variable _intPlatesProcessed;
  private variable _loopCounter6;
  private variable _loopCounter7;
  private variable _strLabwareID;
  private variable __[];
  private variable _fltPause;
  private variable _strStep_Event;
  private variable _loopCounter9;
  private variable _arrActiveWorkflow_Events[];
  private variable _arrActiveWorkflow_Details[];
  private variable _strStep_Detail;
  private variable _strCurrentStep_Detail;
  private variable _intDispenseSubmerge;
  private variable _intDispenseHeight;
  private variable _intDispenseRetract;
  private variable _intDispenseMixVolume;
  private variable _intDispenseMixCycles;
  private variable _intDispenseLLD;
  private variable _intAspirateHeight;
  private variable _blnSourceIncrement;
  private variable _intAspirateRetract;
  private variable _strLiquidClass;
  private variable _blnDestinationIncrement;
  private sequence _seqDestination;
  private sequence _seqSource;
  private variable _intAspirateSubmerge;
  private variable _intAspirateLLD;
  private variable _intAspirateMixVolume;
  private variable _intAspirateMixCycles;
  private variable _strCurrentStep;
  private variable _strNextStep_Event;
  private variable _strNextStep_Details;
  private variable _strNextStep_Detail;
  private variable _intNextStep;
  private variable _blnAspirateFollowing;
  private variable _intTransferVolume;
  private variable _strComment;
  private variable _blnDispenseFollowing;
  private variable _strSource;
  private variable _intThroughput;
  private variable _strDestination;
  private variable _blnCheckOnPickup;
  private variable _blnParkAfterUse;
  private variable strTransportConfig;
  private variable _blnCheckOnPlace;
  private variable _strModule_Dest;
  private variable _strModule_Src;
  private variable strPipettingConfig;
  private variable _blnErrorState;
  private variable _blnFreshTipsPerPipette;
  private variable _blnEjectTipsOnCompletion;
  private variable _intPresent;
  private variable _intSpinAccel;
  private variable _intSpinTime;
  private variable _intSpinSpeed;
  private variable _arrAspirateSettings[];
  private variable _arrDispenseSettings[];
  private variable _intTiltAngle;
  o_strCurrentStep = 0;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                        Pipetting Steps - Start\n\n******************************************************************************************************************************************************"));
  SANGERGENERAL::StatusDisplay_Update(Translate("===== Pipetting steps to begin ====="), Translate(""), 0);
  _arrActiveWorkflow.SetSize(0);
  JSONSEARCH::GetJSONEntry(Translate(""), strProcess, 0, _arrActiveWorkflow, _);
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Process Step "), _arrActiveWorkflow);
  _arrActiveWorkflow_Events.SetSize(0);
  _arrActiveWorkflow_Details.SetSize(0);
  _intNumberOfWorkflowSteps=_arrActiveWorkflow.GetSize();
  {
    for(_loopCounter9 = 0; _loopCounter9 < _intNumberOfWorkflowSteps;)
    {
      _loopCounter9 = _loopCounter9 + 1;
      _strStep=_arrActiveWorkflow.GetAt(_loopCounter9-1);
      _intStepLength = StrGetLength(_strStep);
      _intFound = StrFind(_strStep, Translate("_"));
      _strStep_Event = StrLeft(_strStep, _intFound);
      _intFound = StrFind(_strStep, Translate("_"));
      _int = _intStepLength - _intFound - 1;
      _strStep_Detail = StrRight(_strStep, _int);
      _arrActiveWorkflow_Events.AddAsLast(_strStep_Event);
      _arrActiveWorkflow_Details.AddAsLast(_strStep_Detail);
    }
  }
  TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Workflow Event"), Translate("Workflow Detail"), _arrActiveWorkflow_Events, _arrActiveWorkflow_Details);
  if (blnSimulationMode == 0)
  {
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    _rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if (_rtnValue == 2)
    {
      return (1);
    }
  }
  MECC::TraceComment(Translate("====================================\n          Start workflow\n===================================="));
  blnFirstLabwareTrp = 0;
  _intCellTransferVolume = 0;
  {
    _loopCounter3 = 0;
    while (1 == 1)
    {
      _loopCounter3 = _loopCounter3 + 1;
      strTransportConfig = StrConcat2(Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\AutomatedCellCulture\\Config\\"), Translate("TransportConfig.json"));
      strPipettingConfig = StrConcat2(Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\AutomatedCellCulture\\Config\\"), Translate("PipettingConfig.json"));
      _strCurrentStep=_arrActiveWorkflow.GetAt(_loopCounter3-1);
      _strCurrentStep_Event=_arrActiveWorkflow_Events.GetAt(_loopCounter3-1);
      _strCurrentStep_Detail=_arrActiveWorkflow_Details.GetAt(_loopCounter3-1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Event: "), _strCurrentStep_Event);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Details: "), _strCurrentStep_Detail);
      _intNextStep = _loopCounter3 + 1;
      if (_intNextStep <= _intNumberOfWorkflowSteps)
      {
        _strNextStep=_arrActiveWorkflow.GetAt(_intNextStep-1);
        _strNextStep_Event=_arrActiveWorkflow_Events.GetAt(_intNextStep-1);
        _strNextStep_Detail=_arrActiveWorkflow_Details.GetAt(_intNextStep-1);
      }
      else
      {
        _strNextStep = Translate("");
        _strNextStep_Event = Translate("");
        _strNextStep_Details = Translate("");
      }
      _strComment = StrConcat4(Translate("["), _loopCounter3, Translate("] "), _arrActiveWorkflow.ElementAt( _loopCounter3 -1));
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("Automated Cell Culture"), Translate(""), _strComment);
      _strStepToSearchFor = Translate("transport");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _blnToolType = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnToolType"));
        JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnToolType);
        _blnErrorState = 0;
        if (_blnToolType < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnToolType > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnToolType"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to CO-RE Grips"), Translate(""));
          _blnToolType = 1;
        }
        _blnParkAfterUse = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnParkAfterUse"));
        JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnParkAfterUse);
        _blnErrorState = 0;
        if (_blnParkAfterUse < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnParkAfterUse > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnParkAfterUse"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to eject on completion"), Translate(""));
          _blnParkAfterUse = 1;
        }
        _intThroughput = 0;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intThroughput"));
        JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _intThroughput);
        _blnErrorState = 0;
        if (_intThroughput < 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_intThroughput"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _blnCheckOnPickup = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnCheckOnPickup"));
        JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnCheckOnPickup);
        _blnErrorState = 0;
        if (_blnCheckOnPickup < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnCheckOnPickup > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnCheckOnPickup"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no check"), Translate(""));
          _blnCheckOnPickup = 0;
        }
        _blnCheckOnPlace = 0;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnCheckOnPlace"));
        JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnCheckOnPlace);
        _blnErrorState = 0;
        if (_blnCheckOnPlace < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnCheckOnPlace > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnCheckOnPlace"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no check"), Translate(""));
          _blnCheckOnPlace = 0;
        }
        _strSource = Translate("");
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",strSource"));
        JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _strSource);
        _rtnCode = _GetActiveSequence(arrAllSequences, _strSource, _seqSource);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
          return (1);
        }
        _blnErrorState = 0;
        if (_strSource == "")
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_strSource"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _strModule_Src = Translate("");
        if (_strSource == "AutoFlask_Tilt")
        {
          _strModule_Src = Translate("tilt");
        }
        if (_strSource == "AutoFlask_HHS")
        {
          _strModule_Src = Translate("hhs");
        }
        _strDestination = Translate("");
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",strDestination"));
        JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _strDestination);
        _rtnCode = _GetActiveSequence(arrAllSequences, _strDestination, _seqDestination);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
          return (1);
        }
        _blnErrorState = 0;
        if (_strDestination == "")
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_strDestination"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _strModule_Dest = Translate("");
        if (_strDestination == "AutoFlask_Tilt")
        {
          _strModule_Dest = Translate("tilt");
        }
        if (_strDestination == "AutoFlask_HHS")
        {
          _strModule_Dest = Translate("hhs");
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Submethod"), Translate(""));
        _rtnCode = Trp_DeckTransport(_seqSource, _seqDestination, _blnToolType, _blnParkAfterUse, _intThroughput, _blnCheckOnPickup, _blnCheckOnPlace, _strModule_Src, _strModule_Dest);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'Trp_DeckTransport'."), Translate(" The method will abort"));
          return (1);
        }
      }
      _strStepToSearchFor = Translate("pipetting");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _arrAspirateSettings.SetSize(0);
        _arrDispenseSettings.SetSize(0);
        _intTransferVolume = 0;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intTransferVolume"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intTransferVolume);
        _blnErrorState = 0;
        if (_intTransferVolume < 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_intTransferVolume"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _blnFreshTipsPerPipette = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnFreshTipsPerPipette"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _blnFreshTipsPerPipette);
        _blnErrorState = 0;
        if (_blnFreshTipsPerPipette < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnFreshTipsPerPipette > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("blnFreshTipsPerPipette"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to replacing tips"), Translate(""));
          _blnFreshTipsPerPipette = 1;
        }
        _blnEjectTipsOnCompletion = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnEjectTipsOnCompletion"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _blnEjectTipsOnCompletion);
        _blnErrorState = 0;
        if (_blnEjectTipsOnCompletion < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnEjectTipsOnCompletion > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("blnEjectTipsOnCompletion"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to ejecting tips"), Translate(""));
          _blnEjectTipsOnCompletion = 1;
        }
        _strLiquidClass = Translate("");
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",strLiquidClass"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _strLiquidClass);
        if (_strLiquidClass == "")
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with Pipetting Steps. Cannot identify "), _strJsonSearch);
          return (1);
        }
        _strSource = Translate("");
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",strSource"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _strSource);
        _rtnCode = _GetActiveSequence(arrAllSequences, _strSource, _seqSource);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
          return (1);
        }
        _blnErrorState = 0;
        if (_strSource == "")
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("strSource"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _strModule_Src = Translate("");
        if (_strSource == "AutoFlask_Tilt")
        {
          _strModule_Src = Translate("tilt");
          _intTiltAngle = 10;
        }
        if (_strSource == "AutoFlask_HHS")
        {
          _strModule_Src = Translate("hhs");
        }
        _blnSourceIncrement = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnSourceIncrement"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _blnSourceIncrement);
        _blnErrorState = 0;
        if (_blnSourceIncrement < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnSourceIncrement > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("blnSourceIncrement"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _intAspirateLLD = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intAspirateLLD"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intAspirateLLD);
        _blnErrorState = 0;
        if (_intAspirateLLD < 0)
        {
          _blnErrorState = 1;
        }
        if (_intAspirateLLD > 5)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intAspirateLLD"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _arrAspirateSettings.AddAsLast(_intAspirateLLD);
        _intAspirateSubmerge = -1;
        if (_intAspirateLLD != 0)
        {
          _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intAspirateSubmerge"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intAspirateSubmerge);
          _blnErrorState = 0;
          if (_intAspirateSubmerge < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intAspirateSubmerge"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
        }
        _arrAspirateSettings.AddAsLast(_intAspirateSubmerge);
        _intAspirateHeight = 0;
        if (_intAspirateLLD == 0)
        {
          _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intAspirateHeight"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intAspirateHeight);
          _blnErrorState = 0;
          if (_intAspirateHeight < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intAspirateHeight"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
        }
        _arrAspirateSettings.AddAsLast(_intAspirateHeight);
        _intAspirateRetract = 0;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intAspirateRetract"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intAspirateRetract);
        _blnErrorState = 0;
        if (_intAspirateRetract <= 0)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intAspirateRetract"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _arrAspirateSettings.AddAsLast(_intAspirateRetract);
        _blnAspirateFollowing = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnAspirateFollowing"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _blnAspirateFollowing);
        _blnErrorState = 0;
        if (_blnAspirateFollowing < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnAspirateFollowing > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("blnAspirateFollowing"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _arrAspirateSettings.AddAsLast(_blnAspirateFollowing);
        _intAspirateMixCycles = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intAspirateMixCycles"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intAspirateMixCycles);
        _blnErrorState = 0;
        if (_intAspirateMixCycles < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intAspirateMixCycles"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no mixing"), Translate(""));
          _intAspirateMixCycles = 0;
        }
        _arrAspirateSettings.AddAsLast(_intAspirateMixCycles);
        _intAspirateMixVolume = 0;
        if (_intAspirateMixCycles != 0)
        {
          _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intAspirateMixVolume"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intAspirateMixVolume);
          _blnErrorState = 0;
          if (_intAspirateMixVolume == 0)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intAspirateMixVolume"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no mixing"), Translate(""));
            _intAspirateMixVolume = 0;
          }
        }
        _arrAspirateSettings.AddAsLast(_intAspirateMixVolume);
        _strDestination = Translate("");
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",strDestination"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _strDestination);
        _rtnCode = _GetActiveSequence(arrAllSequences, _strDestination, _seqDestination);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
          return (1);
        }
        _blnErrorState = 0;
        if (_strDestination == "")
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("strDestination"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _strModule_Dest = Translate("");
        if (_strDestination == "AutoFlask_Tilt")
        {
          _strModule_Dest = Translate("tilt");
          _intTiltAngle = 0;
        }
        if (_strDestination == "AutoFlask_HHS")
        {
          _strModule_Dest = Translate("hhs");
        }
        _blnDestinationIncrement = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnDestinationIncrement"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _blnDestinationIncrement);
        _blnErrorState = 0;
        if (_blnDestinationIncrement < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnDestinationIncrement > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("blnDestinationIncrement"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _intDispenseLLD = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intDispenseLLD"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intDispenseLLD);
        _blnErrorState = 0;
        if (_intDispenseLLD < 0)
        {
          _blnErrorState = 1;
        }
        if (_intDispenseLLD > 5)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intDispenseLLD"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _arrDispenseSettings.AddAsLast(_intDispenseLLD);
        _intDispenseSubmerge = -1;
        if (_intDispenseLLD != 0)
        {
          _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intDispenseSubmerge"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intDispenseSubmerge);
          _blnErrorState = 0;
          if (_intDispenseSubmerge < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intDispenseSubmerge"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
        }
        _arrDispenseSettings.AddAsLast(_intDispenseSubmerge);
        _intDispenseHeight = -1;
        if (_intDispenseLLD == 0)
        {
          _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intDispenseHeight"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intDispenseHeight);
          _blnErrorState = 0;
          if (_intDispenseHeight < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intDispenseHeight"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
        }
        _arrDispenseSettings.AddAsLast(_intDispenseHeight);
        _intDispenseRetract = 0;
        if (_intDispenseLLD == 0)
        {
          _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intDispenseRetract"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intDispenseRetract);
          _blnErrorState = 0;
          if (_intDispenseRetract <= 0)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intDispenseRetract"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
        }
        _arrDispenseSettings.AddAsLast(_intDispenseRetract);
        _blnDispenseFollowing = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",blnDispenseFollowing"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _blnDispenseFollowing);
        _blnErrorState = 0;
        if (_blnDispenseFollowing < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnDispenseFollowing > 1)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("blnDispenseFollowing"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
          return (1);
        }
        _arrDispenseSettings.AddAsLast(_blnDispenseFollowing);
        _intDispenseMixCycles = -1;
        _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intDispenseMixCycles"));
        JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intDispenseMixCycles);
        _blnErrorState = 0;
        if (_intDispenseMixCycles < 0)
        {
          _blnErrorState = 1;
        }
        if (_blnErrorState == 1)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intDispenseMixCycles"), Translate("'. "), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no mixing"), Translate(""));
          _intDispenseMixCycles = 0;
        }
        _arrDispenseSettings.AddAsLast(_intDispenseMixCycles);
        _intDispenseMixVolume = 0;
        if (_intDispenseMixCycles != 0)
        {
          _strJsonSearch = StrConcat2(_strCurrentStep_Detail, Translate(",intDispenseMixVolume"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, 0, __, _intDispenseMixVolume);
          _blnErrorState = 0;
          if (_intDispenseMixVolume == 0)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("intDispenseMixVolume"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no mixing"), Translate(""));
            _intDispenseMixVolume = 0;
          }
        }
        _arrDispenseSettings.AddAsLast(_intDispenseMixVolume);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Submethod"), Translate(""));
        _rtnCode = PIP_ChannelTransfer(_seqSource, _seqDestination, _strLiquidClass, _blnSourceIncrement, _blnDestinationIncrement, _intTransferVolume, _blnFreshTipsPerPipette, _blnEjectTipsOnCompletion, _intTiltAngle, _arrAspirateSettings, _arrDispenseSettings, _strModule_Src, _strModule_Dest);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'PIP_ChannelTransfer'."), Translate(" The method will abort"));
          return (1);
        }
      }
      _strStepToSearchFor = Translate("cellDilutionCalc");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        {
          _loopCounter4 = 0;
          while (1 == 1)
          {
            _loopCounter4 = _loopCounter4 + 1;
            customDialog_5.InitCustomDialog("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");
            customDialog_5.SetCustomDialogProperty( "numeric1.Value", _intCellConcentration );
            customDialog_5.SetCustomDialogProperty( "numeric2.Value", _intCellsToSeed );
            customDialog_5.SetCustomDialogProperty( "textBlock8.Text", _intCellTransferVolume );
            customDialog_5.ShowCustomDialog();
            _rtnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
            _intCellConcentration = customDialog_5.GetCustomDialogProperty( "numeric1.Value" );
            _intCellsToSeed = customDialog_5.GetCustomDialogProperty( "numeric2.Value" );
            _blnCheck = customDialog_5.GetCustomDialogProperty( "ChangeCheck.Value" );
            if (_rtnValue == 2)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with Cell Dilution Dialog Box"), Translate(""));
              return (1);
            }
            // Maths to find the volume of cells to transfer
            _intCellTransferVolume = MthCeiling((_intCellsToSeed * 1000) / _intCellConcentration);
            // Exit the loop if no values have changed
            if (_rtnValue == 1){if (_blnCheck == 0){break;}}
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intCellConcentration: "), _intCellConcentration);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intCellsToSeed: "), _intCellsToSeed);
        TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Maths performed: MthCeiling(("), _intCellsToSeed, Translate(" * 1000) / "), _intCellConcentration, Translate(") = "), _intCellTransferVolume, Translate("uL (intCellTransferVolume)"), Translate(""), Translate(""), Translate(""));
      }
      _strStepToSearchFor = Translate("centrifuge");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _strStepToSearchFor = Translate("Present");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          if(0){
            _intPresent = StrIVal(_strCurrentStep_Detail);
          }
          if(0){
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("_strCurrentStep = "), _strCurrentStep);
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("_strCurrentStep_Event = "), _strCurrentStep_Event);
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("_strCurrentStep_Detail = "), _strCurrentStep_Detail);
          }
          _intPresent = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",intPresent"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _intPresent);
          _blnErrorState = 0;
          if (_blnToolType < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnToolType > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnToolType"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to CO-RE Grips"), Translate(""));
            _blnToolType = 1;
          }
          _blnToolType = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnToolType"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnToolType);
          _blnErrorState = 0;
          if (_blnToolType < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnToolType > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnToolType"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to CO-RE Grips"), Translate(""));
            _blnToolType = 1;
          }
          _blnParkAfterUse = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnParkAfterUse"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnParkAfterUse);
          _blnErrorState = 0;
          if (_blnParkAfterUse < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnParkAfterUse > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnParkAfterUse"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to eject on completion"), Translate(""));
            _blnParkAfterUse = 1;
          }
          _intThroughput = 0;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",intThroughput"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _intThroughput);
          _blnErrorState = 0;
          if (_intThroughput < 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_intThroughput"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _blnCheckOnPickup = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnCheckOnPickup"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnCheckOnPickup);
          _blnErrorState = 0;
          if (_blnCheckOnPickup < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnCheckOnPickup > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnCheckOnPickup"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no check"), Translate(""));
            _blnCheckOnPickup = 0;
          }
          _blnCheckOnPlace = 0;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnCheckOnPlace"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnCheckOnPlace);
          _blnErrorState = 0;
          if (_blnCheckOnPlace < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnCheckOnPlace > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnCheckOnPlace"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no check"), Translate(""));
            _blnCheckOnPlace = 0;
          }
          _strSource = Translate("");
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",strSource"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _strSource);
          _rtnCode = _GetActiveSequence(arrAllSequences, _strSource, _seqSource);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
            return (1);
          }
          _blnErrorState = 0;
          if (_strSource == "")
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_strSource"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _strModule_Src = Translate("");
          if (_strSource == "AutoFlask_Tilt")
          {
            _strModule_Src = Translate("tilt");
          }
          if (_strSource == "AutoFlask_HHS")
          {
            _strModule_Src = Translate("hhs");
          }
          _strDestination = Translate("");
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",strDestination"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _strDestination);
          _rtnCode = _GetActiveSequence(arrAllSequences, _strDestination, _seqDestination);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
            return (1);
          }
          _blnErrorState = 0;
          if (_strDestination == "")
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_strDestination"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _strModule_Dest = Translate("");
          if (_strDestination == "AutoFlask_Tilt")
          {
            _strModule_Dest = Translate("tilt");
          }
          if (_strDestination == "AutoFlask_HHS")
          {
            _strModule_Dest = Translate("hhs");
          }
          _rtnCode = _Module_Centrifuge(0, 0, 0, _intPresent);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Centrifuge step"), Translate(""));
            return (1);
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Submethod"), Translate(""));
          _rtnCode = Trp_DeckTransport(_seqSource, _seqDestination, _blnToolType, _blnParkAfterUse, _intThroughput, _blnCheckOnPickup, _blnCheckOnPlace, _strModule_Src, _strModule_Dest);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'Trp_DeckTransport'."), Translate(" The method will abort"));
            return (1);
          }
        }
        _strStepToSearchFor = Translate("Spin");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _intSpinSpeed = 0;
          _intSpinTime = 0;
          _intSpinAccel = 0;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(" _strCurrentStep = "), _strCurrentStep);
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",SpinSpeed"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, intTrace, __, _intSpinSpeed);
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate(" _intSpinSpeed = "), _intSpinSpeed);
          _blnErrorState = 0;
          if (_intSpinSpeed < 1)
          {
            _blnErrorState = 1;
          }
          if (_intSpinSpeed > 4200)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_intSpinSpeed"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",SpinTime"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, intTrace, __, _intSpinTime);
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate(" _intSpinTime = "), _intSpinTime);
          _blnErrorState = 0;
          if (_intSpinTime < 1)
          {
            _blnErrorState = 1;
          }
          if (_intSpinTime > 1200)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), _intSpinTime, Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",SpinAcceleration"));
          JSONSEARCH::GetJSONEntry(strPipettingConfig, _strJsonSearch, intTrace, __, _intSpinAccel);
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate(" _intSpinAccel = "), _intSpinAccel);
          _blnErrorState = 0;
          if (_intSpinAccel < 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_intSpinAccel"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _rtnCode = _Module_Centrifuge(_intSpinSpeed, _intSpinTime, _intSpinAccel, 0);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Centrifuge step"), Translate(""));
            return (1);
          }
        }
        _strStepToSearchFor = Translate("Unload");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          if(0){
            _intPresent = StrIVal(_strCurrentStep_Detail);
          }
          if(0){
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("_strCurrentStep = "), _strCurrentStep);
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("_strCurrentStep_Event = "), _strCurrentStep_Event);
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("_strCurrentStep_Detail = "), _strCurrentStep_Detail);
          }
          _intPresent = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",intPresent"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _intPresent);
          _blnErrorState = 0;
          if (_blnToolType < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnToolType > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnToolType"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to CO-RE Grips"), Translate(""));
            _blnToolType = 1;
          }
          _blnToolType = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnToolType"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnToolType);
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("_blnToolType = "), _blnToolType);
          _blnErrorState = 0;
          if (_blnToolType < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnToolType > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnToolType"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to CO-RE Grips"), Translate(""));
            _blnToolType = 1;
          }
          _blnParkAfterUse = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnParkAfterUse"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnParkAfterUse);
          _blnErrorState = 0;
          if (_blnParkAfterUse < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnParkAfterUse > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnParkAfterUse"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to eject on completion"), Translate(""));
            _blnParkAfterUse = 1;
          }
          _intThroughput = 0;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",intThroughput"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _intThroughput);
          _blnErrorState = 0;
          if (_intThroughput < 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_intThroughput"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _blnCheckOnPickup = -1;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnCheckOnPickup"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnCheckOnPickup);
          _blnErrorState = 0;
          if (_blnCheckOnPickup < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnCheckOnPickup > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnCheckOnPickup"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no check"), Translate(""));
            _blnCheckOnPickup = 0;
          }
          _blnCheckOnPlace = 0;
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",blnCheckOnPlace"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _blnCheckOnPlace);
          _blnErrorState = 0;
          if (_blnCheckOnPlace < 0)
          {
            _blnErrorState = 1;
          }
          if (_blnCheckOnPlace > 1)
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_blnCheckOnPlace"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will default to no check"), Translate(""));
            _blnCheckOnPlace = 0;
          }
          _strSource = Translate("");
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",strSource"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _strSource);
          _rtnCode = _GetActiveSequence(arrAllSequences, _strSource, _seqSource);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
            return (1);
          }
          _blnErrorState = 0;
          if (_strSource == "")
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_strSource"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _strModule_Src = Translate("");
          if (_strSource == "AutoFlask_Tilt")
          {
            _strModule_Src = Translate("tilt");
          }
          if (_strSource == "AutoFlask_HHS")
          {
            _strModule_Src = Translate("hhs");
          }
          _strDestination = Translate("");
          _strJsonSearch = StrConcat2(_strCurrentStep, Translate(",strDestination"));
          JSONSEARCH::GetJSONEntry(strTransportConfig, _strJsonSearch, intTrace, __, _strDestination);
          _rtnCode = _GetActiveSequence(arrAllSequences, _strDestination, _seqDestination);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'GetActiveSequence'."), Translate(" The method will abort"));
            return (1);
          }
          _blnErrorState = 0;
          if (_strDestination == "")
          {
            _blnErrorState = 1;
          }
          if (_blnErrorState == 1)
          {
            TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("## An error occured while acquiring '"), Translate("_strDestination"), Translate("'. "), Translate(""));
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("The submethod will end"), Translate(""));
            return (1);
          }
          _strModule_Dest = Translate("");
          if (_strDestination == "AutoFlask_Tilt")
          {
            _strModule_Dest = Translate("tilt");
          }
          if (_strDestination == "AutoFlask_HHS")
          {
            _strModule_Dest = Translate("hhs");
          }
          _rtnCode = _Module_Centrifuge(0, 0, 0, _intPresent);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Centrifuge step"), Translate(""));
            return (1);
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Submethod"), Translate(""));
          _rtnCode = Trp_DeckTransport(_seqSource, _seqDestination, _blnToolType, _blnParkAfterUse, _intThroughput, _blnCheckOnPickup, _blnCheckOnPlace, _strModule_Src, _strModule_Dest);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'Trp_DeckTransport'."), Translate(" The method will abort"));
            return (1);
          }
        }
      }
      _strStepToSearchFor = Translate("sway");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _intSwayTime = StrIVal(_strCurrentStep_Detail);
        if (blnSimulationMode == 1)
        {
          _intSwayTime = 5;
        }
        _rtnCode = _Module_Tilt(_intSwayTime, 10, 10, 0, 0);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the sway step"), Translate(""));
          return (1);
        }
      }
      _strStepToSearchFor = Translate("timer");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _strStepToSearchFor = Translate("Start");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _intTimerTime = StrIVal(_strCurrentStep_Detail);
          if (blnSimulationMode == 1)
          {
            _intTimerTime = 9;
          }
          _intFound = StrFind(_strCurrentStep_Event, Translate("HHS"));
          if (_intFound != -1)
          {
            if( 0 == _tmrHHS.SetTimer(hslInfinite) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == _tmrHHS.RestartTimer() )
            {
                  MECC::RaiseRuntimeErrorEx(-1305607936, MECC::IDS::stepNameTimerRestart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            _intTimerDetails_HHS = _intTimerTime;
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Started new timer: "), _strCurrentStep_Detail);
        }
        _strStepToSearchFor = Translate("WaitFor");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _strDots = Translate("");
          _fltPause = 6.7345948566;
          if (blnSimulationMode == 1)
          {
            _fltPause = _fltPause / (10 * 1.0);
          }
          _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
          if (_intFound != -1)
          {
            _intMinTimerDuration = _intTimerDetails_HHS;
          }
          TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate(">> Waiting for '"), _strCurrentStep_Detail, Translate("' timer ("), _intMinTimerDuration, Translate(" seconds)"), Translate(""), Translate(""), Translate(""));
          {
            _loopCounter5 = 0;
            while (1 == 1)
            {
              _loopCounter5 = _loopCounter5 + 1;
              _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
              if (_intFound != -1)
              {
                _intElapsedTime = _tmrHHS.GetElapsedTime();
              }
              if (_strDots == "...")
              {
                _strDots = Translate("");
              }
              _strDots = _strDots + Translate(".");
              if (_intElapsedTime >= _intMinTimerDuration)
              {
                break;
              }
              else
              {
                _strLogFileFolder = FilGetLogFilesPath();
                _strLogFileCheck = StrConcat4(_strLogFileFolder, Translate("\\Chris Henderson is an amazing detective-slash genius.txt"), Translate(""), Translate(""));
                _blnLogFileCheck = FileDirectoryLib::CheckIfFileExists(_strLogFileCheck);
                if (_blnLogFileCheck == 1)
                {
                  FileDirectoryLib::DeleteFile(_strLogFileCheck);
                  break;
                }
              }
              if( 0 == _tmrTemp.SetTimer(_fltPause) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == _tmrTemp.WaitTimer(hslFalse, hslFalse) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              _fltWaitCompletion = _intElapsedTime / (_intMinTimerDuration * 1.0);
              _fltWaitCompletion = _fltWaitCompletion * 100;
              _fltWaitCompletion = MthRound(_fltWaitCompletion, 2);
              TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate(">> ["), _fltWaitCompletion, Translate("%"), Translate(""), Translate("] Waiting"), _strDots, Translate(""), Translate(""));
            }
          }
          TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate(">> ["), Translate("100"), Translate("%"), Translate(""), Translate("] Finished waiting"), Translate(""), Translate(""), Translate(""));
        }
      }
      _strStepToSearchFor = Translate("hhs");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _strStepToSearchFor = Translate("Heat");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _intHeat = StrIVal(_strCurrentStep_Detail);
          _rtnCode = _Module_HHS(_intHeat, -1, 0, 0);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Heat step"), Translate(""));
            return (1);
          }
        }
        _strStepToSearchFor = Translate("Shake");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _intShake = StrIVal(_strCurrentStep_Detail);
          _rtnCode = _Module_HHS(-1, _intShake, 0, 0);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Shake step"), Translate(""));
            return (1);
          }
        }
      }
      _strStepToSearchFor = Translate("increment");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _intAllSequencesArraySize=arrAllSequences.GetSize();
        {
          for(_loopCounter6 = 0; _loopCounter6 < _intAllSequencesArraySize;)
          {
            _loopCounter6 = _loopCounter6 + 1;
            _strLabwareID = SeqGetLabwareId(arrAllSequences.ElementAt( _loopCounter6 -1));
            _intFound = StrFind(_strLabwareID, Translate("Loading"));
            if (_intFound != -1)
            {
              _intArrayPos = _loopCounter6;
              break;
            }
          }
        }
        _strJsonSearch = StrConcat4(Translate("methodConfig,"), strProcess, Translate("ProcessCount"), Translate(""));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intPlatesProcessed);
        {
          for(_loopCounter7 = 0; _loopCounter7 < _intPlatesProcessed;)
          {
            _loopCounter7 = _loopCounter7 + 1;
            onerror goto errLabel_6 ;
            err.Clear();
            SeqRemoveAt(arrAllSequences.ElementAt( _intArrayPos -1), 1);
            _intSeqTotal = SeqGetTotal(arrAllSequences.ElementAt( _intArrayPos -1));
            if (_intSeqTotal == 0)
            {
              break;
            }
            errLabel_6 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _intSeqTotal = 0;
              break;
            }   /* end if from skip handler if no error */
          }
        }
        if (_intSeqTotal == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Complete"), Translate(""));
          break;
        }
      }
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, Translate("Automated Cell Culture"), Translate(""), _arrActiveWorkflow.ElementAt( _loopCounter3 -1));
    }
  }
  return (0);
}

private function C_CreateSeq( sequence & o_arrAllSequences[], variable & o_arrAllLabwareTypes[] ) void {
  private variable _arrBarcodeLocations[];
  private variable _intSeqLength;
  private variable _intMaxPlateNum;
  private variable _strSeqName;
  private variable _intStartPos;
  private variable _intPosToRemove;
  private variable _loopCounter1;
  private sequence _seqTemp;
  private variable _arrAllLabwareTypes[];
  private variable _loopCounter4;
  private variable _intAvailablePos;
  o_arrAllSequences.SetSize( 0);
  o_arrAllLabwareTypes.SetSize( 0);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Sequence Creation - Start\n\n******************************************************************************************************************************************************"));
  o_arrAllSequences.SetSize(0);
  _arrBarcodeLocations.SetSize(0);
  _intMaxPlateNum=arrAllBarcodes.GetSize();
  TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- intMaxPlateNumber: "), _intMaxPlateNum, Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment(Translate("========== Create Flexible Sequences =========="));
  {
    _loopCounter4 = 0;
    while (1 == 1)
    {
      _loopCounter4 = _loopCounter4 + 1;
      if (_loopCounter4 == 1)
      {
        SeqRemoveAll(_seqTemp);
        SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Loading);
      }
      else
      {
        if (_loopCounter4 == 2)
        {
          SANGERGENERAL::AlignLabware(ML_STAR, ML_STAR.AutoFlasks_Tilt);
          SeqRemoveAll(_seqTemp);
          SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Tilt);
        }
        else
        {
          if (_loopCounter4 == 3)
          {
            SeqRemoveAll(_seqTemp);
            SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Centrifuge);
          }
          else
          {
            if (_loopCounter4 == 4)
            {
              SeqRemoveAll(_seqTemp);
              SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_HHS);
            }
            else
            {
              if (_loopCounter4 == 5)
              {
                SeqRemoveAll(_seqTemp);
                SeqCopySequence(_seqTemp, ML_STAR.Greiner_AutoFlask_Barcoding_0001);
              }
              else
              {
                if (_loopCounter4 == 6)
                {
                  SeqRemoveAll(_seqTemp);
                  SeqCopySequence(_seqTemp, ML_STAR.Greiner_AutoFlask_Centrifuge_0001);
                }
                else
                {
                  if (_loopCounter4 == 7)
                  {
                    SeqRemoveAll(_seqTemp);
                    SeqCopySequence(_seqTemp, ML_STAR.Greiner_AutoFlask_Centrifuge_0002);
                  }
                  else
                  {
                    break;
                  }
                }
              }
            }
          }
        }
      }
      _intStartPos = _intMaxPlateNum + 1;
      _intAvailablePos = SANGERGENERAL::GetAvailableSeqPositions(_seqTemp);
      _intPosToRemove = _intAvailablePos - _intMaxPlateNum;
      if (_intPosToRemove >= 1)
      {
        {
          for(_loopCounter1 = 0; _loopCounter1 < _intPosToRemove;)
          {
            _loopCounter1 = _loopCounter1 + 1;
            SeqRemoveAt(_seqTemp, _intStartPos);
          }
        }
      }
      o_arrAllSequences.AddAsLast(_seqTemp);
      _intSeqLength = SeqGetTotal(_seqTemp);
      _strSeqName = SeqGetName(_seqTemp);
      if (_intSeqLength == 1)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence position"), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence positions"), Translate(""));
      }
    }
  }
  MECC::TraceComment(Translate("========== Create Fixed Sequences =========="));
  o_arrAllSequences.AddAsLast(ML_STAR.res_Media_XL);
  _intSeqLength = SeqGetTotal(ML_STAR.res_Media_XL);
  _strSeqName = SeqGetName(ML_STAR.res_Media_XL);
  if (_intSeqLength == 1)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence position"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence positions"), Translate(""));
  }
  o_arrAllSequences.AddAsLast(ML_STAR.res_PBS_XL);
  _intSeqLength = SeqGetTotal(ML_STAR.res_PBS_XL);
  _strSeqName = SeqGetName(ML_STAR.res_PBS_XL);
  if (_intSeqLength == 1)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence position"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence positions"), Translate(""));
  }
  o_arrAllSequences.AddAsLast(ML_STAR.res_TrypLE_XL);
  _intSeqLength = SeqGetTotal(ML_STAR.res_TrypLE_XL);
  _strSeqName = SeqGetName(ML_STAR.res_TrypLE_XL);
  if (_intSeqLength == 1)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence position"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence positions"), Translate(""));
  }
  o_arrAllSequences.AddAsLast(ML_STAR.res_Waste_XL);
  _intSeqLength = SeqGetTotal(ML_STAR.res_Waste_XL);
  _strSeqName = SeqGetName(ML_STAR.res_Waste_XL);
  if (_intSeqLength == 1)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence position"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence positions"), Translate(""));
  }
  o_arrAllSequences.AddAsLast(ML_STAR.DWP_PairedPositions);
  _intSeqLength = SeqGetTotal(ML_STAR.DWP_PairedPositions);
  _strSeqName = SeqGetName(ML_STAR.DWP_PairedPositions);
  if (_intSeqLength == 1)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence position"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence positions"), Translate(""));
  }
  _arrAllLabwareTypes.SetSize(0);
  o_arrAllLabwareTypes.AddAsLast(Translate("AutoFlask"));
}

private function MAP_SampTrack(  ) void {
}

private function PIP_ChannelTransfer( sequence i_seqSource, sequence i_seqDestination, variable i_strLiquidClass, variable i_blnSrcIncrement, variable i_blnDestIncrement, variable i_fltPipettingVolume, variable i_blnFreshTipsPerLoop, variable i_blnEjectTips, variable i_intTiltAngle, variable & i_arrSrcSettings[], variable & i_arrDestSettings[], variable i_intModule_Src, variable i_intModule_Dest ) variable {
  private variable _intFound;
  private variable _rtnCode;
  private variable _int;
  private variable _strJsonSearch;
  private variable _intKey;
  private variable __[];
  private variable _intSrcSeq_AvailablePos;
  private variable _intDestSeq_AvailablePos;
  private variable _intNumberOfChannels;
  private variable _intNumberOfActiveChannels;
  private variable _intMaxSeqLength;
  private variable _intTransferCycles;
  private variable _intModulusTransferCycle;
  private variable _loopCounter10;
  private variable _strCP;
  private variable _loopCounter11;
  private variable _arrDestOffsets[];
  private variable _arrSrcOffsets[];
  private variable _blnDestOffset;
  private variable _intMaxLabwareNum;
  private variable _blnSrcOffset;
  private variable _strLabwareID;
  private variable _;
  private variable _strLabware;
  private variable _loopCounter12;
  private variable _intSeqIncrement;
  private variable _intMaxPos;
  private variable _intCurrentPos;
  private variable _intAvailablePos;
  private variable _loopCounter1;
  private variable _fltTransferCycles;
  private variable _strTipCounter;
  private variable _strDestLabware;
  private sequence _seqTips;
  private variable _intPipettingLoops;
  private variable _intPipettingVolume;
  private variable _fltPipettingVolume;
  private variable _fltPipettingLoops;
  private variable _rtnTipType;
  private variable _rtnMaxVolume;
  private variable _intTipSize;
  private variable _intCounter;
  private variable _intIndex;
  MECC::TraceComment(Translate("==========================================================\n                  PIP_ChannelTransfer\n=========================================================="));
  _RemoveSeqPositions(i_seqSource, 0);
  _RemoveSeqPositions(i_seqDestination, 0);
  MLSTAR_LIQUIDCLASSLib::Initialize(1);
  MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClass);
  _rtnTipType = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
  if (_rtnTipType == 29)
  {
    SeqCopySequence(_seqTips, ML_STAR.Tips_4mLFiltered);
    _intKey = 43;
    _intTipSize = 4000;
  }
  else
  {
    if (_rtnTipType == 45)
    {
      SeqCopySequence(_seqTips, ML_STAR.Tips_300uLSlim);
      _intTipSize = 300;
    }
    else
    {
      if (_rtnTipType == 5)
      {
        SeqCopySequence(_seqTips, ML_STAR.Tips_1000ulFiltered);
        _intTipSize = 1000;
      }
    }
    _intKey = 1;
  }
  _strJsonSearch = StrConcat4(Translate("methodConfig,"), _intTipSize, Translate("uL_TipCounter"), Translate(""));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, 0, __, _strTipCounter);
  if (i_blnSrcIncrement == 1)
  {
    _intSrcSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(i_seqSource);
  }
  else
  {
    _intSrcSeq_AvailablePos = 99999;
  }
  if (i_blnDestIncrement == 1)
  {
    _intDestSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(i_seqDestination);
  }
  else
  {
    _intDestSeq_AvailablePos = 99999;
  }
  _intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, _intKey);
  if (_intSrcSeq_AvailablePos <= _intDestSeq_AvailablePos)
  {
    _intMaxSeqLength = _intSrcSeq_AvailablePos;
  }
  else
  {
    _intMaxSeqLength = _intDestSeq_AvailablePos;
  }
  if (_intMaxSeqLength < _intNumberOfChannels)
  {
    _intNumberOfActiveChannels = _intMaxSeqLength;
  }
  else
  {
    _intNumberOfActiveChannels = _intNumberOfChannels;
  }
  _rtnMaxVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::MaxAspirateVolume);
  _fltTransferCycles = _intMaxSeqLength / (_intNumberOfActiveChannels * 1.0);
  _intTransferCycles = MthCeiling(_fltTransferCycles);
  _fltPipettingLoops = i_fltPipettingVolume / (_rtnMaxVolume * 1.0);
  _intPipettingLoops = MthCeiling(_fltPipettingLoops);
  _fltPipettingVolume = i_fltPipettingVolume / (_intPipettingLoops * 1.0);
  _intPipettingVolume = MthCeiling(_fltPipettingVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- TransferCycles: "), _intTransferCycles);
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Active channel count: "), _intNumberOfActiveChannels, Translate("/"), _intNumberOfChannels);
  _blnSrcOffset = 0;
  _blnDestOffset = 0;
  _intMaxLabwareNum=arrAllLabwareTypes.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intMaxLabwareNum;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      _strLabwareID = SeqGetLabwareId(i_seqSource);
      _intFound = StrFind(_strLabwareID, arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
      if (_intFound != -1)
      {
        if (_blnSrcOffset == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Source labware offset required"), Translate(""));
          _blnSrcOffset = 1;
          _strLabware = StrMakeLowerCopy(arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
          _strJsonSearch = StrConcat8(_strLabware, Translate("Config,"), _intTipSize, Translate("_TipAngle,"), Translate("angled"), i_intTiltAngle, Translate("Config"), Translate(""));
          JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, _arrSrcOffsets, _);
          VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, i_seqSource, _arrSrcOffsets.ElementAt( 1 -1), _arrSrcOffsets.ElementAt( 2 -1), _arrSrcOffsets.ElementAt( 3 -1));
        }
      }
      _strLabwareID = SeqGetLabwareId(i_seqDestination);
      _intFound = StrFind(_strLabwareID, arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
      if (_intFound != -1)
      {
        if (_blnDestOffset == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Destination labware offset required"), Translate(""));
          _blnDestOffset = 1;
          _strLabware = StrMakeLowerCopy(arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
          _strJsonSearch = StrConcat8(_strLabware, Translate("Config,"), _intTipSize, Translate("_TipAngle,"), Translate("angled"), i_intTiltAngle, Translate("Config"), Translate(""));
          _strDestLabware = SeqGetLabwareId(i_seqDestination);
          _intFound = StrFind(_strDestLabware, Translate("HHS"));
          if (_intFound != -1)
          {
            _strJsonSearch = StrConcat8(_strLabware, Translate("Config,"), _intTipSize, Translate("_TipAngle,"), Translate("hhs"), Translate(""), Translate("Config"), Translate(""));
          }
          JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, _arrDestOffsets, _);
          VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, i_seqDestination, _arrDestOffsets.ElementAt( 1 -1), _arrDestOffsets.ElementAt( 2 -1), _arrDestOffsets.ElementAt( 3 -1));
        }
      }
    }
  }
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqSource, 0);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqDestination, 0);
  if (i_intModule_Src == "hhs")
  {
    _rtnCode = _Module_HHS(-1, 0, 2, 0);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS step"), Translate(""));
      return (1);
    }
  }
  if (i_intModule_Dest == "hhs")
  {
    _rtnCode = _Module_HHS(-1, 0, 2, 0);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS step"), Translate(""));
      return (1);
    }
  }
  if (i_intModule_Src == "tilt")
  {
    _rtnCode = _Module_Tilt(0, i_intTiltAngle, 10, 0, 0);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the tilt module step"), Translate(""));
      return (1);
    }
  }
  if (i_intModule_Dest == "tilt")
  {
    _rtnCode = _Module_Tilt(0, i_intTiltAngle, 10, 0, 0);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the tilt module step"), Translate(""));
      return (1);
    }
  }
  MECC::TraceComment(Translate("========== Pipetting Steps =========="));
  {
    for(_loopCounter10 = 0; _loopCounter10 < _intTransferCycles;)
    {
      _loopCounter10 = _loopCounter10 + 1;
      if (_loopCounter10 >= 2)
      {
        if (i_intModule_Src == "tilt")
        {
          _rtnCode = _Module_Tilt(20, 10, 10, 0, 0);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the tilt module step"), Translate(""));
            return (1);
          }
          _rtnCode = _Module_Tilt(0, i_intTiltAngle, 10, 0, 0);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the tilt module step"), Translate(""));
            return (1);
          }
        }
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Labware cycle: "), _loopCounter10, Translate("/"), _intTransferCycles);
      if (i_blnFreshTipsPerLoop == 0)
      {
        _strCP = SANGERGENERAL::CreateChannelPattern(_intNumberOfActiveChannels, _loopCounter10, _intTransferCycles, _intModulusTransferCycle);
        SANGERGENERAL::TipPickup(ML_STAR, _strCP, _seqTips, _strTipCounter, blnTestingMode);
      }
      {
        for(_loopCounter11 = 0; _loopCounter11 < _intPipettingLoops;)
        {
          _loopCounter11 = _loopCounter11 + 1;
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transfer loop: "), _loopCounter11, Translate("/"), _intPipettingLoops);
          if (i_blnFreshTipsPerLoop == 1)
          {
            _strCP = SANGERGENERAL::CreateChannelPattern(_intNumberOfActiveChannels, _loopCounter10, _intTransferCycles, _intModulusTransferCycle);
            SANGERGENERAL::TipPickup(ML_STAR, _strCP, _seqTips, _strTipCounter, blnTestingMode);
          }
          if (_intKey == 43)
          {
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
          else
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          if (i_blnFreshTipsPerLoop == 1)
          {
            if (_intTipSize == 4000)
            {
              ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
            }
            else
            {
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            }
          }
        }
      }
      if (i_blnEjectTips == 1)
      {
        if (_intTipSize == 4000)
        {
          ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        }
        else
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      _intSeqIncrement = _intNumberOfActiveChannels - _intModulusTransferCycle;
      if (i_blnSrcIncrement == 1)
      {
        if (_loopCounter10 < _intTransferCycles)
        {
          SeqIncrement(i_seqSource, _intNumberOfActiveChannels);
        }
        else
        {
          SeqIncrement(i_seqSource, _intSeqIncrement);
        }
        _intCurrentPos = i_seqSource.GetCurrentPosition();
        _intMaxPos = SeqGetTotal(i_seqSource);
      }
      if (i_blnDestIncrement == 1)
      {
        if (_loopCounter10 < _intTransferCycles)
        {
          SeqIncrement(i_seqDestination, _intNumberOfActiveChannels);
        }
        else
        {
          SeqIncrement(i_seqDestination, _intSeqIncrement);
        }
        _intCurrentPos = i_seqDestination.GetCurrentPosition();
        _intMaxPos = SeqGetTotal(i_seqDestination);
      }
      _intAvailablePos = _intMaxPos - _intCurrentPos;
      if (_intAvailablePos <= 0)
      {
        break;
      }
      else
      {
        if (_intCurrentPos == 0)
        {
          break;
        }
      }
    }
  }
  _loopCounter12 = 0;
  for(_loopCounter12 = 0; _loopCounter12 < 3;)
  {
       _loopCounter12 = _loopCounter12 + 1;
       // Invert Source Offsets
       if (_blnSrcOffset == 1)
       {
            _int = _arrSrcOffsets.GetAt(_loopCounter12 - 1) * -1;
            _arrSrcOffsets.SetAt(_loopCounter12 - 1, _int);
       }
       // Invert Destination Offsets
       if (_blnDestOffset == 1)
       {
            _int = _arrDestOffsets.GetAt(_loopCounter12 - 1) * -1;
            _arrDestOffsets.SetAt(_loopCounter12 - 1, _int);
       }
  }
  if (_blnSrcOffset == 1)
  {
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, i_seqSource, _arrSrcOffsets.ElementAt( 1 -1), _arrSrcOffsets.ElementAt( 2 -1), _arrSrcOffsets.ElementAt( 3 -1));
  }
  if (_blnDestOffset == 1)
  {
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, i_seqDestination, _arrDestOffsets.ElementAt( 1 -1), _arrDestOffsets.ElementAt( 2 -1), _arrDestOffsets.ElementAt( 3 -1));
  }
  return (0);
}

private function _Module_Centrifuge( variable i_intCentrifugeSpeed, variable i_intCentrifugeTime, variable i_intCentrifugeAccel, variable i_intPositionToPresent ) variable {
  private variable _intModuleID;
  private variable _rtnCode;
  private variable _blnPresent;
  private variable _blnTime;
  private variable _blnSpeed;
  private variable _blnAccel;
  private variable _intSpin;
  private variable _strBC;
  private sequence _seqPosOne;
  private sequence _seqPosTwo;
  private variable _blnLoadStatus;
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Running Centrifuge Module Step"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("--- Tracing Input Variables ---"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intCentrifugeSpeed: "), i_intCentrifugeSpeed, Translate(""), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intCentrifugeTime: "), i_intCentrifugeTime, Translate(""), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intCentrifugeAccel: "), i_intCentrifugeAccel, Translate(""), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intPositionToPresent: "), i_intPositionToPresent, Translate(""), Translate(""));
  SeqCopySequence(_seqPosOne, ML_STAR.Greiner_AutoFlask_Centrifuge_0001);
  SeqCopySequence(_seqPosTwo, ML_STAR.Greiner_AutoFlask_Centrifuge_0002);
  _intModuleID = 121;
  _blnLoadStatus = 0;
  _blnPresent = 0;
  _blnSpeed = 0;
  _blnTime = 0;
  _blnAccel = 0;
  _intSpin = 0;
  if (i_intPositionToPresent > 0)
  {
    if (i_intPositionToPresent < 3)
    {
      _blnPresent = 1;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("## Error, value given is out of bounds - too high, expecting 0, 1 or 2."), Translate(""));
      return (1);
    }
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> No command to present plate."), Translate(""));
  }
  if (_blnPresent == 0)
  {
    if (i_intCentrifugeSpeed > 0)
    {
      if (i_intCentrifugeSpeed <= 4200)
      {
        _blnSpeed = 1;
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("## Error, value given is out of bounds; intCentrifugeSpeed too high."), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("## Error, value given is out of bounds - intCentrifugeSpeed too low."), Translate(""));
      return (1);
    }
    if (i_intCentrifugeTime > 0)
    {
      if (i_intCentrifugeTime <= 1200)
      {
        _blnTime = 1;
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("## Error, value given is out of bounds - intCentrifugeTime too high."), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("## Error, value given is out of bounds - intCentrifugeTime too low."), Translate(""));
      return (1);
    }
    if (i_intCentrifugeAccel > 0)
    {
      _blnAccel = 1;
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("## Error, value given is out of bounds - intCentrifugeAccel too low."), Translate(""));
      return (1);
    }
  }
  _intSpin = _blnSpeed + _blnTime + _blnAccel;
  if (_blnPresent == 1)
  {
    if (i_intPositionToPresent == 1)
    {
      if (blnSimulationMode == 0)
      {
        _rtnCode = HSLSiasCentrifuge::MoveToPosition(_intModuleID, 1);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running '_Module_Centrifuge'."), Translate(" The method will abort"));
          return (1);
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("===== Simulating presenting position 1 ====="), Translate(""));
      }
    }
    else
    {
      if (blnSimulationMode == 0)
      {
        _rtnCode = HSLSiasCentrifuge::MoveToPosition(_intModuleID, 2);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running '_Module_Centrifuge'."), Translate(" The method will abort"));
          return (1);
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("===== Simulating presenting position 2 ====="), Translate(""));
      }
    }
  }
  if (_blnPresent == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("===== Barcode Check ====="), Translate(""));
    if (blnSimulationMode == 0)
    {
      _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqPosOne);
      if (_strBC == "")
      {
        _blnLoadStatus = 1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error - position one empty, spin prevented"), Translate(""));
        return (1);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-- Centrifuge position one loaded"), Translate(""));
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-- Simulating barcode check for position two, _strBC = "), _strBC);
    }
    if (blnSimulationMode == 0)
    {
      _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqPosTwo);
      if (_strBC == "")
      {
        _blnLoadStatus = 1;
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error - position two empty, spin prevented"), Translate(""));
        return (1);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-- Centrifuge position two loaded"), Translate(""));
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-- Simulating barcode check for position two, _strBC = "), _strBC);
    }
  }
  if (_blnLoadStatus == 0)
  {
    if (_blnPresent == 0)
    {
      if (_intSpin == 3)
      {
        if (blnSimulationMode == 0)
        {
          _rtnCode = HSLSiasCentrifuge::CloseCover(_intModuleID);
          _rtnCode = HSLSiasCentrifuge::TimeMove(_intModuleID, i_intCentrifugeTime, i_intCentrifugeSpeed, i_intCentrifugeAccel);
          if (_rtnCode != 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running '_Module_Centrifuge'."), Translate(" The method will abort"));
            return (1);
          }
        }
        else
        {
          TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate("Simulating centrifuge spinning @ "), i_intCentrifugeSpeed, Translate("RPM, for "), i_intCentrifugeTime, Translate(" seconds, accelerating @ "), i_intCentrifugeAccel, Translate("RPM/s."), Translate(""));
        }
      }
    }
  }
  return (0);
}

private function _Module_MediaFill(  ) void {
}

private function D_LoadInstructions( sequence & i_arrAllSequences[] ) void {
  private dialog customDialog_7;
  private variable _strLabID;
  private variable _blnTipReload;
  private variable _loopCounter1;
  private variable _intAllSeqArraySize;
  private variable _intFound;
  private sequence _seqLoadingTemp;
  private variable _intTotalPos;
  private variable _loopCounter2;
  private variable _loopCounter3;
  private variable _strPositionID;
  private variable _strLabwareID;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Load Instructions - Start\n\n******************************************************************************************************************************************************"));
  _intAllSeqArraySize=i_arrAllSequences.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intAllSeqArraySize;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      _strLabID = SeqGetLabwareId(i_arrAllSequences.ElementAt( _loopCounter1 -1));
      _intFound = StrFind(_strLabID, Translate("Loading"));
      if (_intFound >= 1)
      {
        SeqCopySequence(_seqLoadingTemp, i_arrAllSequences.ElementAt( _loopCounter1 -1));
        break;
      }
    }
  }
  DeckVisualize::UpdateUsedPositions(ML_STAR, _seqLoadingTemp, 6, Translate(""));
  _blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_300uLSlim, Translate("TipCounter_300uLSlim"), 8);
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_300uLSlim, 6, Translate(""));
  _blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), 8);
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_1000ulFiltered, 6, Translate(""));
  _blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_4mLFiltered, Translate("TipCounter_4mLFiltered"), 8);
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_4mLFiltered, 6, Translate(""));
  if (blnSimulationMode == 0)
  {
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    rtnValue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    if (rtnValue == 2)
    {
      abort;
    }
  }
  DeckVisualize::UpdateUsedPositions(ML_STAR, _seqLoadingTemp, 5, Translate(""));
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_300uLSlim, 5, Translate(""));
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_1000ulFiltered, 5, Translate(""));
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_4mLFiltered, 5, Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Reset Deck Layout"), Translate(""));
  if (blnAdministrator == 1)
  {
    _intAllSeqArraySize=i_arrAllSequences.GetSize();
    {
      for(_loopCounter2 = 0; _loopCounter2 < _intAllSeqArraySize;)
      {
        _loopCounter2 = _loopCounter2 + 1;
        _strLabID = SeqGetLabwareId(i_arrAllSequences.ElementAt( _loopCounter2 -1));
        _intFound = StrFind(_strLabID, Translate("Loading"));
        if (_intFound != -1)
        {
          _intTotalPos = SANGERGENERAL::GetAvailableSeqPositions(i_arrAllSequences.ElementAt( _loopCounter2 -1));
          {
            for(_loopCounter3 = 0; _loopCounter3 < _intTotalPos;)
            {
              _loopCounter3 = _loopCounter3 + 1;
              _strLabwareID = SeqGetLabwareId(i_arrAllSequences.ElementAt( _loopCounter2 -1));
              _strPositionID = SeqGetPositionId(i_arrAllSequences.ElementAt( _loopCounter2 -1));
              DevSetBarcodeData(ML_STAR, _strLabwareID, _strPositionID, Translate("TEMP"));
              SeqIncrement(i_arrAllSequences.ElementAt( _loopCounter2 -1), 1);
              TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Labware ID: "), _strLabwareID, Translate(", Position: "), _strPositionID, Translate(" - Barcode: "), Translate("TEMP"));
            }
          }
          SeqResetSequenceIndexes(i_arrAllSequences.ElementAt( _loopCounter2 -1));
          break;
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Temporary Barcodes Assigned"), Translate(""));
  }
}

private function _GetActiveSequence( sequence & i_arrSeq[], variable i_strSearch, sequence & o_seq ) variable {
  private variable _strLabware;
  private variable _loopCounter1;
  private variable _intArraySize;
  private variable _strSeqName;
  private variable _intFound;
  { sequence __temp; o_seq = __temp; }
  SeqRemoveAll(o_seq);
  _intArraySize=i_arrSeq.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intArraySize;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      _strLabware = SeqGetLabwareId(i_arrSeq.ElementAt( _loopCounter1 -1));
      _intFound = StrFind(_strLabware, i_strSearch);
      if (_intFound != -1)
      {
        SeqCopySequence(o_seq, i_arrSeq.ElementAt( _loopCounter1 -1));
        _strSeqName = SeqGetName(o_seq);
        return (0);
      }
      _strSeqName = SeqGetName(i_arrSeq.ElementAt( _loopCounter1 -1));
      _intFound = StrFind(_strSeqName, i_strSearch);
      if (_intFound != -1)
      {
        SeqCopySequence(o_seq, i_arrSeq.ElementAt( _loopCounter1 -1));
        _strSeqName = SeqGetName(o_seq);
        return (0);
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not find i_strSearch: "), i_strSearch);
  return (1);
}

private function _Module_HHS( variable i_intHeat, variable i_intShake, variable i_blnPlateLock, variable i_intPositionSpecific ) variable {
  private variable _strBC;
  private variable _intHHSDeviceArraySize;
  private variable _blnOccupied;
  private variable _blnActivePos;
  private variable _loopCounter1;
  private variable _intShakingDirection;
  private variable _blnOpen;
  private variable _loopCounter2;
  private variable _intTemp;
  private variable _blnShake;
  private variable _blnHeat;
  private variable _rtnCode;
  private variable _blnClose;
  private variable _intShakingAcceleration;
  private sequence _seqTemp;
  private variable __[];
  private variable _arrOccupiedPos[];
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Running HHS Module Step"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("--- Tracing Input Variables ---"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intHeat: "), i_intHeat, Translate(" (20 - 105, 0 = off)"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intShake: "), i_intShake, Translate(" (30 - 2500, 0 = off)"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_blnPlateLock: "), i_blnPlateLock, Translate(" (2 = grip, 1 = release, 0 = ignore)"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intPositionSpecific: "), i_intPositionSpecific, Translate(" (0 = every position, 0 != that position)"), Translate(""));
  SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_HHS);
  _arrOccupiedPos.SetSize(0);
  {
    _loopCounter1 = 0;
    while (
       (_seqTemp.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqTemp, 1);
      _loopCounter1 = _loopCounter1 + 1;
      _blnOccupied = 1;
      _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqTemp);
      if (_strBC == "")
      {
        _blnOccupied = 0;
      }
      _arrOccupiedPos.AddAsLast(_blnOccupied);
      SeqIncrement(_seqTemp, 1);
      if (
         (_seqTemp.GetCurrentPosition() > 0 && _seqTemp.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqTemp.SetMax(_seqTemp.GetTotal());
    _seqTemp.SetCurrentPosition(1);
  }
  {
    for(_loopCounter2 = 0; _loopCounter2 < 5;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      _arrOccupiedPos.AddAsLast(0);
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Checking HHS occupancy"), Translate(""));
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Occupied positions"), _arrOccupiedPos);
  _intTemp = 0;
  _blnShake = 0;
  _blnHeat = 0;
  _blnOpen = 0;
  _blnClose = 0;
  if (i_intShake >= 30)
  {
    if (i_intShake <= 2500)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: StartShaker - "), i_intShake, Translate("rpm"), Translate(""));
      _blnShake = 1;
      JSONSEARCH::GetJSONEntry(Translate(""), Translate("autoflaskConfig,hhsConfig,shakingDirection"), intTrace, __, _intShakingDirection);
      JSONSEARCH::GetJSONEntry(Translate(""), Translate("autoflaskConfig,hhsConfig,shakingAccRamp"), intTrace, __, _intShakingAcceleration);
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with HHS_Action; i_intShake - value too fast"), Translate(""));
    }
  }
  if (i_intShake == 0)
  {
    _blnShake = 2;
  }
  if (i_intHeat == 0)
  {
    _blnHeat = 2;
  }
  if (i_intHeat > 0)
  {
    if (i_intHeat >= 25)
    {
      if (i_intHeat <= 105)
      {
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: SetTemp - "), i_intHeat, Translate("°C"), Translate(""));
        _blnHeat = 1;
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with HHS_Action; i_intHeat - value too high"), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with HHS_Action; i_intHeat - value too low"), Translate(""));
      return (1);
    }
  }
  if (i_blnPlateLock == 1)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: ReleasePlateLock"), Translate(""), Translate(""), Translate(""));
    _blnOpen = 1;
  }
  if (i_blnPlateLock == 2)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: ClosePlateLock"), Translate(""), Translate(""), Translate(""));
    _blnClose = 1;
  }
  _intTemp = _blnShake + _blnHeat + _blnOpen + _blnClose;
  if (_intTemp == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No Step Successfully Selected"), Translate(""));
    return (1);
  }
  if (_blnClose == 1)
  {
    if (_blnOpen == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Tilt Module Open & Close selected"), Translate(""));
      return (1);
    }
  }
  _intHHSDeviceArraySize=arrHhsDevices.GetSize();
  {
    for(_loopCounter2 = 0; _loopCounter2 < _intHHSDeviceArraySize;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (i_intPositionSpecific == 0)
      {
        _blnActivePos = _loopCounter2;
      }
      else
      {
        _blnActivePos = i_intPositionSpecific;
      }
      if (_blnHeat == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = HSLHamHeaterShaker::StartTempCtrl(arrHhsDevices.ElementAt( _loopCounter2 -1), i_intHeat, 0);
            if (_rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StartTempCtrl"), Translate(" Error Code: "), _rtnCode);
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": Heat to ", i_intHeat, "°C;");
          }
        }
      }
      if (_blnHeat == 2)
      {
        if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = HSLHamHeaterShaker::StopTempCtrl(arrHhsDevices.ElementAt( _loopCounter2 -1));
            if (_rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StartTempCtrl"), Translate(" Error Code: "), _rtnCode);
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": Heating off;");
          }
        }
      }
      if (_blnShake == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 1);
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
              HSLHamHeaterShaker::SetShakerParameter(arrHhsDevices.ElementAt( _loopCounter2 -1), _intShakingDirection, _intShakingAcceleration);
              _rtnCode = HSLHamHeaterShaker::StartShaker(arrHhsDevices.ElementAt( _loopCounter2 -1), i_intShake);
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StartShaker"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": SetPlateLock;");
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": StartShaker at ", i_intShake, "rpm;");
            }
          }
        }
      }
      if (_blnShake == 2)
      {
        if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
        {
          if (_loopCounter2 == _blnActivePos)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = HSLHamHeaterShaker::StopShaker(arrHhsDevices.ElementAt( _loopCounter2 -1));
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": StopShaker;");
            }
          }
        }
      }
      if (_blnOpen == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = HSLHamHeaterShaker::StopShaker(arrHhsDevices.ElementAt( _loopCounter2 -1));
            if (_rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), _rtnCode);
              return (1);
            }
            _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 0);
            if (_rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": StopShaker;");
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": SetPlateLock;");
          }
          break;
        }
      }
      if (_blnClose == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 1);
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": SetPlateLock;");
            }
          }
        }
      }
    }
  }
  return (0);
}

private function F_ProcessClose(  ) variable {
  private dialog customDialog_8;
  private variable _rtnValue;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                        Process Close - Start\n\n******************************************************************************************************************************************************"));
  customDialog_8.InitCustomDialog("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");
  customDialog_8.ShowCustomDialog();
  _rtnValue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
  if (_rtnValue == 2)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User ended the method"), Translate(""));
    return (2);
  }
  if (_rtnValue == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User repeated a process"), Translate(""));
    return (0);
  }
}

private function _Module_Tilt( variable i_intSway, variable i_intAngle, variable i_intSpeed, variable i_blnPlateLock, variable i_intPositionSpecific ) variable {
  private variable _strBC;
  private variable _blnOccupied;
  private variable _blnActivePos;
  private variable _loopCounter1;
  private variable _blnOpen;
  private variable _loopCounter2;
  private variable _blnSway;
  private variable _blnTilt;
  private variable _intTemp;
  private variable _rtnCode;
  private variable _blnClose;
  private variable _intTiltModulesArraySize;
  private sequence _seqTemp;
  private variable _arrOccupiedPos[];
  private variable _arrPositionsToSway[];
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Running Tilt Module Step"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intSway: "), i_intSway);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intAngle: "), i_intAngle);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intSpeed: "), i_intSpeed);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_blnPlateLock: "), i_blnPlateLock);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intPositionSpecific: "), i_intPositionSpecific);
  SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Tilt);
  _arrOccupiedPos.SetSize(0);
  {
    _loopCounter1 = 0;
    while (
       (_seqTemp.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqTemp, 1);
      _loopCounter1 = _loopCounter1 + 1;
      _blnOccupied = 1;
      _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqTemp);
      if (_strBC == "")
      {
        _blnOccupied = 0;
      }
      _arrOccupiedPos.AddAsLast(_blnOccupied);
      SeqIncrement(_seqTemp, 1);
      if (
         (_seqTemp.GetCurrentPosition() > 0 && _seqTemp.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqTemp.SetMax(_seqTemp.GetTotal());
    _seqTemp.SetCurrentPosition(1);
  }
  {
    for(_loopCounter2 = 0; _loopCounter2 < 5;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      _arrOccupiedPos.AddAsLast(0);
    }
  }
  _intTemp = 0;
  _blnSway = 0;
  _blnTilt = 0;
  _blnOpen = 0;
  _blnClose = 0;
  if (i_intSway != 0)
  {
    if (i_intSway >= 5)
    {
      if (i_intSway < 900)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Tilt Module: Swaying Step - "), i_intSway, Translate(" s"), Translate(""), Translate(""), Translate(""));
        _blnSway = 1;
      }
      else
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSway"), Translate(" - time too long"), Translate(""), Translate(""), Translate(""), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSway"), Translate(" - time too short"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  if (i_intAngle >= 0)
  {
    if (i_intAngle <= 10)
    {
      if (i_intSpeed > 0)
      {
        if (i_intSpeed <= 10)
        {
          if (_blnSway == 0)
          {
            _blnTilt = 1;
          }
        }
        else
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSpeed"), Translate(" - value too fast"), Translate(""), Translate(""), Translate(""), Translate(""));
          return (1);
        }
      }
      else
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSpeed"), Translate(" - value too slow"), Translate(""), Translate(""), Translate(""), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intAngle"), Translate(" - value too steep"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  if (i_blnPlateLock == 1)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Tilt Module: ReleasePlateLock"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _blnOpen = 1;
  }
  if (i_blnPlateLock == 2)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Tilt Module: ClosePlateLock"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _blnClose = 1;
  }
  _intTemp = _blnSway + _blnTilt + _blnClose + _blnOpen;
  if (_intTemp == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No Tilt Step Selected"), Translate(""));
    return (1);
  }
  if (_blnClose == 1)
  {
    if (_blnOpen == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Tilt Module Open & Close selected"), Translate(""));
      return (1);
    }
  }
  _arrPositionsToSway.SetSize(0);
  _intTiltModulesArraySize=arrTiltingModules.GetSize();
  {
    for(_loopCounter2 = 0; _loopCounter2 < _intTiltModulesArraySize;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (i_intPositionSpecific == 0)
      {
        _blnActivePos = _loopCounter2;
      }
      else
      {
        _blnActivePos = i_intPositionSpecific;
      }
      if (_blnClose == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltingModules.ElementAt( _loopCounter2 -1));
            if (_rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("ClampClose"), Translate(""), Translate(""));
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": Close;");
          }
          break;
        }
      }
      if (_blnOpen == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltingModules.ElementAt( _loopCounter2 -1), 10, 0);
            if (_rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("Tilt"), Translate(""), Translate(""));
              return (1);
            }
            _rtnCode = Hamilton_Tilt_Clamp_Module::ClampOpen(arrTiltingModules.ElementAt( _loopCounter2 -1));
            if (_rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("Tilt"), Translate(""), Translate(""));
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": 0° Tilt;");
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": Open;");
          }
          break;
        }
      }
      if (_blnTilt == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltingModules.ElementAt( _loopCounter2 -1));
              if (_rtnCode == 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("ClampClose"), Translate(""), Translate(""));
                return (1);
              }
              _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltingModules.ElementAt( _loopCounter2 -1), i_intSpeed, i_intAngle);
              if (_rtnCode == 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("ClampClose"), Translate(""), Translate(""));
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": Close;");
              Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": ", i_intAngle, "° Tilt;");
            }
          }
        }
      }
      if (_blnSway == 1)
      {
        if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
        {
          if (_loopCounter2 == _blnActivePos)
          {
            _arrPositionsToSway.AddAsLast(arrTiltingModules.ElementAt( _loopCounter2 -1));
          }
        }
        if (_loopCounter2 == _intTiltModulesArraySize)
        {
          PARALLELSWAY::ParallelSway(_arrPositionsToSway, i_intSpeed, 0, i_intAngle, i_intSway, blnSimulationMode);
        }
      }
    }
  }
  return (0);
}

private function Trp_DeckTransport( sequence i_seqSource, sequence i_seqDestination, variable i_blnToolType, variable i_blnParkTool, variable i_intThroughput, variable i_blnCheckOnGet, variable i_blnCheckOnPlace, variable i_strModuleControl_Src, variable i_strModuleControl_Dest ) variable {
  private variable _strBC;
  private variable _intSrcSeq_AvailablePos;
  private variable _intDestSeq_AvailablePos;
  private variable _loopCounter2;
  private variable _intSrcSeq_Start;
  private variable _intDestSeq_PosToRemove;
  private variable _intDestSeq_Length;
  private variable _intDestSeq_Start;
  private variable _intSrcSeq_PosToRemove;
  private variable _intSrcSeq_Length;
  private variable _strLabwareID;
  private variable _strJsonSearchPrefix;
  private variable _strJsonSearch;
  private variable _intGripHeight;
  private variable __[];
  private variable _strType;
  private variable _intGripWidth;
  private variable _intZSpeed_Get;
  private variable _intGripSpeed;
  private variable _intGripWidthOpen;
  private variable _intZSpeed_Place;
  private variable _intGripForce;
  private variable _intTolerance;
  private variable _intPlatePress;
  private variable _intXAcceleration;
  private variable _intCOREChannelToUse;
  private variable _loopCounter3;
  private variable _strLabID;
  private variable _strBarcode;
  private variable _strPosID;
  private variable _rtnCode;
  private variable _strTime;
  private variable _intTransferLoops;
  private variable _intSeqLength;
  private variable _blnPaddleEject;
  private timer _delay;
  private variable _loopCounter4;
  private variable _intShuffle;
  MECC::TraceComment(Translate("==========================================================\n                  Trp_DeckTransport\n=========================================================="));
  _intSrcSeq_Start = i_seqSource.GetCurrentPosition();
  _intSrcSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(i_seqSource);
  _intDestSeq_Start = i_seqDestination.GetCurrentPosition();
  _intDestSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(i_seqDestination);
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Source Seq - start: "), _intSrcSeq_Start, Translate(", available: "), _intSrcSeq_AvailablePos);
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Destination Seq - start: "), _intDestSeq_Start, Translate(", available: "), _intDestSeq_AvailablePos);
  _intSrcSeq_PosToRemove = 1;
  _intDestSeq_PosToRemove = 1;
  {
    _loopCounter2 = 0;
    while (1 == 1)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (_loopCounter2 <= _intSrcSeq_AvailablePos)
      {
        _strBC = SANGERGENERAL::GetBarcode(ML_STAR, i_seqSource);
        if (_strBC == "")
        {
          SeqRemoveAt(i_seqSource, _intSrcSeq_PosToRemove);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Removing unoccupied position from source sequence"), Translate(""));
        }
        else
        {
          SeqIncrement(i_seqSource, 1);
          _intSrcSeq_PosToRemove = _intSrcSeq_PosToRemove + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Allowing occupied SrcPos from: "), _loopCounter2);
        }
      }
      if (_loopCounter2 <= _intDestSeq_AvailablePos)
      {
        _strBC = SANGERGENERAL::GetBarcode(ML_STAR, i_seqDestination);
        if (_strBC == "")
        {
          SeqIncrement(i_seqDestination, 1);
          _intDestSeq_PosToRemove = _intDestSeq_PosToRemove + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Allowing unoccupied DestPos at: "), _loopCounter2);
        }
        else
        {
          SeqRemoveAt(i_seqDestination, _intDestSeq_PosToRemove);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Removing occupied position from destination sequence"), Translate(""));
        }
      }
      if (_loopCounter2 > _intSrcSeq_AvailablePos)
      {
        if (_loopCounter2 > _intDestSeq_AvailablePos)
        {
          SeqResetSequenceIndexes(i_seqSource);
          i_seqSource.SetCurrentPosition(_intSrcSeq_Start);
          SeqResetSequenceIndexes(i_seqDestination);
          i_seqDestination.SetCurrentPosition(_intDestSeq_Start);
          break;
        }
      }
    }
  }
  _intSrcSeq_Length = SANGERGENERAL::GetAvailableSeqPositions(i_seqSource);
  _intDestSeq_Length = SANGERGENERAL::GetAvailableSeqPositions(i_seqDestination);
  _intTransferLoops = 0;
  if (_intSrcSeq_Length <= _intDestSeq_Length)
  {
    _intTransferLoops = _intSrcSeq_Length;
  }
  else
  {
    _intTransferLoops = _intDestSeq_Length;
  }
  if (_intTransferLoops > intSourcePlateNumber)
  {
    _intTransferLoops = intSourcePlateNumber;
  }
  _intSeqLength = 0;
  _intSeqLength = _intTransferLoops + _intSrcSeq_Start - 1;
  if (_intSeqLength <= 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No available sequence positions"), Translate(""));
    return (0);
  }
  i_seqSource.SetCount(_intSeqLength);
  _intSeqLength = _intTransferLoops + _intDestSeq_Start - 1;
  if (_intSeqLength <= 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No available sequence positions"), Translate(""));
    return (0);
  }
  i_seqDestination.SetCount(_intSeqLength);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqSource, 0);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, i_seqDestination, 0);
  _strLabwareID = SeqGetLabwareId(i_seqSource);
  _strLabwareID = StrLeft(_strLabwareID, 17);
  if (_strLabwareID == "Greiner_AutoFlask")
  {
    _strJsonSearchPrefix = StrConcat2(Translate("autoflaskConfig,"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Unknown Labware Type"), Translate(""));
    return (1);
  }
  if (i_blnToolType == 0)
  {
    _strJsonSearchPrefix = StrConcat2(_strJsonSearchPrefix, Translate("iswapConfig,"));
  }
  else
  {
    _strJsonSearchPrefix = StrConcat2(_strJsonSearchPrefix, Translate("coreConfig,"));
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _strJsonSearchPrefix: "), _strJsonSearchPrefix);
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripHeight"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripHeight);
  _strType = StrGetType(_intGripHeight);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripHeight. Exiting transport step"), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripWidth"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripWidth);
  _strType = StrGetType(_intGripWidth);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripWidth. Exiting transport step"), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripWidthOpen"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripWidthOpen);
  _strType = StrGetType(_intGripWidthOpen);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripWidthOpen. Exiting transport step"), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripForce"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripForce);
  _strType = StrGetType(_intGripForce);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intGripForce = 5;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripForce. Default value to be used: "), _intGripForce, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripSpeed"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripSpeed);
  _strType = StrGetType(_intGripSpeed);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intGripSpeed = 277.8;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripSpeed. Default value to be used: "), _intGripSpeed, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("zSpeedGet"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intZSpeed_Get);
  _strType = StrGetType(_intZSpeed_Get);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intZSpeed_Get = 128.7;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify zSpeedGet. Default value to be used: "), _intZSpeed_Get, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("xAcceleration"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intXAcceleration);
  _strType = StrGetType(_intXAcceleration);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intXAcceleration = 4;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify xAcceleration. Default value to be used: "), _intXAcceleration, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("zSpeedPlace"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intZSpeed_Place);
  _strType = StrGetType(_intZSpeed_Place);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intZSpeed_Place = 128.7;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify zSpeedPlace. Default value to be used: "), _intZSpeed_Place, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("platePress"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intPlatePress);
  _strType = StrGetType(_intPlatePress);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intPlatePress = 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify platePress. Default value to be used: "), _intPlatePress, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("tolerance"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intTolerance);
  _strType = StrGetType(_intTolerance);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intTolerance = 2;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify tolerance. Default value to be used: "), _intTolerance, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,channelForCOREGrips"), intTrace, __, _intCOREChannelToUse);
  {
    for(_loopCounter3 = 0; _loopCounter3 < i_intThroughput;)
    {
      _loopCounter3 = _loopCounter3 + 1;
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Transport Cycle: "), _loopCounter3, Translate("/"), i_intThroughput, Translate(""), Translate(""));
      if (_loopCounter3 == i_intThroughput)
      {
        _blnPaddleEject = i_blnParkTool;
      }
      if (i_strModuleControl_Src == "tilt")
      {
        _rtnCode = _Module_Tilt(0, 0, 10, 1, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      if (i_strModuleControl_Src == "hhs")
      {
        _rtnCode = _Module_HHS(-1, 0, 1, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS Modules"), Translate(""));
          return (1);
        }
      }
      if (i_blnToolType == 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      else
      {
        ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      }
      if (i_strModuleControl_Src == "tilt")
      {
        _rtnCode = _Module_Tilt(0, -1, 0, 2, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      _strBarcode = SANGERGENERAL::GetBarcode(ML_STAR, i_seqSource);
      if (_strBarcode == "TEMP")
      {
        if (blnSimulationMode == 1)
        {
          if( 0 == _delay.SetTimer(1) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == _delay.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          _strTime = TimGetFormattedTime(Translate("%M%S"));
          _strBarcode = StrConcat2(Translate("SimRunBC_"), _strTime);
          Trace("HSLBarcodeReader::Sim read: ", _strBarcode);
        }
        else
        {
          HSLBarcodeReader::DelComBuffer();
          {
            _loopCounter4 = 0;
            while (1 == 1)
            {
              _loopCounter4 = _loopCounter4 + 1;
              _strBarcode = HSLBarcodeReader::Read();
              if (_strBarcode != "")
              {
                break;
              }
              if (i_blnToolType == 1)
              {
                if (_intShuffle == 0)
                {
                  ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
                  _intShuffle = 1;
                }
                else
                {
                  _intShuffle = 0;
                }
              }
              else
              {
                if (_intShuffle == 0)
                {
                  ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
                  _intShuffle = 1;
                }
                else
                {
                  _intShuffle = 0;
                }
              }
            }
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Retrieved Barcode: "), _strBarcode);
      }
      if (i_strModuleControl_Dest == "tilt")
      {
        _rtnCode = _Module_Tilt(0, 0, 10, 1, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      if (i_strModuleControl_Dest == "hhs")
      {
        _rtnCode = _Module_HHS(-1, 0, 1, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS Modules"), Translate(""));
          return (1);
        }
      }
      if (i_blnToolType == 1)
      {
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      }
      if (i_strModuleControl_Dest == "tilt")
      {
        _rtnCode = _Module_Tilt(0, -1, 0, 2, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      _strLabID = SeqGetLabwareId(i_seqSource);
      _strPosID = SeqGetPositionId(i_seqSource);
      DevSetBarcodeData(ML_STAR, _strLabID, _strPosID, Translate(""));
      _strLabID = SeqGetLabwareId(i_seqDestination);
      _strPosID = SeqGetPositionId(i_seqDestination);
      DevSetBarcodeData(ML_STAR, _strLabID, _strPosID, _strBarcode);
      SeqIncrement(i_seqSource, 1);
      SeqIncrement(i_seqDestination, 1);
    }
  }
  if(0){
    {
      _loopCounter3 = 0;
      while (
         (i_seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqSource, 1);
        _loopCounter3 = _loopCounter3 + 1;
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Transport Cycle: "), _loopCounter3, Translate("/"), i_intThroughput, Translate(""), Translate(""));
        if (_loopCounter3 == i_intThroughput)
        {
          _blnPaddleEject = i_blnParkTool;
        }
        if (i_strModuleControl_Src == "tilt")
        {
          _rtnCode = _Module_Tilt(0, 0, 10, 1, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
            return (1);
          }
        }
        if (i_strModuleControl_Src == "hhs")
        {
          _rtnCode = _Module_HHS(-1, 0, 1, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS Modules"), Translate(""));
            return (1);
          }
        }
        if (i_blnToolType == 1)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        }
        if (i_strModuleControl_Src == "tilt")
        {
          _rtnCode = _Module_Tilt(0, -1, 0, 2, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
            return (1);
          }
        }
        _strBarcode = SANGERGENERAL::GetBarcode(ML_STAR, i_seqSource);
        if (_strBarcode == "TEMP")
        {
          if (blnSimulationMode == 1)
          {
            if( 0 == _delay.SetTimer(1) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == _delay.WaitTimer(hslFalse, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            _strTime = TimGetFormattedTime(Translate("%M%S"));
            _strBarcode = StrConcat2(Translate("SimRunBC_"), _strTime);
            Trace("HSLBarcodeReader::Sim read: ", _strBarcode);
          }
          else
          {
            HSLBarcodeReader::DelComBuffer();
            {
              _loopCounter4 = 0;
              while (1 == 1)
              {
                _loopCounter4 = _loopCounter4 + 1;
                _strBarcode = HSLBarcodeReader::Read();
                if (_strBarcode != "")
                {
                  break;
                }
                if (i_blnToolType == 1)
                {
                  if (_intShuffle == 0)
                  {
                    ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
                    _intShuffle = 1;
                  }
                  else
                  {
                    _intShuffle = 0;
                  }
                }
                else
                {
                  if (_intShuffle == 0)
                  {
                    ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
                    _intShuffle = 1;
                  }
                  else
                  {
                    _intShuffle = 0;
                  }
                }
              }
            }
          }
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Retrieved Barcode: "), _strBarcode);
        }
        if (i_strModuleControl_Dest == "tilt")
        {
          _rtnCode = _Module_Tilt(0, 0, 10, 1, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
            return (1);
          }
        }
        if (i_strModuleControl_Dest == "hhs")
        {
          _rtnCode = _Module_HHS(-1, 0, 1, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS Modules"), Translate(""));
            return (1);
          }
        }
        if (i_blnToolType == 1)
        {
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        else
        {
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        }
        if (i_strModuleControl_Dest == "tilt")
        {
          _rtnCode = _Module_Tilt(0, -1, 0, 2, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
            return (1);
          }
        }
        _strLabID = SeqGetLabwareId(i_seqSource);
        _strPosID = SeqGetPositionId(i_seqSource);
        DevSetBarcodeData(ML_STAR, _strLabID, _strPosID, Translate(""));
        _strLabID = SeqGetLabwareId(i_seqDestination);
        _strPosID = SeqGetPositionId(i_seqDestination);
        DevSetBarcodeData(ML_STAR, _strLabID, _strPosID, _strBarcode);
        SeqIncrement(i_seqSource, 1);
        SeqIncrement(i_seqDestination, 1);
        if (
           (i_seqSource.GetCurrentPosition() > 0 && i_seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqSource.SetMax(i_seqSource.GetTotal());
      i_seqSource.SetCurrentPosition(1);
    }
  }
  if (i_blnToolType == 0)
  {
    if (i_blnParkTool == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Parking iSwap"), Translate(""));
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }
  return (0);
}

private function _RemoveSeqPositions( sequence & i_seq, variable i_blnPosToRemove ) void {
  private variable _intRemovePos;
  private variable _strBC;
  private variable _lpCounter;
  private variable _intExempt;
  private variable _intPossiblePositions;
  private variable _intFound;
  private variable _strSeqName;
  _intExempt = 0;
  _intRemovePos = 1;
  _strSeqName = SeqGetName(i_seq);
  _intPossiblePositions = SANGERGENERAL::GetAvailableSeqPositions(i_seq);
  _intFound = StrFind(_strSeqName, Translate("res_"));
  if (_intFound != -1)
  {
    _intExempt = 1;
  }
  _intFound = StrFind(_strSeqName, Translate("DWP_"));
  if (_intFound != -1)
  {
    _intExempt = 1;
  }
  {
    _lpCounter = 0;
    while (1 == 1)
    {
      _lpCounter = _lpCounter + 1;
      _strBC = SANGERGENERAL::GetBarcode(ML_STAR, i_seq);
      if (i_blnPosToRemove == 1)
      {
        if (_strBC != "")
        {
          SeqRemoveAt(i_seq, _intRemovePos);
        }
        else
        {
          if (_intExempt == 1)
          {
            SeqIncrement(i_seq, 1);
            _intRemovePos = _intRemovePos + 1;
          }
          else
          {
            SeqIncrement(i_seq, 1);
            _intRemovePos = _intRemovePos + 1;
          }
        }
      }
      else
      {
        if (_strBC != "")
        {
          SeqIncrement(i_seq, 1);
          _intRemovePos = _intRemovePos + 1;
        }
        else
        {
          if (_intExempt == 1)
          {
            SeqIncrement(i_seq, 1);
            _intRemovePos = _intRemovePos + 1;
          }
          else
          {
            SeqRemoveAt(i_seq, _intRemovePos);
          }
        }
      }
      if (_intPossiblePositions >= _lpCounter)
      {
        break;
      }
    }
  }
  SeqResetSequenceIndexes(i_seq);
}
