 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "WSI\\AswStatusDialog_WSI\\AswStatusDialog_WSI.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "WSI\\SangerGeneral\\SangerGeneral.hs_" }
 namespace _Method { #include "HSLFileDirectoryLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Unique_members.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "WSI\\TraceArray\\TraceArray.hs_" }
 namespace _Method { #include "WSI\\SCAP_STARplus\\SCAP_STARplus.hs_" }
 namespace _Method { #include "WSI\\JSONSearch\\JSONSearch.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "WSI\\HSLGetSerialNumber_WSI\\HSLGetSerialNumber_WSI.hsl" }
 namespace _Method { #include "lookup.hs_" }
 namespace _Method { #include "WSI\\HSLBarcodeReader_WSI\\HSLBarcodeReader_WSI.hsl" }
 namespace _Method { #include "VirtualLabware_V2.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib\\HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "WSI\\Hamilton-Tilt-Clamp-Module_WSI\\Hamilton Tilt Clamp Module_WSI.hsl" }
 namespace _Method { #include "WSI\\Hamilton-Tilt-Clamp-Module_WSI\\ParallelSway.hs_" }
 namespace _Method { #include "HSL Sias Centrifuge\\SiasCentrifuge.hs_" }
#include "AdherentCellCulture.res"
 namespace _Method { #include "Hamilton Media Fill Module\\HSLHamiltonMediaFillModule.hsl" }
 namespace _Method { #include "HSL Sias Centrifuge\\HSLSiasCentrifugeEnums.hsl" }
 namespace _Method { #include "Load Instructions (All)\\load_instructions\\load_instructions.hs_" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
variable blnTestingMode;
variable blnScaps_State;
variable blnAdministrator;
variable blnTiltingModules_State;
variable blnAswStatusDialog_State;
timer tmrScapRunTime;
variable arrHhsDevices[];
variable arrTiltingModules[];
variable intTiltingModulesArraySize;
variable rtnSuccess;
variable intTrace;
variable blnHhsDevices_State;
variable loopCounter1;
variable rtnValue;
variable loopCounter2;
variable rtnCode;
variable intHhsDeviceArraySize;
variable loopCounter3;
variable ___[];
variable strActiveRequestFolder;
variable strProcess;
variable intDestinationPlateNumber;
variable intSourcePlateNumber;
sequence arrAllSequences[];
variable blnSimulationMode;
variable arrAllBarcodes[];
variable arrAllLabwareTypes[];
variable strCurrentStep;
variable intCheckTime;
variable intNumberOfSequences;
variable loopCounter4;
global device ML_STAR ("AdherentCellCulture.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SANGERGENERAL::_InitLibrary();
    UNIQUE_MEMBERS::_InitLibrary();
    TRACEARRAY::_InitLibrary();
    SCAP_STARPLUS::_InitLibrary();
    JSONSEARCH::_InitLibrary();
    LOOKUP::_InitLibrary();
    PARALLELSWAY::_InitLibrary();
    SIASCENTRIFUGE::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("******************************************************************************************************************************************************\n                                                            Method Details\n******************************************************************************************************************************************************\nMethod:          Cell Culturing for the MAVE_SGE project\nVersion:         0.3\nDescription:     Check SOPs \nSoftware:        Venus 4 (v 4.5.0.7977)\nAuthor:          Chris Henderson\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    blnTestingMode = 1;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnTestingMode: "), blnTestingMode);
    JSONSEARCH::GetJSONEntry(Translate(""), Translate("methodConfig,traceLevel"), TRACE_LEVEL_NONE, ___, intTrace);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTrace: "), intTrace);
    rtnSuccess = A_MethodInit(blnSimulationMode, blnAdministrator, blnAswStatusDialog_State, blnScaps_State, blnTiltingModules_State, blnHhsDevices_State, strActiveRequestFolder, tmrScapRunTime, arrTiltingModules, arrHhsDevices);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>> Tracing Outputs <<<"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnSimulationMode: "), blnSimulationMode);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnAdministrator: "), blnAdministrator);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnAswStatusDialog_State: "), blnAswStatusDialog_State);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnScaps_State: "), blnScaps_State);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnTiltingModules_State: "), blnTiltingModules_State);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnHhsDevices_State: "), blnHhsDevices_State);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strActiveRequestFolder: "), strActiveRequestFolder);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("arrTiltingModules"), arrTiltingModules);
    TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("arrHhsDevices"), arrHhsDevices);
    if (rtnSuccess == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error encountered while running "), Translate("A_MethodInit"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method will abort"), Translate(""));
      abort;
    }
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        intCheckTime = 3;
        rtnSuccess = B_GetWorklist(intCheckTime, strProcess, intSourcePlateNumber, intDestinationPlateNumber, arrAllBarcodes);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>> Tracing Outputs <<<"), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intCheckTime: "), intCheckTime);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strProcess: "), strProcess);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSourcePlateNumber: "), intSourcePlateNumber);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDestinationPlateNumber: "), intDestinationPlateNumber);
        TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("arrAllBarcodes"), arrAllBarcodes);
        if (rtnSuccess == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error encountered while running "), Translate("B_GetWorklist"));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method will abort"), Translate(""));
          abort;
        }
        C_CreateSeq(arrAllSequences, arrAllLabwareTypes);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>> Tracing Outputs <<<"), Translate(""));
        intNumberOfSequences=arrAllSequences.GetSize();
        {
          for(loopCounter4 = 0; loopCounter4 < intNumberOfSequences;)
          {
            loopCounter4 = loopCounter4 + 1;
            TRACELEVEL::TraceSequence(TRACE_LEVEL_DEBUG, arrAllSequences.ElementAt( loopCounter4 -1));
          }
        }
        TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("arrAllLabwareTypes"), arrAllLabwareTypes);
        D_LoadInstructions(arrAllSequences);
        rtnSuccess = E_PipettingSteps(strCurrentStep);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">>> Tracing Outputs <<<"), Translate(""));
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strCurrentStep: "), strCurrentStep);
        if (rtnSuccess == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error encountered while running "), Translate("E_PipettingSteps"));
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method will abort"), Translate(""));
          abort;
        }
        rtnSuccess = F_ProcessClose();
        if (rtnSuccess == 2)
        {
          break;
        }
      }
    }
    MECC::TraceComment(Translate("############## Method Complete Successfully #################"));
    if (blnAswStatusDialog_State == 1)
    {
      rtnCode = AswStatusDialog::Terminate();
      if (rtnCode == 0)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error encountered while running "), Translate("'Terminate of AswStatusDialog_WSI'"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method will abort"), Translate(""));
        abort;
      }
    }
    if (blnScaps_State == 1)
    {
      SCAP_STARPLUS::Disconnect();
      blnScaps_State = 0;
    }
    if (blnTiltingModules_State == 1)
    {
      intTiltingModulesArraySize=arrTiltingModules.GetSize();
      {
        for(loopCounter2 = 0; loopCounter2 < intTiltingModulesArraySize;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (blnSimulationMode == 0)
          {
            rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltingModules.ElementAt( loopCounter2 -1), 1, 0);
            if (rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( loopCounter2 -1), Translate("] Step: "), Translate("Tilt"), Translate(""), Translate(""));
              TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method will abort"), Translate(""));
              abort;
            }
            rtnCode = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltingModules.ElementAt( loopCounter2 -1));
            if (rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( loopCounter2 -1), Translate("] Step: "), Translate("Close"), Translate(""), Translate(""));
              TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method will abort"), Translate(""));
              abort;
            }
            rtnCode = Hamilton_Tilt_Clamp_Module::Terminate(arrTiltingModules.ElementAt( loopCounter2 -1));
            if (rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( loopCounter2 -1), Translate("] Step: "), Translate("Terminate"), Translate(""), Translate(""));
              TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method will abort"), Translate(""));
              abort;
            }
          }
          else
          {
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[loopCounter2-1], ": Tilt to 0°;");
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[loopCounter2-1], ": ClampClose;");
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[loopCounter2-1], ": Terminate;");
          }
        }
      }
      blnTiltingModules_State = 0;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from Tilt Modules"), Translate(""));
    }
    if (blnHhsDevices_State == 1)
    {
      intHhsDeviceArraySize=arrHhsDevices.GetSize();
      {
        for(loopCounter3 = 0; loopCounter3 < intHhsDeviceArraySize;)
        {
          loopCounter3 = loopCounter3 + 1;
          if (blnSimulationMode == 0)
          {
            rtnCode = HSLHamHeaterShaker::StopTempCtrl(arrHhsDevices.ElementAt( loopCounter3 -1));
            if (rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( loopCounter3 -1), Translate("] Step: "), Translate("StopTempCtrl"), Translate(" Error Code: "), rtnCode);
              abort;
            }
            rtnCode = HSLHamHeaterShaker::StopShaker(arrHhsDevices.ElementAt( loopCounter3 -1));
            if (rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( loopCounter3 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), rtnCode);
              abort;
            }
            rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( loopCounter3 -1), 0);
            if (rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( loopCounter3 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), rtnCode);
              abort;
            }
          }
          else
          {
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[loopCounter2-1], ": StopTempCtrl;");
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[loopCounter2-1], ": StopShaker;");
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[loopCounter2-1], ": SetPlateLock;");
          }
        }
      }
      HSLHamHeaterShaker::Terminate();
      blnHhsDevices_State = 0;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
    }
    if(0){
      SIASCENTRIFUGE::Terminate(121);
    }
    SANGERGENERAL::_ExitLibrary();
    UNIQUE_MEMBERS::_ExitLibrary();
    TRACEARRAY::_ExitLibrary();
    SCAP_STARPLUS::_ExitLibrary();
    JSONSEARCH::_ExitLibrary();
    LOOKUP::_ExitLibrary();
    PARALLELSWAY::_ExitLibrary();
    SIASCENTRIFUGE::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
  } }
