private function A_MethodInit( variable & o_blnSimMode, variable & o_blnAdmin, variable & o_blnAswStatusDialog, variable & o_blnSCAPs, variable & o_blnTiltModules, variable & o_blnHHSs, variable & o_strActiveRequestFolderPath, timer & o_tmrHepaFan, variable & o_arrTiltModules[], variable & o_arrHHSDevices[] ) variable ;
private function B_GetWorklist( variable i_intTimeToWait, variable & o_strProcessType, variable & o_intUniqueSrcBCArraySize, variable & o_intUniqueDestBCArraySize, variable & o_arrWorklistBC[] ) variable ;
private function C_CreateSeq( sequence & o_arrAllSequences[], variable & o_arrAllLabwareTypes[] ) void ;
private function D_LoadInstructions( sequence & i_arrAllSequences[] ) void ;
private function E_PipettingSteps( variable & o_strCurrentStep ) variable ;
private function F_ProcessClose(  ) variable ;
private function MAP_SampTrack(  ) void ;
private function PIP_ChannelTransfer( sequence _seqSource, variable i_blnSrcIncrement, sequence _seqDestination, variable i_blnDestIncrement, sequence _seqTips, variable _strTipCounter, variable i_fltPipettingVolume, variable i_intPipettingLoop, variable i_blnFreshTips, variable i_intTiltAngle, variable i_intTiltSpeed, variable i_intAspirateHeight, variable i_intAspirateRetract, variable i_intDispenseHeight, variable i_intDispenseRetract ) variable ;
private function Trp_DeckTransport( variable i_strCurrentStep_Details, variable i_blnToolEject, variable i_intCheckPlate, variable i_blnCore ) variable ;
private function _GetActiveSequence( sequence & i_arrSeq[], variable i_strSearch, sequence & o_seq ) variable ;
private function _Module_Centrifuge(  ) void ;
private function _Module_HHS( variable i_intHeat, variable i_intShake, variable i_blnPlateLock, variable i_intPositionSpecific ) variable ;
private function _Module_MediaFill(  ) void ;
private function _Module_Tilt( variable i_intSway, variable i_intAngle, variable i_intSpeed, variable i_blnPlateLock, variable i_intPositionSpecific ) variable ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  private variable _strVarType;
  private variable _strMessage;
  private variable _intHhsDeviceArraySize;
  private variable _intTiltingModulesArraySize;
  private variable _loopCounter1;
  private variable _loopCounter2;
  private variable _rtnCode;
  _strVarType = StrGetType(Translate("Wonder how I do this"));
  if (_strVarType == "i")
  {
    _strMessage = StrConcat2(Translate("Method aborted before pipetting started"), Translate(""));
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "textBlock2.Text", strCurrentStep );
  customDialog_1.ShowCustomDialog();
  if (blnAswStatusDialog_State == 1)
  {
    AswStatusDialog::Terminate();
  }
  if (blnTiltingModules_State == 1)
  {
    _intTiltingModulesArraySize=arrTiltingModules.GetSize();
    {
      for(_loopCounter1 = 0; _loopCounter1 < _intTiltingModulesArraySize;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltingModules.ElementAt( _loopCounter1 -1), 1, 0);
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter1 -1), Translate("] Step: "), Translate("Tilt"), Translate(""), Translate(""));
        }
        _rtnCode = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltingModules.ElementAt( _loopCounter1 -1));
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter1 -1), Translate("] Step: "), Translate("Close"), Translate(""), Translate(""));
        }
        _rtnCode = Hamilton_Tilt_Clamp_Module::Terminate(arrTiltingModules.ElementAt( _loopCounter1 -1));
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter1 -1), Translate("] Step: "), Translate("Terminate"), Translate(""), Translate(""));
        }
      }
    }
  }
  if (blnScaps_State == 1)
  {
    SCAP_STARPLUS::Disconnect();
  }
  if (blnHhsDevices_State == 1)
  {
    _intHhsDeviceArraySize=arrHhsDevices.GetSize();
    {
      for(_loopCounter2 = 0; _loopCounter2 < _intHhsDeviceArraySize;)
      {
        _loopCounter2 = _loopCounter2 + 1;
        _rtnCode = HSLHamHeaterShaker::StopTempCtrl(arrHhsDevices.ElementAt( _loopCounter2 -1));
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopTempCtrl"), Translate(" Error Code: "), rtnCode);
        }
        _rtnCode = HSLHamHeaterShaker::StopShaker(arrHhsDevices.ElementAt( _loopCounter2 -1));
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), rtnCode);
        }
        _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 0);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), rtnCode);
        }
      }
    }
    HSLHamHeaterShaker::Terminate();
  }
  SIASCENTRIFUGE::Terminate(121);
}

private function A_MethodInit( variable & o_blnSimMode, variable & o_blnAdmin, variable & o_blnAswStatusDialog, variable & o_blnSCAPs, variable & o_blnTiltModules, variable & o_blnHHSs, variable & o_strActiveRequestFolderPath, timer & o_tmrHepaFan, variable & o_arrTiltModules[], variable & o_arrHHSDevices[] ) variable {
  private dialog customDialog_2;
  private variable _blnSCAPTraceLevel;
  private variable _strSimMode;
  private variable _rtnValue;
  private variable _strMessage;
  private variable _strUsersPreferredName;
  private variable _;
  private variable _intFanSpeed;
  private variable __[];
  private variable _intTiltCount;
  private variable _intTiltComport;
  private variable _strTilt;
  private variable _strModuleName;
  private variable _loopCounter2;
  private variable _rtnCode;
  private variable _intKennyTimeout;
  private variable _intKennyComport;
  private variable _strHHS;
  private variable _loopCounter3;
  private variable _intHHSCount;
  private variable _loopCounter4;
  private variable _loopCounter5;
  private variable _strMethodFolderPath;
  private variable _intActiveRequestArraySize;
  private variable _arrActiveRequestFilePaths[];
  private variable _arrSCAPComports[];
  private variable _intHHSArraySize;
  o_blnSimMode = 0;
  o_blnAdmin = 0;
  o_blnAswStatusDialog = 0;
  o_blnSCAPs = 0;
  o_blnTiltModules = 0;
  o_blnHHSs = 0;
  o_strActiveRequestFolderPath = 0;
  o_arrTiltModules.SetSize( 0);
  o_arrHHSDevices.SetSize( 0);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                         Method Initialisation - Start\n\n******************************************************************************************************************************************************"));
  TRACELEVEL::SetTraceLevel(intTrace);
  o_arrTiltModules.SetSize(0);
  o_arrHHSDevices.SetSize(0);
  o_blnAdmin = 0;
  o_blnSimMode = 0;
  o_blnAswStatusDialog = 0;
  o_blnSCAPs = 0;
  o_blnTiltModules = 0;
  o_blnHHSs = 0;
  o_strActiveRequestFolderPath = Translate("");
  MECC::TraceComment(Translate("========== Software Dependencies =========="));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Setting TraceLevel -----"), Translate(""));
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("/"));
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::PROGRESS, Translate(" = "));
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE, Translate("*"));
  TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, Translate(" ^ "));
  _blnSCAPTraceLevel = 0;
  if (intTrace == TRACE_LEVEL_DEBUG)
  {
    _blnSCAPTraceLevel = 1;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> TraceLevel Initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Establishing AswStatusDialog -----"), Translate(""));
  o_blnAswStatusDialog = 1;
  SANGERGENERAL::StatusDisplay_Init(0);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> AswStatusDialog Initialised"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Identifying User -----"), Translate(""));
  _strUsersPreferredName = Translate("Chris");
  o_blnAdmin = 1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Admin level: "), o_blnAdmin);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Identified User: "), _strUsersPreferredName);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("----- Get Run Mode -----"), Translate(""));
  o_blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (o_blnSimMode == 1)
  {
    _strSimMode = Translate("Sim");
    if (o_blnAdmin == 0)
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      _rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      if (_rtnValue == 2)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Method ended by user"), Translate(""));
        return (1);
      }
    }
  }
  else
  {
    _strSimMode = Translate("Live");
  }
  if (blnTestingMode == 1)
  {
    _strMessage = Translate("Instrument: Testing Mode");
  }
  else
  {
    _strMessage = Translate("Instrument: Operational Mode");
  }
  SANGERGENERAL::StatusDisplay_Update(_strMessage, Translate(""), 0);
  SANGERGENERAL::StatusDisplay_Update(Translate("Instrument mode: "), _strSimMode, 0);
  if (o_blnSimMode == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Simulation Mode"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument Run Mode"), Translate(""));
  }
  MECC::TraceComment(Translate("========== Instrument Modules =========="));
  MECC::TraceComment(Translate("---------- Initialise Instrument ----------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  MECC::TraceComment(Translate("---------- Initialise Hepa Filters ----------"));
  _arrSCAPComports.SetSize(0);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,scapComports"), intTrace, _arrSCAPComports, _);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,fanSpeed"), intTrace, __, _intFanSpeed);
  SCAP_STARPLUS::Connect(_arrSCAPComports, _blnSCAPTraceLevel, o_blnSimMode, blnTestingMode);
  SCAP_STARPLUS::SetLightState(1);
  SCAP_STARPLUS::SetFanSpeed(_intFanSpeed);
  if (_intFanSpeed != 0)
  {
    SCAP_STARPLUS::SetFanState(1);
  }
  if( 0 == o_tmrHepaFan.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  o_blnSCAPs = 1;
  SANGERGENERAL::StatusDisplay_Update(Translate("Connected to Hepa filters"), Translate(""), 0);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> SCAP Filters Initialised "), Translate(""));
  MECC::TraceComment(Translate("---------- Initialise Kenny ----------"));
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,kennyComport"), intTrace, __, _intKennyComport);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,kennyTimeout"), intTrace, __, _intKennyTimeout);
  _rtnCode = HSLBarcodeReader::SetSimulation(o_blnSimMode);
  if (_rtnCode != 0)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetSimulation"), Translate(""), Translate(""), Translate(""), Translate(""));
    return (1);
  }
  if (o_blnSimMode == 0)
  {
    _rtnCode = HSLBarcodeReader::SetComPort(_intKennyComport);
    if (_rtnCode != 0)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetComPort"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
    _rtnCode = HSLBarcodeReader::SetTimeout(_intKennyTimeout);
    if (_rtnCode != 0)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetTimeout"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
    _rtnCode = HSLBarcodeReader::SetErrorRecovery(2);
    if (_rtnCode != 0)
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Orbital Barcoder - Step: "), Translate("SetErrorRecovery"), Translate(""), Translate(""), Translate(""), Translate(""));
      abort;
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Kenny initialised"), Translate(""));
  MECC::TraceComment(Translate("---------- Initialise Tilt Modules ----------"));
  o_blnTiltModules = 1;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,tiltClampComport"), intTrace, __, _intTiltComport);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,tiltCount"), intTrace, __, _intTiltCount);
  {
    for(_loopCounter2 = 0; _loopCounter2 < _intTiltCount;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      _strTilt = StrConcat2(Translate("devTilt_"), _loopCounter2);
      o_arrTiltModules.AddAsLast(_strTilt);
      _strModuleName = StrConcat2(Translate("C"), _loopCounter2);
      _rtnCode = Hamilton_Tilt_Clamp_Module::Initialize(_intTiltComport, _strModuleName, o_blnSimMode, 0, o_arrTiltModules.ElementAt( _loopCounter2 -1));
      if (_rtnCode == 0)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrTiltModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("Initialise"), Translate(""), Translate(""));
        return (1);
      }
      _rtnCode = Hamilton_Tilt_Clamp_Module::SetTraceLevel(o_arrTiltModules.ElementAt( _loopCounter2 -1), intTrace);
      if (_rtnCode == 0)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrTiltModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetTraceLevel"), Translate(""), Translate(""));
        return (1);
      }
      if (o_blnSimMode == 0)
      {
        _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(o_arrTiltModules.ElementAt( _loopCounter2 -1), 10, 0);
        if (_rtnCode == 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrTiltModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("TIlt"), Translate(""), Translate(""));
          return (1);
        }
      }
    }
  }
  SANGERGENERAL::StatusDisplay_Update(Translate("Connected to tilt modules"), Translate(""), 0);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("-- Tilt Module IDs"), o_arrTiltModules);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), _intTiltCount, Translate(" Tilt Modules Initialised"), Translate(""));
  MECC::TraceComment(Translate("---------- Initialise Heater Shakers ----------"));
  o_blnHHSs = 1;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,hhsCount"), intTrace, __, _intHHSCount);
  if (o_blnSimMode == 0)
  {
    HSLHamHeaterShaker::SetSimulation(o_blnSimMode);
    HSLHamHeaterShaker::SetUSBTrace(_blnSCAPTraceLevel);
    {
      for(_loopCounter3 = 0; _loopCounter3 < _intHHSCount;)
      {
        _loopCounter3 = _loopCounter3 + 1;
        _strHHS = StrConcat2(Translate("devHHS_"), _loopCounter3);
        _rtnCode = HSLHamHeaterShaker::CreateUsbDevice(_loopCounter3, _strHHS);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), _strHHS, Translate("] Step: "), Translate("CreateUsbDevice"), Translate(" Error Code: "), _rtnCode);
          return (1);
        }
        _rtnCode = HSLHamHeaterShaker::StopShaker(_strHHS);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrHHSDevices.ElementAt( _loopCounter4 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), _rtnCode);
          return (1);
        }
        _rtnCode = HSLHamHeaterShaker::SetPlateLock(_strHHS, 0);
        if (_rtnCode != 0)
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), o_arrHHSDevices.ElementAt( _loopCounter4 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
          return (1);
        }
        o_arrHHSDevices.AddAsLast(_strHHS);
      }
    }
  }
  else
  {
    {
      for(_loopCounter4 = 0; _loopCounter4 < _intHHSCount;)
      {
        _loopCounter4 = _loopCounter4 + 1;
        _strHHS = StrConcat2(Translate("devHHS_"), _loopCounter4);
        o_arrHHSDevices.AddAsLast(_strHHS);
      }
    }
  }
  _intHHSArraySize=o_arrHHSDevices.GetSize();
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("-- HHS Device IDs"), o_arrHHSDevices);
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), _intHHSArraySize, Translate(" HHS Modules Initialised"), Translate(""));
  MECC::TraceComment(Translate("---------- Initialise Media Fill Modules ----------"));
  if(0){
  }
  MECC::TraceComment(Translate("---------- Initialise Centrifuge ----------"));
  if(0){
    SIASCENTRIFUGE::SetSimulationMode(o_blnSimMode);
    _rtnCode = SIASCENTRIFUGE::Initialize(121, Translate("Ixion"), HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
    if (_rtnCode == 1)
    {
      abort;
    }
    SIASCENTRIFUGE::MoveToPosition(121, 1, HSLSiasCentrifuge::Enums::ErrorRecovery::Retry);
  }
  MECC::TraceComment(Translate("========== Clear Old Worklists =========="));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Checking for past worklists..."), Translate(""));
  _strMethodFolderPath = GetMethodFolder(0);
  _arrActiveRequestFilePaths.SetSize(0);
  o_strActiveRequestFolderPath = StrConcat2(_strMethodFolderPath, Translate("Request Files\\"));
  _rtnCode = FileDirectoryLib::CheckIfDirectoryExists(o_strActiveRequestFolderPath);
  if (_rtnCode == 1)
  {
    _rtnCode = FileDirectoryLib::CreateDirectory(o_strActiveRequestFolderPath);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not create Directory: "), o_strActiveRequestFolderPath);
      return (1);
    }
  }
  FileDirectoryLib::GetFilesInDirectory(o_strActiveRequestFolderPath, Translate("*"), _arrActiveRequestFilePaths);
  _intActiveRequestArraySize=_arrActiveRequestFilePaths.GetSize();
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of old requests found: "), _intActiveRequestArraySize);
  if (_intActiveRequestArraySize >= 1)
  {
    {
      for(_loopCounter5 = 0; _loopCounter5 < _intActiveRequestArraySize;)
      {
        _loopCounter5 = _loopCounter5 + 1;
        _rtnCode = FileDirectoryLib::DeleteFile(_arrActiveRequestFilePaths.ElementAt( _loopCounter5 -1));
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not delete old worklist: "), _arrActiveRequestFilePaths.ElementAt( _loopCounter5 -1));
          return (1);
        }
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Old Worklist Folder: "), o_strActiveRequestFolderPath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Successfully cleared old requests"), Translate(""));
  return (0);
}

private function B_GetWorklist( variable i_intTimeToWait, variable & o_strProcessType, variable & o_intUniqueSrcBCArraySize, variable & o_intUniqueDestBCArraySize, variable & o_arrWorklistBC[] ) variable {
  private variable _arrPendingRequestFiles[];
  private variable _intPendingRequestArraySize;
  private variable _loopCounter1;
  private variable _strActiveRequestFilePath;
  private variable _intIndex;
  private variable _strPendingFolderPath;
  private dialog customDialog_3;
  private variable _rtnValue;
  private variable _intWorklistPos;
  private variable _rtnCode;
  private timer _tmrWait;
  private variable _blnError;
  private variable _arrWorklist_Processes[];
  private variable _arrWorklist_Dates[];
  private variable _arrWorklist_DestWells[];
  private variable _arrWorklist_SrcBC[];
  private variable _arrWorklist_DestLabwares[];
  private variable _arrWorklist_SrcWells[];
  private variable _arrWorklist_SrcLabwares[];
  private variable _hndWorklist_Process;
  private variable _hndWorklist_SrcBC;
  private variable _hndWorklist_DestBC;
  private variable _hndWorklist_SrcWell;
  private variable _hndWorklist_DestLabware;
  private variable _hndWorklist_Date;
  private variable _hndWorklist_SrcLabware;
  private variable _loopCounter2;
  private variable _hndWorklist_DestWell;
  private file _hndWorklist;
  private variable __[];
  private variable _arrWorklist_DestBC[];
  private variable _intUniqueProcessesArraySize;
  private variable _arrUniqueProcesses[];
  private variable _intApprovedProcessesArraySize;
  private variable _blnPass;
  private variable _loopCounter3;
  private variable _;
  private variable _arrApprovedProcesses[];
  private variable _arrUniqueBC_Src[];
  private variable _arrUniqueBC_Dest[];
  private variable _strSrcLabware;
  private variable _strDestLabware;
  private variable _strCurrentRunFolderPath;
  private variable _strArchiveFilePath;
  private variable _intPreviousRunsArraySize;
  private variable _strArchiveFolderPath;
  private variable _intCurrentRunNum;
  private variable _strFolderDate;
  private variable _arrPreviousRuns[];
  private variable _str;
  private variable _loopCounter4;
  private variable _int;
  private variable _arrDisplayRequestFiles[];
  private variable _intLength;
  private variable _arrWorklistBC[];
  o_strProcessType = 0;
  o_intUniqueSrcBCArraySize = 0;
  o_intUniqueDestBCArraySize = 0;
  o_arrWorklistBC.SetSize( 0);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Find Pending Request - Start\n\n******************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("========== Find Worklist =========="));
  _intIndex = 0;
  _arrPendingRequestFiles.SetSize(0);
  _arrDisplayRequestFiles.SetSize(0);
  _strPendingFolderPath = StrConcat2(strActiveRequestFolder, Translate("Pending Files\\"));
  _strActiveRequestFilePath = StrConcat2(strActiveRequestFolder, Translate("ActiveRequest.csv"));
  {
    _loopCounter1 = 0;
    while (1 == 1)
    {
      _loopCounter1 = _loopCounter1 + 1;
      if (_intIndex == 3)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> No Available Worklist"), Translate(""));
        return (1);
      }
      FileDirectoryLib::GetFilesInDirectory(_strPendingFolderPath, Translate("*.*"), _arrPendingRequestFiles);
      _intPendingRequestArraySize=_arrPendingRequestFiles.GetSize();
      {
        for(_loopCounter4 = 0; _loopCounter4 < _intPendingRequestArraySize;)
        {
          _loopCounter4 = _loopCounter4 + 1;
          _int = StrReverseFind(_arrPendingRequestFiles.ElementAt( _loopCounter4 -1), Translate("\\"));
          _intLength = StrGetLength(_arrPendingRequestFiles.ElementAt( _loopCounter4 -1));
          _int = _intLength - _int;
          _int = _int - 1;
          _str = StrRight(_arrPendingRequestFiles.ElementAt( _loopCounter4 -1), _int);
          _arrDisplayRequestFiles.AddAsLast(_str);
        }
      }
      if (_intPendingRequestArraySize >= 1)
      {
        if (blnTestingMode == 1)
        {
          _intWorklistPos = 6;
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _arrDisplayRequestFiles );
          customDialog_3.SetCustomDialogProperty( "comboBox1.SelectedIndex", _intWorklistPos );
          customDialog_3.ShowCustomDialog();
          _rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
          _intWorklistPos = customDialog_3.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
          if (_rtnValue == 2)
          {
            return (1);
          }
          _rtnCode = FileDirectoryLib::CopyFile(_arrPendingRequestFiles.ElementAt( _intWorklistPos -1), _strActiveRequestFilePath);
          if (_rtnCode == 1)
          {
            MECC::TraceComment(Translate("CopyFile of HSLFileDirectoryLib had an error"));
            return (1);
          }
        }
        else
        {
          _rtnCode = FileDirectoryLib::MoveFile(_arrPendingRequestFiles.ElementAt( 1 -1), _strActiveRequestFilePath);
          if (_rtnCode == 1)
          {
            MECC::TraceComment(Translate("MoveFile of HSLFileDirectoryLib had an error"));
            return (1);
          }
        }
        break;
      }
      else
      {
        TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, Translate(""), Translate(""), Translate("Searching for worklist"));
        if( 0 == _tmrWait.SetTimer(i_intTimeToWait) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == _tmrWait.WaitTimer(hslFalse, hslFalse) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _intIndex = _intIndex + 1;
      }
    }
  }
  if (blnTestingMode == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Filepath: "), _arrPendingRequestFiles.ElementAt( _intWorklistPos -1));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Filepath: "), _arrPendingRequestFiles.ElementAt( 1 -1));
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- New Worklist Filepath: "), _strActiveRequestFilePath);
  MECC::TraceComment(Translate("========== Get Data From Worklist =========="));
  _blnError = 0;
  _arrWorklist_SrcBC.SetSize(0);
  _arrWorklist_DestBC.SetSize(0);
  _arrWorklist_Dates.SetSize(0);
  _arrWorklist_Processes.SetSize(0);
  _arrWorklist_SrcWells.SetSize(0);
  _arrWorklist_DestWells.SetSize(0);
  _arrWorklist_SrcLabwares.SetSize(0);
  _arrWorklist_DestLabwares.SetSize(0);
  _hndWorklist.AddField("Source Barcode", _hndWorklist_SrcBC, hslString, 255);
  _hndWorklist.AddField("Source Well ID", _hndWorklist_SrcWell, hslString, 255);
  _hndWorklist.AddField("Source Labware ID", _hndWorklist_SrcLabware, hslString, 255);
  _hndWorklist.AddField("Destination Barcode", _hndWorklist_DestBC, hslString, 255);
  _hndWorklist.AddField("Destination Well ID", _hndWorklist_DestWell, hslString, 255);
  _hndWorklist.AddField("Destination Labware ID", _hndWorklist_DestLabware, hslString, 255);
  _hndWorklist.AddField("Date", _hndWorklist_Date, hslString, 8);
  _hndWorklist.AddField("Process", _hndWorklist_Process, hslString, 255);
  _hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == _hndWorklist.Open(_strActiveRequestFilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strActiveRequestFilePath, "HxMetEdCompCmd");
  }
  {
    _loopCounter2 = 0;
    while (
       (_hndWorklist.Eof() == 0)
    )
    {
      _loopCounter2 = _loopCounter2 + 1;
      if( 0 == _hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_Process, 1);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with _hndWorklist_Process. Exiting loop "), Translate(""));
        break;
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_SrcBC, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Barcode"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_DestBC, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Barcode"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_Date, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Date"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_SrcWell, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Well ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_DestWell, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Well ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_SrcLabware, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Source Labware ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      _rtnCode = SANGERGENERAL::WorklistEntryValidation(_hndWorklist_DestLabware, 0);
      if (_rtnCode == "error")
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Error with worklist variable: "), Translate("Destination Labware ID"));
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Loop count: "), _loopCounter2);
        return (1);
      }
      StrMakeLower(_hndWorklist_Process);
      StrMakeLower(_hndWorklist_SrcLabware);
      StrMakeLower(_hndWorklist_DestLabware);
      _arrWorklist_Processes.AddAsLast(_hndWorklist_Process);
      _arrWorklist_SrcBC.AddAsLast(_hndWorklist_SrcBC);
      _arrWorklist_DestBC.AddAsLast(_hndWorklist_DestBC);
      _arrWorklist_Dates.AddAsLast(_hndWorklist_Date);
      _arrWorklist_SrcWells.AddAsLast(_hndWorklist_SrcWell);
      _arrWorklist_DestWells.AddAsLast(_hndWorklist_DestWell);
      _arrWorklist_SrcLabwares.AddAsLast(_hndWorklist_SrcLabware);
      _arrWorklist_DestLabwares.AddAsLast(_hndWorklist_DestLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Worklist Line Count: "), _loopCounter2);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Date:                "), _hndWorklist_Date);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Process:             "), _hndWorklist_Process);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- SourceWellID:        "), _hndWorklist_SrcWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- SourceLabware:       "), _hndWorklist_SrcLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- SourceBarcode:       "), _hndWorklist_SrcBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- DestinationWellID:   "), _hndWorklist_DestWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- DestinationLabware:  "), _hndWorklist_DestLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- DestinationBarcode:  "), _hndWorklist_DestBC);
    }
  }
  if( 0 != _hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  _hndWorklist.RemoveFields();
  TRACEARRAY::TraceArray(Translate("Full Worklist Trace"), _arrWorklist_SrcBC, _arrWorklist_SrcWells, _arrWorklist_SrcLabwares, _arrWorklist_DestBC, _arrWorklist_DestWells, _arrWorklist_DestLabwares, _arrWorklist_Dates, _arrWorklist_Processes, __, __, __, __, __, __, __, __);
  MECC::TraceComment(Translate("========== Worklist Validation =========="));
  SANGERGENERAL::StatusDisplay_Update(Translate("----- Performing Worklist Checks -----"), Translate(""), 0);
  _arrUniqueProcesses.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(_arrWorklist_Processes, _arrUniqueProcesses, 0);
  _intUniqueProcessesArraySize=_arrUniqueProcesses.GetSize();
  if (_intUniqueProcessesArraySize != 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("///// Hamilton has identified too many processes in the active worklist. "), Translate("Please copy the worklist and split the processes types into individual worklists"));
    SANGERGENERAL::StatusDisplay_Update(Translate("Too many process types in worklist"), Translate(""), 0);
    abort;
  }
  o_strProcessType = _arrUniqueProcesses.ElementAt( 1 -1);
  _arrApprovedProcesses.SetSize(0);
  _blnPass = 0;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("approvedProcessConfig"), 0, _arrApprovedProcesses, _);
  _intApprovedProcessesArraySize=_arrApprovedProcesses.GetSize();
  {
    for(_loopCounter3 = 0; _loopCounter3 < _intApprovedProcessesArraySize;)
    {
      _loopCounter3 = _loopCounter3 + 1;
      if (_arrApprovedProcesses.ElementAt( _loopCounter3 -1) == o_strProcessType)
      {
        _blnPass = 1;
        break;
      }
    }
  }
  if (_blnPass == 0)
  {
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Process: "), o_strProcessType);
  SANGERGENERAL::StatusDisplay_Update(Translate("Process Type: "), o_strProcessType, 0);
  _arrUniqueBC_Src.SetSize(0);
  _arrUniqueBC_Dest.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(_arrWorklist_SrcBC, _arrUniqueBC_Src, 0);
  UNIQUE_MEMBERS::Unique_members(_arrWorklist_DestBC, _arrUniqueBC_Dest, 0);
  o_intUniqueSrcBCArraySize=_arrUniqueBC_Src.GetSize();
  o_intUniqueDestBCArraySize=_arrUniqueBC_Dest.GetSize();
  _arrWorklistBC = HSLExtensions::Array::Concat(_arrUniqueBC_Src, _arrUniqueBC_Dest);
  UNIQUE_MEMBERS::Unique_members(_arrWorklistBC, o_arrWorklistBC, 0);
  TRACEARRAY::TraceArray(Translate(">> Unique Barcodes"), _arrUniqueBC_Src, _arrUniqueBC_Dest, __, __, __, __, __, __, __, __, __, __, __, __, __, __);
  _strSrcLabware=_arrWorklist_SrcLabwares.GetAt(1-1);
  _strDestLabware=_arrWorklist_DestLabwares.GetAt(1-1);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strSourceLabwareType = "), _strSrcLabware);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strDestinationLabwareType = "), _strDestLabware);
  MECC::TraceComment(Translate("========== Archive Worklist =========="));
  _strFolderDate = TimGetFormattedDate(Translate("%Y_%m_%d"));
  _strArchiveFolderPath = StrConcat4(strActiveRequestFolder, Translate("Archive\\"), _strFolderDate, Translate("\\"));
  _rtnCode = FileDirectoryLib::CheckIfDirectoryExists(_strArchiveFolderPath);
  if (_rtnCode == 0)
  {
    _rtnCode = FileDirectoryLib::CreateDirectory(_strArchiveFolderPath);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not create folder: "), _strArchiveFolderPath);
      return (1);
    }
  }
  _arrPreviousRuns.SetSize(0);
  FileDirectoryLib::GetSubdirectoriesOfDirectory(_strArchiveFolderPath, _arrPreviousRuns);
  _intPreviousRunsArraySize=_arrPreviousRuns.GetSize();
  _intCurrentRunNum = _intPreviousRunsArraySize + 1;
  _strCurrentRunFolderPath = StrConcat4(_strArchiveFolderPath, Translate("Run "), _intCurrentRunNum, Translate("\\"));
  _rtnCode = FileDirectoryLib::CheckIfDirectoryExists(_strCurrentRunFolderPath);
  if (_rtnCode == 0)
  {
    _rtnCode = FileDirectoryLib::CreateDirectory(_strCurrentRunFolderPath);
    if (_rtnCode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not create folder: "), _strCurrentRunFolderPath);
      return (1);
    }
  }
  _strArchiveFilePath = StrConcat4(_strCurrentRunFolderPath, Translate(""), loopCounter1, Translate("_OriginalWorklist.csv"));
  _rtnCode = FileDirectoryLib::MoveFile(_strActiveRequestFilePath, _strArchiveFilePath);
  if (_rtnCode == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("Could not move request file to archive folder"), Translate(""));
    return (1);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- File Location: "), _strArchiveFilePath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist moved to archives"), Translate(""));
  return (0);
}

private function E_PipettingSteps( variable & o_strCurrentStep ) variable {
  private dialog customDialog_4;
  private variable _strCurrentStep_Details;
  private variable _strJsonSearch;
  private variable _strCurrentStep_Event;
  private variable _arrActiveWorkflow[];
  private variable _;
  private variable _arrWorkflowTemp[];
  private variable _loopCounter1;
  private variable _intFound;
  private variable _strSubWorkflow;
  private variable _strStep;
  private variable _loopCounter2;
  private variable _intSubWorkflowSteps;
  private variable _arrSubWorkflow[];
  private variable _rtnValue;
  private variable _loopCounter3;
  private variable _intStepLength;
  private variable _int;
  private variable _intTotalVolume;
  private variable _intVolumeUnit;
  private variable _intTempVolume;
  private variable _strTempVol;
  private variable _strNextStep_Event;
  private variable blnFirstLabwareTrp;
  private variable _intTipType;
  private variable _strNextStep;
  private variable _intNumberOfWorkflowSteps;
  private variable _intNumberOfWorkflowSteps_Temp;
  private variable _strPreviousStep;
  private variable _strStepToSearchFor;
  private variable _blnToolType;
  private variable _blnToolEject;
  private variable _rtnCode;
  private variable _intCellConcentration;
  private variable _intCellTransferVolume;
  private variable _loopCounter4;
  private variable _intCellsToSeed;
  private variable _blnCheck;
  private dialog customDialog_5;
  private variable _intSwayTime;
  private variable _intTimerTime;
  private variable _intTimerDetails_HHS;
  private timer _tmrHHS;
  private variable _strDots;
  private variable _intElapsedTime;
  private variable _loopCounter5;
  private variable _intMinTimerDuration;
  private variable _fltWaitCompletion;
  private timer _tmrTemp;
  private variable _blnLogFileCheck;
  private variable _strLogFileCheck;
  private variable _strLogFileFolder;
  private variable _intShake;
  private variable _intHeat;
  private variable _intAllSequencesArraySize;
  private variable _intArrayPos;
  private variable _intSeqTotal;
  private variable _intPlatesProcessed;
  private variable _loopCounter6;
  private variable _loopCounter7;
  private variable _strLabwareID;
  private variable __[];
  private variable _strPipettingLocations;
  private variable _fltPause;
  private variable _intPossibleKeys;
  private variable _loopCounter8;
  private variable _arrStepDetails_Key[];
  private variable _arrStepDetails_Parameter[];
  private variable _strNextStep_Details;
  private variable _intNextStep;
  private variable _strPreviousStep_Event;
  private variable _strPreviousStep_Details;
  private variable _strStep_Details;
  private variable _strStep_Event;
  private variable _loopCounter9;
  private variable _arrActiveWorkflow_Events[];
  private variable _arrActiveWorkflow_Event[];
  private variable _arrActiveWorkflow_Details[];
  private variable _strStep_Detail;
  private variable _strCurrentStep_Detail;
  private variable _strJSONPrefix;
  private variable _intDispenseIncrement;
  private variable _intDispenseSubmerge;
  private variable _intDispenseFollowing;
  private variable _intDispenseHeight;
  private variable _strDestinationLocation;
  private variable _intDispenseRetract;
  private variable _intDispenseMixVolume;
  private variable _intDispenseMixCycles;
  private variable _intDispenseLLD;
  private variable _intAspirateHeight;
  private variable _intTiltSpeed;
  private variable _intPipettingLoops;
  private variable _blnFreshTips;
  private variable _intPipettingVolume;
  private variable _fltPipettingVolume;
  private variable _blnSourceIncrement;
  private variable _strTipType;
  private variable _intAspirateRetract;
  private variable _strLiquidClass;
  private variable _blnDestinationIncrement;
  private variable _intDestinationIncrement;
  private variable _intTiltAngle;
  private variable _strSourceLocation;
  private variable _strTipTypeLower;
  private sequence _seqTip;
  private sequence _seqDestination;
  private sequence _seqSource;
  private variable _strTipCounter;
  private variable _strTipCounterSuffix;
  o_strCurrentStep = 0;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                        Pipetting Steps - Start\n\n******************************************************************************************************************************************************"));
  SANGERGENERAL::StatusDisplay_Update(Translate("===== Pipetting steps to begin ====="), Translate(""), 0);
  _arrActiveWorkflow.SetSize(0);
  _strJsonSearch = StrConcat2(strProcess, Translate("Workflow"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, 0, _arrActiveWorkflow, _);
  _arrActiveWorkflow_Events.SetSize(0);
  _arrActiveWorkflow_Details.SetSize(0);
  _intNumberOfWorkflowSteps=_arrActiveWorkflow.GetSize();
  {
    for(_loopCounter9 = 0; _loopCounter9 < _intNumberOfWorkflowSteps;)
    {
      _loopCounter9 = _loopCounter9 + 1;
      _strStep=_arrActiveWorkflow.GetAt(_loopCounter9-1);
      _intStepLength = StrGetLength(_strStep);
      _intFound = StrFind(_strStep, Translate("_"));
      _strStep_Event = StrLeft(_strStep, _intFound);
      _intFound = StrFind(_strStep, Translate("_"));
      _int = _intStepLength - _intFound - 1;
      _strStep_Detail = StrRight(_strStep, _int);
      _arrActiveWorkflow_Events.AddAsLast(_strStep_Event);
      _arrActiveWorkflow_Details.AddAsLast(_strStep_Detail);
    }
  }
  if (intTrace == 2)
  {
    Util2::Debug::TraceArray_3(Translate(">> Process Step"), _arrActiveWorkflow, _arrActiveWorkflow_Events, _arrActiveWorkflow_Details);
  }
  else
  {
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Process Step "), _arrActiveWorkflow);
  }
  if (blnSimulationMode == 0)
  {
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    _rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if (_rtnValue == 2)
    {
      return (1);
    }
  }
  MECC::TraceComment(Translate("====================================\n          Start workflow\n===================================="));
  _arrStepDetails_Key.SetSize(0);
  _arrStepDetails_Parameter.SetSize(0);
  blnFirstLabwareTrp = 0;
  {
    _loopCounter3 = 0;
    while (1 == 1)
    {
      _loopCounter3 = _loopCounter3 + 1;
      _strCurrentStep_Event=_arrActiveWorkflow_Events.GetAt(_loopCounter3-1);
      _strCurrentStep_Detail=_arrActiveWorkflow_Details.GetAt(_loopCounter3-1);
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("Automated Cell Culture"), Translate(""), _arrActiveWorkflow.ElementAt( _loopCounter3 -1));
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Event: "), _strCurrentStep_Event);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Details: "), _strCurrentStep_Detail);
      _strStepToSearchFor = Translate("transport");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _intFound = StrFind(_strCurrentStep_Event, Translate("CORE"));
        if (_intFound != -1)
        {
          _blnToolType = 1;
          _intFound = StrFind(_strNextStep, Translate("CORE"));
          if (_intFound != -1)
          {
            _blnToolEject = 0;
          }
          else
          {
            _blnToolEject = 1;
          }
        }
        else
        {
          _blnToolType = 0;
          _intFound = StrFind(_strNextStep, Translate("iSwap"));
          if (_intFound != -1)
          {
            _blnToolEject = 0;
          }
          else
          {
            _blnToolEject = 1;
          }
        }
        _rtnCode = Trp_DeckTransport(_strCurrentStep_Details, _blnToolEject, 2, _blnToolType);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'Trp_DeckTransport'."), Translate(" The method will abort"));
          return (1);
        }
      }
      _strStepToSearchFor = Translate("pipetting");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _strJSONPrefix = StrConcat4(Translate("pipettingConfig,"), _strCurrentStep_Detail, Translate(","), Translate(""));
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("PipettingVolume"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _fltPipettingVolume);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("PipettingLoops"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intPipettingLoops);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("LiquidClass"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _strLiquidClass);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("TipType"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _strTipType);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("FreshTips"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _blnFreshTips);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("TiltAngle"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intTiltAngle);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("TiltSpeed"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intTiltSpeed);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("SourceLocation"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _strSourceLocation);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("SourceIncrement"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _blnSourceIncrement);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("AspirateHeight"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intAspirateHeight);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("AspirateRetract"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intAspirateRetract);
        _strJsonSearch = StrConcat2(_strJSONPrefix, Translate("DestinationLocation"));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _strDestinationLocation);
        _strTipTypeLower = StrMakeLowerCopy(_strTipType);
        _strJsonSearch = StrConcat4(Translate("methodConfig,"), _strTipTypeLower, Translate("_TipCounter"), Translate(""));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, TRACE_LEVEL_NONE, __, _strTipCounter);
        if (_strTipTypeLower == "300uL")
        {
          SeqCopySequence(_seqTip, ML_STAR.Tips_300uLSlim);
        }
        else
        {
          if (_strTipTypeLower == "1ml")
          {
            SeqCopySequence(_seqTip, ML_STAR.Tips_1000ulFiltered);
          }
          else
          {
            if (_strTipTypeLower == "4ml")
            {
              SeqCopySequence(_seqTip, ML_STAR.Tips_4mLFiltered);
            }
            else
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Unkown Tip Type. Method will abort"), Translate(""));
              return (1);
            }
          }
        }
        _rtnCode = _GetActiveSequence(arrAllSequences, _strSourceLocation, _seqSource);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running '_GetActiveSequence'."), Translate(" The method will abort"));
          return (1);
        }
        _rtnCode = _GetActiveSequence(arrAllSequences, _strDestinationLocation, _seqDestination);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running '_GetActiveSequence'."), Translate(" The method will abort"));
          return (1);
        }
        if (_strDestinationLocation == "Waste")
        {
          _intDispenseLLD = 0;
          _intDispenseSubmerge = 0;
          _intDispenseHeight = 20;
          _intDispenseRetract = 1;
          _intDispenseFollowing = 0;
          _intDispenseMixCycles = 0;
          _intDispenseMixVolume = 0;
          _blnDestinationIncrement = 0;
        }
        _rtnCode = PIP_ChannelTransfer(_seqSource, _blnSourceIncrement, _seqDestination, _blnDestinationIncrement, _seqTip, _strTipCounter, _fltPipettingVolume, _intPipettingLoops, _blnFreshTips, _intTiltAngle, _intTiltSpeed, _intAspirateHeight, _intAspirateRetract, _intDispenseHeight, _intDispenseRetract);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## An error occured while running 'PIP_ChannelTransfer'."), Translate(" The method will abort"));
          return (1);
        }
      }
      _strStepToSearchFor = Translate("cellDilutionCalc");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        {
          _loopCounter4 = 0;
          while (1 == 1)
          {
            _loopCounter4 = _loopCounter4 + 1;
            customDialog_5.InitCustomDialog("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");
            customDialog_5.SetCustomDialogProperty( "numeric1.Value", _intCellConcentration );
            customDialog_5.SetCustomDialogProperty( "numeric2.Value", _intCellsToSeed );
            customDialog_5.SetCustomDialogProperty( "textBlock8.Text", _intCellTransferVolume );
            customDialog_5.ShowCustomDialog();
            _rtnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
            _intCellConcentration = customDialog_5.GetCustomDialogProperty( "numeric1.Value" );
            _intCellsToSeed = customDialog_5.GetCustomDialogProperty( "numeric2.Value" );
            _blnCheck = customDialog_5.GetCustomDialogProperty( "ChangeCheck.Value" );
            if (_rtnValue == 2)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with Cell Dilution Dialog Box"), Translate(""));
              return (1);
            }
            // Maths to find the volume of cells to transfer
            _intCellTransferVolume = MthCeiling((_intCellsToSeed * 1000) / _intCellConcentration);
            // Exit the loop if no values have changed
            if (_rtnValue == 1){if (_blnCheck == 0){break;}}
          }
        }
        _arrStepDetails_Key.AddAsLast(_strCurrentStep_Details);
        _arrStepDetails_Parameter.AddAsLast(_intCellTransferVolume);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intCellConcentration: "), _intCellConcentration);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intCellsToSeed: "), _intCellsToSeed);
        TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Maths performed: MthCeiling(("), _intCellsToSeed, Translate(" * 1000) / "), _intCellConcentration, Translate(") = "), _intCellTransferVolume, Translate("uL (intCellTransferVolume)"), Translate(""), Translate(""), Translate(""));
      }
      _strStepToSearchFor = Translate("centrifuge");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      _strStepToSearchFor = Translate("sway");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _intSwayTime = StrIVal(_strCurrentStep_Details);
        if (blnSimulationMode == 1)
        {
          _intSwayTime = 5;
        }
        _rtnCode = _Module_Tilt(_intSwayTime, 10, 10, 0, 0);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the sway step"), Translate(""));
          return (1);
        }
      }
      _strStepToSearchFor = Translate("timer");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _strStepToSearchFor = Translate("Start");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _intTimerTime = StrIVal(_strCurrentStep_Details);
          if (blnSimulationMode == 1)
          {
            _intTimerTime = 9;
          }
          _intFound = StrFind(_strCurrentStep_Event, Translate("HHS"));
          if (_intFound != -1)
          {
            if( 0 == _tmrHHS.SetTimer(hslInfinite) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == _tmrHHS.RestartTimer() )
            {
                  MECC::RaiseRuntimeErrorEx(-1305607936, MECC::IDS::stepNameTimerRestart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            _intTimerDetails_HHS = _intTimerTime;
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Started new timer: "), _strCurrentStep_Details);
        }
        _strStepToSearchFor = Translate("WaitFor");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _strDots = Translate("");
          _fltPause = 6.7345948566;
          if (blnSimulationMode == 1)
          {
            _fltPause = _fltPause / (10 * 1.0);
          }
          _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
          if (_intFound != -1)
          {
            _intMinTimerDuration = _intTimerDetails_HHS;
          }
          TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate(">> Waiting for '"), _strCurrentStep_Details, Translate("' timer ("), _intMinTimerDuration, Translate(" seconds)"), Translate(""), Translate(""), Translate(""));
          {
            _loopCounter5 = 0;
            while (1 == 1)
            {
              _loopCounter5 = _loopCounter5 + 1;
              _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
              if (_intFound != -1)
              {
                _intElapsedTime = _tmrHHS.GetElapsedTime();
              }
              if (_strDots == "...")
              {
                _strDots = Translate("");
              }
              _strDots = _strDots + Translate(".");
              if (_intElapsedTime >= _intMinTimerDuration)
              {
                break;
              }
              else
              {
                _strLogFileFolder = FilGetLogFilesPath();
                _strLogFileCheck = StrConcat4(_strLogFileFolder, Translate("\\Chris Henderson is an amazing detective-slash genius.txt"), Translate(""), Translate(""));
                _blnLogFileCheck = FileDirectoryLib::CheckIfFileExists(_strLogFileCheck);
                if (_blnLogFileCheck == 1)
                {
                  FileDirectoryLib::DeleteFile(_strLogFileCheck);
                  break;
                }
              }
              if( 0 == _tmrTemp.SetTimer(_fltPause) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == _tmrTemp.WaitTimer(hslFalse, hslFalse) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              _fltWaitCompletion = _intElapsedTime / (_intMinTimerDuration * 1.0);
              _fltWaitCompletion = _fltWaitCompletion * 100;
              _fltWaitCompletion = MthRound(_fltWaitCompletion, 2);
              TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate(">> ["), _fltWaitCompletion, Translate("%"), Translate(""), Translate("] Waiting"), _strDots, Translate(""), Translate(""));
            }
          }
          TRACELEVEL::Trace_08(TRACE_LEVEL_RELEASE, Translate(">> ["), Translate("100"), Translate("%"), Translate(""), Translate("] Finished waiting"), Translate(""), Translate(""), Translate(""));
        }
      }
      _strStepToSearchFor = Translate("hhs");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _strStepToSearchFor = Translate("Heat");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _intHeat = StrIVal(_strCurrentStep_Details);
          _rtnCode = _Module_HHS(_intHeat, -1, 0, 0);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Heat step"), Translate(""));
            return (1);
          }
        }
        _strStepToSearchFor = Translate("Shake");
        _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
        if (_intFound != -1)
        {
          _intShake = StrIVal(_strCurrentStep_Details);
          _rtnCode = _Module_HHS(0, _intShake, 0, 0);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Shake step"), Translate(""));
            return (1);
          }
        }
      }
      _strStepToSearchFor = Translate("increment");
      _intFound = StrFind(_strCurrentStep_Event, _strStepToSearchFor);
      if (_intFound != -1)
      {
        _intAllSequencesArraySize=arrAllSequences.GetSize();
        {
          for(_loopCounter6 = 0; _loopCounter6 < _intAllSequencesArraySize;)
          {
            _loopCounter6 = _loopCounter6 + 1;
            _strLabwareID = SeqGetLabwareId(arrAllSequences.ElementAt( _loopCounter6 -1));
            _intFound = StrFind(_strLabwareID, Translate("Loading"));
            if (_intFound != -1)
            {
              _intArrayPos = _loopCounter6;
              break;
            }
          }
        }
        _strJsonSearch = StrConcat4(Translate("methodConfig,"), strProcess, Translate("ProcessCount"), Translate(""));
        JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intPlatesProcessed);
        {
          for(_loopCounter7 = 0; _loopCounter7 < _intPlatesProcessed;)
          {
            _loopCounter7 = _loopCounter7 + 1;
            onerror goto errLabel_6 ;
            err.Clear();
            SeqRemoveAt(arrAllSequences.ElementAt( _intArrayPos -1), 1);
            _intSeqTotal = SeqGetTotal(arrAllSequences.ElementAt( _intArrayPos -1));
            if (_intSeqTotal == 0)
            {
              break;
            }
            errLabel_6 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              _intSeqTotal = 0;
              break;
            }   /* end if from skip handler if no error */
          }
        }
        if (_intSeqTotal == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Complete"), Translate(""));
          break;
        }
      }
    }
  }
  return (0);
}

private function Trp_DeckTransport( variable i_strCurrentStep_Details, variable i_blnToolEject, variable i_intCheckPlate, variable i_blnCore ) variable {
  private variable _intFound;
  private variable _strDestinationLocation;
  private variable _strSourceLocation;
  private variable _int;
  private variable _intLength;
  private sequence _seqDestination;
  private sequence _seqSource;
  private variable _loopCounter1;
  private variable _strLabwareID;
  private variable _intSeqStart_Dest;
  private variable _intSeqStart_Src;
  private variable _strBC;
  private variable _intPositionToRemove_Src;
  private variable _loopCounter2;
  private variable _intPositionToRemove_Dest;
  private variable _intSeqSrc_Length;
  private variable _intSeqDest_Length;
  private variable _intSeqLength;
  private variable _loopCounter3;
  private variable _intCurrentSeqPos_Dest;
  private variable _intCurrentSeqPos_Src;
  private variable _strJsonSearchPrefix;
  private variable _strJsonSearch;
  private variable _intZSpeed_Get;
  private variable _intGripSpeed;
  private variable _intGripWidthOpen;
  private variable _strType;
  private variable _intZSpeed_Place;
  private variable _intGripForce;
  private variable _intTolerance;
  private variable _intPlatePress;
  private variable _intXAcceleration;
  private variable _intGripWidth;
  private variable _intGripHeight;
  private variable __[];
  private variable _blnPressPlate;
  private variable _blnCheckPlate;
  private variable _blnPaddleEject;
  private variable _;
  private variable _arrInverseGrips_Src[];
  private variable _intCOREChannelToUse;
  private variable _arrInverseGrips_Dest[];
  private variable _strDestSeqName;
  private variable _intSrcSeq_AvailablePos;
  private variable _intDestSeq_AvailablePos;
  private variable _intTransferLoops;
  private variable _strSrcSeqName;
  private variable _intLookup;
  private variable _blnInverseGrip;
  private variable _strBarcode;
  private variable _strTime;
  private timer _delay;
  private variable _loopCounter4;
  private variable _strLabID;
  private variable _strPosID;
  private variable _rtnCode;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("--- Tracing Input Variables ---"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_strCurrentStep_Details: "), i_strCurrentStep_Details);
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_blnToolEject: "), i_blnToolEject, Translate(" (1 = park/eject, 0 = retain)"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intCheckPlate: "), i_intCheckPlate, Translate(" (1 = on pickup, 2 = on place, 3 = both, 0 = neither)"), Translate(""));
  MECC::TraceComment(Translate("========== Create Source & Destination Sequences =========="));
  SeqRemoveAll(_seqSource);
  SeqRemoveAll(_seqDestination);
  _intLength = StrGetLength(i_strCurrentStep_Details);
  _intFound = StrFind(i_strCurrentStep_Details, Translate("To"));
  if (_intFound == -1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Issue with i_strCurrentStep_Details: "), i_strCurrentStep_Details);
    return (1);
  }
  _strSourceLocation = StrLeft(i_strCurrentStep_Details, _intFound);
  _rtnCode = _GetActiveSequence(arrAllSequences, _strSourceLocation, _seqSource);
  if (_rtnCode == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error retrieving source sequence"), Translate(""));
    return (1);
  }
  _int = _intLength - _intFound - 2;
  _strDestinationLocation = StrRight(i_strCurrentStep_Details, _int);
  _rtnCode = _GetActiveSequence(arrAllSequences, _strDestinationLocation, _seqDestination);
  if (_rtnCode == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error retrieving destination sequence"), Translate(""));
    return (1);
  }
  _strSrcSeqName = SeqGetName(_seqSource);
  _strDestSeqName = SeqGetName(_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Source Seq: "), _strSrcSeqName);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Destination Seq: "), _strDestSeqName);
  _intPositionToRemove_Src = 1;
  _intPositionToRemove_Dest = 1;
  _intSeqStart_Src = _seqSource.GetCurrentPosition();
  _intSrcSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(_seqSource);
  _intSeqStart_Dest = _seqDestination.GetCurrentPosition();
  _intDestSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(_seqDestination);
  {
    _loopCounter2 = 0;
    while (1 == 1)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (_loopCounter2 <= _intSrcSeq_AvailablePos)
      {
        _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqSource);
        if (_strBC == "")
        {
          SeqRemoveAt(_seqSource, _intPositionToRemove_Src);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Removing unoccupied position from source sequence"), Translate(""));
        }
        else
        {
          SeqIncrement(_seqSource, 1);
          _intPositionToRemove_Src = _intPositionToRemove_Src + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Allowing occupied SrcPos from: "), _loopCounter2);
        }
      }
      if (_loopCounter2 <= _intDestSeq_AvailablePos)
      {
        _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqDestination);
        if (_strBC == "")
        {
          SeqIncrement(_seqDestination, 1);
          _intPositionToRemove_Dest = _intPositionToRemove_Dest + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Allowing unoccupied DestPos at: "), _loopCounter2);
        }
        else
        {
          SeqRemoveAt(_seqDestination, _intPositionToRemove_Dest);
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Removing occupied position from destination sequence"), Translate(""));
        }
      }
      if (_loopCounter2 > _intSrcSeq_AvailablePos)
      {
        if (_loopCounter2 > _intDestSeq_AvailablePos)
        {
          break;
        }
      }
    }
  }
  SeqResetSequenceIndexes(_seqSource);
  _seqSource.SetCurrentPosition(_intSeqStart_Src);
  SeqResetSequenceIndexes(_seqDestination);
  _seqDestination.SetCurrentPosition(_intSeqStart_Dest);
  _intSeqSrc_Length = SANGERGENERAL::GetAvailableSeqPositions(_seqSource);
  _intSeqDest_Length = SANGERGENERAL::GetAvailableSeqPositions(_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Available Source Positions: "), _intSeqSrc_Length);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Available Destination Positions: "), _intSeqDest_Length);
  _intTransferLoops = 0;
  if (_intSeqSrc_Length <= _intSeqDest_Length)
  {
    _intTransferLoops = _intSeqSrc_Length;
  }
  else
  {
    _intTransferLoops = _intSeqDest_Length;
  }
  if (_intTransferLoops > intSourcePlateNumber)
  {
    _intTransferLoops = intSourcePlateNumber;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Number of Transfer Cycles: "), _intTransferLoops);
  _intSeqLength = 0;
  _intCurrentSeqPos_Src = _seqSource.GetCurrentPosition();
  _intCurrentSeqPos_Dest = _seqDestination.GetCurrentPosition();
  _intSeqLength = _intTransferLoops + _intCurrentSeqPos_Src - 1;
  if (_intSeqLength <= 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No available sequence positions"), Translate(""));
    return (0);
  }
  _seqSource.SetCount(_intSeqLength);
  _intSeqLength = _intTransferLoops + _intCurrentSeqPos_Dest - 1;
  if (_intSeqLength <= 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No available sequence positions"), Translate(""));
    return (0);
  }
  _seqDestination.SetCount(_intSeqLength);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, _seqSource, 0);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, _seqDestination, 0);
  if (i_blnCore == 0)
  {
    if (_strSourceLocation == "tilt")
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Media Module blocking access"), Translate(""));
      return (1);
    }
    if (_strDestinationLocation == "tilt")
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Media Module blocking access"), Translate(""));
      return (1);
    }
  }
  _strLabwareID = SeqGetLabwareId(_seqSource);
  _strLabwareID = StrLeft(_strLabwareID, 17);
  if (_strLabwareID == "Greiner_AutoFlask")
  {
    _strJsonSearchPrefix = StrConcat2(Translate("autoflaskConfig,"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Unknown Labware Type"), Translate(""));
    return (1);
  }
  if (i_blnCore == 0)
  {
    _strJsonSearchPrefix = StrConcat2(_strJsonSearchPrefix, Translate("iswapConfig,"));
  }
  else
  {
    if (i_blnCore == 1)
    {
      _strJsonSearchPrefix = StrConcat2(_strJsonSearchPrefix, Translate("coreConfig,"));
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with i_blnCore: "), i_blnCore);
      return (1);
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _strJsonSearchPrefix: "), _strJsonSearchPrefix);
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripHeight"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripHeight);
  _strType = StrGetType(_intGripHeight);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripHeight. Exiting transport step"), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripWidth"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripWidth);
  _strType = StrGetType(_intGripWidth);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripWidth. Exiting transport step"), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripWidthOpen"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripWidthOpen);
  _strType = StrGetType(_intGripWidthOpen);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripWidthOpen. Exiting transport step"), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripForce"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripForce);
  _strType = StrGetType(_intGripForce);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intGripForce = 5;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripForce. Default value to be used: "), _intGripForce, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("gripSpeed"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intGripSpeed);
  _strType = StrGetType(_intGripSpeed);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intGripSpeed = 277.8;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify gripSpeed. Default value to be used: "), _intGripSpeed, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("zSpeedGet"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intZSpeed_Get);
  _strType = StrGetType(_intZSpeed_Get);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intZSpeed_Get = 128.7;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify zSpeedGet. Default value to be used: "), _intZSpeed_Get, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("xAcceleration"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intXAcceleration);
  _strType = StrGetType(_intXAcceleration);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intXAcceleration = 4;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify xAcceleration. Default value to be used: "), _intXAcceleration, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("zSpeedPlace"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intZSpeed_Place);
  _strType = StrGetType(_intZSpeed_Place);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intZSpeed_Place = 128.7;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify zSpeedPlace. Default value to be used: "), _intZSpeed_Place, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("platePress"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intPlatePress);
  _strType = StrGetType(_intPlatePress);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intPlatePress = 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify platePress. Default value to be used: "), _intPlatePress, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _strJsonSearch = StrConcat2(_strJsonSearchPrefix, Translate("tolerance"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intTolerance);
  _strType = StrGetType(_intTolerance);
  if (_strType != "i")
  {
    if (_strType != "f")
    {
      _intTolerance = 2;
      TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Could not identify tolerance. Default value to be used: "), _intTolerance, Translate(" - _strJsonSearch: "), _strJsonSearch);
    }
  }
  _blnPaddleEject = 0;
  _blnPressPlate = 0;
  _blnCheckPlate = 0;
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,inverseGrips,source"), intTrace, _arrInverseGrips_Src, _);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,inverseGrips,destination"), intTrace, _arrInverseGrips_Dest, _);
  JSONSEARCH::GetJSONEntry(Translate(""), Translate("starPlusConfig,channelForCOREGrips"), intTrace, __, _intCOREChannelToUse);
  if (i_intCheckPlate < 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Issue with i_intCheckPlate: "), i_intCheckPlate);
    abort;
  }
  if (i_intCheckPlate > 3)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Issue with i_intCheckPlate: "), i_intCheckPlate);
    abort;
  }
  if (i_intCheckPlate == 1) {_blnCheckPlate = 1;}
  if (i_intCheckPlate == 2) {_blnPressPlate = 1;}
  if (i_intCheckPlate == 3)
      {_blnPressPlate = 1;
        _blnCheckPlate = 1;}
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Check Plate on Source (_blnCheckPlate): "), _blnCheckPlate);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Press Plate on Destination (_blnPressPlate): "), _blnPressPlate);
  MECC::TraceComment(Translate("========== Labware Transports =========="));
  {
    _loopCounter3 = 0;
    while (
       (_seqSource.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqSource, 1);
      _loopCounter3 = _loopCounter3 + 1;
      // To help with trace file legibility
      Trace();
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Transport Cycle: "), _loopCounter3, Translate("/"), _intTransferLoops, Translate(""), Translate(""));
      if (_loopCounter1 == _intTransferLoops)
      {
        _blnPaddleEject = i_blnToolEject;
      }
      _intLookup = LOOKUP::Lookup(_arrInverseGrips_Src, _strSourceLocation);
      if (_intLookup >= 1)
      {
        _blnInverseGrip = 1;
      }
      else
      {
        _blnInverseGrip = 0;
      }
      if (_strSourceLocation == "Tilt")
      {
        _rtnCode = _Module_Tilt(0, 0, 10, 1, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      else
      {
        if (_strSourceLocation == "HHS")
        {
          _rtnCode = _Module_HHS(0, 0, 1, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS Modules"), Translate(""));
            return (1);
          }
        }
      }
      if (i_blnCore == 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      else
      {
        ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      }
      if (_strSourceLocation == "Tilt")
      {
        _rtnCode = _Module_Tilt(0, -1, 0, 2, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      _strBarcode = SANGERGENERAL::GetBarcode(ML_STAR, _seqSource);
      if (_strBarcode == "TEMP")
      {
        if (blnSimulationMode == 1)
        {
          if( 0 == _delay.SetTimer(1) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == _delay.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          _strTime = TimGetFormattedTime(Translate("%M%S"));
          _strBarcode = StrConcat2(Translate("SimRunBC_"), _strTime);
          Trace("HSLBarcodeReader::Sim read: ", _strBarcode);
        }
        else
        {
          HSLBarcodeReader::DelComBuffer();
          {
            _loopCounter4 = 0;
            while (1 == 1)
            {
              _loopCounter4 = _loopCounter4 + 1;
              _strBarcode = HSLBarcodeReader::Read();
              if (_strBarcode != "")
              {
                break;
              }
              if (i_blnCore == 1)
              {
                ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
              }
              else
              {
                ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
              }
            }
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Retrieved Barcode: "), _strBarcode);
      }
      if (_strDestinationLocation == "Tilt")
      {
        _rtnCode = _Module_Tilt(0, 0, 10, 1, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      else
      {
        if (_strDestinationLocation == "HHS")
        {
          _rtnCode = _Module_HHS(0, 0, 1, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS Modules"), Translate(""));
            return (1);
          }
        }
      }
      if (i_blnCore == 1)
      {
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      }
      _strLabID = SeqGetLabwareId(_seqSource);
      _strPosID = SeqGetPositionId(_seqSource);
      DevSetBarcodeData(ML_STAR, _strLabID, _strPosID, Translate(""));
      _strLabID = SeqGetLabwareId(_seqDestination);
      _strPosID = SeqGetPositionId(_seqDestination);
      DevSetBarcodeData(ML_STAR, _strLabID, _strPosID, _strBarcode);
      if (_strDestinationLocation == "Tilt")
      {
        _rtnCode = _Module_Tilt(0, -1, 0, 2, _loopCounter3);
        if (_rtnCode == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the Tilt Modules"), Translate(""));
          return (1);
        }
      }
      else
      {
        if (_strDestinationLocation == "HHS")
        {
          _rtnCode = _Module_HHS(0, 0, 2, _loopCounter3);
          if (_rtnCode == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the HHS Modules"), Translate(""));
            return (1);
          }
        }
      }
      SeqIncrement(_seqSource, 1);
      SeqIncrement(_seqDestination, 1);
      if (
         (_seqSource.GetCurrentPosition() > 0 && _seqSource.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqSource.SetMax(_seqSource.GetTotal());
    _seqSource.SetCurrentPosition(1);
  }
  if (i_blnCore == 0)
  {
    if (i_blnToolEject == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Parking iSwap"), Translate(""));
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Completed Labware Transport Step"), Translate(""));
  return (0);
}

private function C_CreateSeq( sequence & o_arrAllSequences[], variable & o_arrAllLabwareTypes[] ) void {
  private variable _arrBarcodeLocations[];
  private variable _intSeqLength;
  private variable _intMaxPlateNum;
  private variable _strSeqName;
  private variable _intStartPos;
  private variable _intPosToRemove;
  private variable _loopCounter1;
  private sequence _seqTemp;
  private variable _arrAllLabwareTypes[];
  private variable _loopCounter4;
  private variable _intAvailablePos;
  o_arrAllSequences.SetSize( 0);
  o_arrAllLabwareTypes.SetSize( 0);
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Sequence Creation - Start\n\n******************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("========== Calculate Variables =========="));
  o_arrAllSequences.SetSize(0);
  _arrBarcodeLocations.SetSize(0);
  _intMaxPlateNum=arrAllBarcodes.GetSize();
  TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- intMaxPlateNumber: "), _intMaxPlateNum, Translate(""), Translate(""), Translate(""), Translate(""));
  MECC::TraceComment(Translate("========== Create Flexible Sequences =========="));
  {
    _loopCounter4 = 0;
    while (1 == 1)
    {
      _loopCounter4 = _loopCounter4 + 1;
      MECC::TraceComment(Translate("----- Create Temporary Sequence -----"));
      if (_loopCounter4 == 1)
      {
        SeqRemoveAll(_seqTemp);
        SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Loading);
      }
      else
      {
        if (_loopCounter4 == 2)
        {
          SANGERGENERAL::AlignLabware(ML_STAR, ML_STAR.AutoFlasks_Tilt);
          SeqRemoveAll(_seqTemp);
          SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Tilt);
        }
        else
        {
          if (_loopCounter4 == 3)
          {
            SeqRemoveAll(_seqTemp);
            SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Centrifuge);
          }
          else
          {
            if (_loopCounter4 == 4)
            {
              SeqRemoveAll(_seqTemp);
              SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_HHS);
            }
            else
            {
              if (_loopCounter4 == 5)
              {
                SeqRemoveAll(_seqTemp);
                SeqCopySequence(_seqTemp, ML_STAR.Greiner_AutoFlask_Barcoding_0001);
              }
              else
              {
                break;
              }
            }
          }
        }
      }
      _intStartPos = _intMaxPlateNum + 1;
      _intAvailablePos = SANGERGENERAL::GetAvailableSeqPositions(_seqTemp);
      _intPosToRemove = _intAvailablePos - _intMaxPlateNum;
      if (_intPosToRemove >= 1)
      {
        {
          for(_loopCounter1 = 0; _loopCounter1 < _intPosToRemove;)
          {
            _loopCounter1 = _loopCounter1 + 1;
            SeqRemoveAt(_seqTemp, _intStartPos);
          }
        }
      }
      o_arrAllSequences.AddAsLast(_seqTemp);
      _intSeqLength = SeqGetTotal(_seqTemp);
      _strSeqName = SeqGetName(_seqTemp);
      if (_intSeqLength == 1)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence position"), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> "), _strSeqName, Translate(" -- "), _intSeqLength, Translate(" sequence positions"), Translate(""));
      }
    }
  }
  MECC::TraceComment(Translate("========== Create Fixed Sequences =========="));
  o_arrAllSequences.AddAsLast(ML_STAR.res_Media_XL);
  o_arrAllSequences.AddAsLast(ML_STAR.res_PBS_XL);
  o_arrAllSequences.AddAsLast(ML_STAR.res_TrypLE_XL);
  o_arrAllSequences.AddAsLast(ML_STAR.res_Waste_XL);
  _arrAllLabwareTypes.SetSize(0);
  o_arrAllLabwareTypes.AddAsLast(Translate("AutoFlask"));
}

private function MAP_SampTrack(  ) void {
}

private function PIP_ChannelTransfer( sequence _seqSource, variable i_blnSrcIncrement, sequence _seqDestination, variable i_blnDestIncrement, sequence _seqTips, variable _strTipCounter, variable i_fltPipettingVolume, variable i_intPipettingLoop, variable i_blnFreshTips, variable i_intTiltAngle, variable i_intTiltSpeed, variable i_intAspirateHeight, variable i_intAspirateRetract, variable i_intDispenseHeight, variable i_intDispenseRetract ) variable {
  private variable _intFound;
  private variable _intLength;
  private variable _strSourceLocation;
  private variable _rtnCode;
  private variable _strDestinationLocation;
  private variable _int;
  private variable _strDestSeqName;
  private variable _strJsonSearch;
  private variable _strSeqName;
  private variable _strTipCounterSuffix;
  private variable _strSrcSeqName;
  private variable _intTipSize;
  private variable _intKey;
  private sequence _seqTip;
  private variable __[];
  private variable _strJsonPrefix;
  private variable _strSourceLocation_lower;
  private variable _intSeqSrc_Length;
  private variable _intSeqStart_Dest;
  private variable _strBC;
  private variable _intPositionToRemove_Src;
  private variable _intSeqStart_Src;
  private variable _loopCounter2;
  private variable _intSrcSeq_AvailablePos;
  private variable _intDestSeq_AvailablePos;
  private variable _intPositionToRemove_Dest;
  private variable _intSeqDest_Length;
  private variable _intNumberOfChannels;
  private variable _intNumberOfActiveChannels;
  private variable _intMaxSeqLength;
  private variable _blnIncrement_Dest;
  private variable _blnIncrement_Src;
  private variable _intTransferCycles;
  private variable _intNumSeqPos;
  private variable _flt;
  private variable _intModulusTransferCycle;
  private variable _strLC;
  private variable _intPipettingLoops;
  private variable _intPipettingVolume;
  private variable _intMixCycles_Dest;
  private variable _intMixPercentage_Src;
  private variable _intMixCycles_Src;
  private variable _intSrcMixVolume;
  private variable _intMixPercentage_Dest;
  private variable _intDestMixVolume;
  private variable _loopCounter10;
  private variable _strCP;
  private variable _intTiltSpeed;
  private variable _intSway;
  private variable _intTiltAngle;
  private variable _loopCounter11;
  private variable _intAspirateHeight;
  private variable _blnLLD_Dest;
  private variable _intRetractHeight_Asp;
  private variable _blnLLD_Src;
  private variable _blnLiquidFollow_Asp;
  private variable _intAspirateLLD;
  private variable _intDispenseHeight;
  private variable _intRetractHeight_Disp;
  private variable _intDispenseLLD;
  private variable _arrDestOffsets[];
  private variable _arrSrcOffsets[];
  private variable _blnDestOffset;
  private variable _intMaxLabwareNum;
  private variable _blnSrcOffset;
  private variable _strLabwareID;
  private variable _;
  private variable _strLabware;
  private variable _loopCounter12;
  private variable _intSeqIncrement;
  private variable _intMaxPos;
  private variable _intCurrentPos;
  private variable _intAvailablePos;
  private variable _loopCounter1;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("--- Tracing Input Variables ---"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intTotalVolume: "), i_intTotalVolume, Translate(""), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_strPipettingLocations: "), i_strPipettingLocations, Translate(""), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_blnTipEject: "), i_blnTipEject, Translate(""), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intForceTipType: "), i_intForceTipType, Translate(""), Translate(""));
  MECC::TraceComment(Translate("========== Create Source & Destination Sequences =========="));
  _intPositionToRemove_Src = 1;
  _intPositionToRemove_Dest = 1;
  _intSeqStart_Src = _seqSource.GetCurrentPosition();
  _intSrcSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(_seqSource);
  _intSeqStart_Dest = _seqDestination.GetCurrentPosition();
  _intDestSeq_AvailablePos = SANGERGENERAL::GetAvailableSeqPositions(_seqDestination);
  {
    _loopCounter2 = 0;
    while (1 == 1)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (_loopCounter2 <= _intSrcSeq_AvailablePos)
      {
        _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqSource);
        if (_strBC == "")
        {
          _strSeqName = SeqGetName(_seqSource);
          _intFound = StrFind(_strSeqName, Translate("res_"));
          if (_intFound == -1)
          {
            SeqRemoveAt(_seqSource, _intPositionToRemove_Src);
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Removing unoccupied position from source sequence"), Translate(""));
          }
        }
        else
        {
          SeqIncrement(_seqSource, 1);
          _intPositionToRemove_Src = _intPositionToRemove_Src + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Allowing occupied SrcPos from: "), _loopCounter2);
        }
      }
      if (_loopCounter2 <= _intDestSeq_AvailablePos)
      {
        _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqDestination);
        if (_strBC == "")
        {
          _strSeqName = SeqGetName(_seqDestination);
          _intFound = StrFind(_strSeqName, Translate("res_"));
          if (_intFound == -1)
          {
            SeqRemoveAt(_seqDestination, _intPositionToRemove_Dest);
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Removing unoccupied position from destination sequence"), Translate(""));
          }
        }
        else
        {
          SeqIncrement(_seqDestination, 1);
          _intPositionToRemove_Dest = _intPositionToRemove_Dest + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Allowing occupied DestPos at: "), _loopCounter2);
        }
      }
      if (_loopCounter2 > _intSrcSeq_AvailablePos)
      {
        if (_loopCounter2 > _intDestSeq_AvailablePos)
        {
          break;
        }
      }
    }
  }
  SeqResetSequenceIndexes(_seqSource);
  _seqSource.SetCurrentPosition(_intSeqStart_Src);
  SeqResetSequenceIndexes(_seqDestination);
  _seqDestination.SetCurrentPosition(_intSeqStart_Dest);
  _intSeqSrc_Length = SANGERGENERAL::GetAvailableSeqPositions(_seqSource);
  _intSeqDest_Length = SANGERGENERAL::GetAvailableSeqPositions(_seqDestination);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Available Source Positions: "), _intSeqSrc_Length);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Available Destination Positions: "), _intSeqDest_Length);
  _intNumberOfChannels = SANGERGENERAL::GetNumberOfChannels(ML_STAR, _intKey);
  if (_intSeqSrc_Length <= _intSeqDest_Length)
  {
    _intMaxSeqLength = _intSeqSrc_Length;
  }
  else
  {
    _intMaxSeqLength = _intSeqDest_Length;
  }
  if (_intMaxSeqLength < _intNumberOfChannels)
  {
    _intNumberOfActiveChannels = _intMaxSeqLength;
  }
  else
  {
    _intNumberOfActiveChannels = _intNumberOfChannels;
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Active channel count: "), _intNumberOfActiveChannels, Translate("/"), _intNumberOfChannels);
  _strJsonPrefix = Translate("");
  _strSourceLocation_lower = StrMakeLowerCopy(_strSourceLocation);
  _strJsonPrefix = StrConcat8(Translate("pipettingConfig,"), _strSourceLocation_lower, Translate("To"), _strDestinationLocation, Translate(","), Translate(""), Translate(""), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- Created JSON search string: '"), _strJsonPrefix, Translate("'"), Translate(""));
  if (_blnIncrement_Src == 1)
  {
    if (_blnIncrement_Dest == 1)
    {
      _intNumSeqPos = _intMaxSeqLength;
    }
    else
    {
      _intNumSeqPos = _intSeqSrc_Length;
    }
  }
  else
  {
    _intNumSeqPos = _intSeqDest_Length;
  }
  _flt = _intNumSeqPos / (_intNumberOfActiveChannels * 1.0);
  _intTransferCycles = MthCeiling(_flt);
  _intModulusTransferCycle = _intNumSeqPos % _intNumberOfActiveChannels;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Transfer cycles: "), _intTransferCycles);
  if (_intModulusTransferCycle != 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Modulus Transfer Cycle: "), _intModulusTransferCycle);
  }
  _flt = i_intTotalVolume / (_intTipSize * 1.0);
  _intPipettingLoops = MthCeiling(_flt);
  _flt = i_intTotalVolume / (_intPipettingLoops * 1.0);
  _intPipettingVolume = MthCeiling(_flt);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Pipetting loops: "), _intPipettingLoops);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Pipetting volume: "), _intPipettingVolume);
  _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",LC"), Translate(""));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _strLC);
  _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",aspirateStep,"), Translate("mixCycles"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intMixCycles_Src);
  if (_intMixCycles_Src >= 1)
  {
    _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",aspirateStep,"), Translate("mix%"));
    JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intMixPercentage_Src);
    _intSrcMixVolume = _intPipettingVolume * _intMixPercentage_Src;
  }
  _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",dispenseStep,"), Translate("mixCycles"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intMixCycles_Dest);
  if (_intMixCycles_Dest >= 1)
  {
    _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",dispenseStep,"), Translate("mix%"));
    JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intMixPercentage_Dest);
    _intDestMixVolume = _intPipettingVolume * _intMixPercentage_Dest;
  }
  _blnLLD_Src = 0;
  _blnLLD_Dest = 0;
  _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",aspirateStep,"), Translate("height"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, TRACE_LEVEL_NONE, __, _intAspirateHeight);
  if (_intAspirateHeight == -1)
  {
    _blnLiquidFollow_Asp = 1;
    _intAspirateHeight = 0;
    _blnLLD_Src = 5;
    _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",aspirateStep,"), Translate("lLD"));
    JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intAspirateLLD);
  }
  else
  {
    _blnLiquidFollow_Asp = 0;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intAspirateHeight: "), _intAspirateHeight);
  }
  _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",dispenseStep,"), Translate("height"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, TRACE_LEVEL_NONE, __, _intDispenseHeight);
  if (_intDispenseHeight == -1)
  {
    _intDispenseHeight = 0;
    _blnLLD_Dest = 5;
    _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",dispenseStep,"), Translate("lLD"));
    JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intDispenseLLD);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _intDispenseHeight: "), _intDispenseHeight);
  }
  _intRetractHeight_Asp = 0;
  _intRetractHeight_Disp = 0;
  _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",aspirateStep,"), Translate("heightRetract"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intRetractHeight_Asp);
  _strJsonSearch = StrConcat4(_strJsonPrefix, _strTipCounterSuffix, Translate(",dispenseStep,"), Translate("heightRetract"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intRetractHeight_Disp);
  _strJsonSearch = StrConcat2(_strJsonPrefix, Translate("angle"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intTiltAngle);
  _strJsonSearch = StrConcat2(_strJsonPrefix, Translate("tiltSpeed"));
  JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, __, _intTiltSpeed);
  _blnSrcOffset = 0;
  _blnDestOffset = 0;
  _intMaxLabwareNum=arrAllLabwareTypes.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intMaxLabwareNum;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      _strLabwareID = SeqGetLabwareId(_seqSource);
      _intFound = StrFind(_strLabwareID, arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
      if (_intFound != -1)
      {
        if (_blnSrcOffset == 0)
        {
          _blnSrcOffset = 1;
          _strLabware = StrMakeLowerCopy(arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
          _strJsonSearch = StrConcat8(_strLabware, Translate("Config,"), _strTipCounterSuffix, Translate("TipAngle,"), Translate("angled"), _intTiltAngle, Translate("Config"), Translate(""));
          JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, _arrSrcOffsets, _);
          VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSource, _arrSrcOffsets.ElementAt( 1 -1), _arrSrcOffsets.ElementAt( 2 -1), _arrSrcOffsets.ElementAt( 3 -1));
        }
      }
      _strLabwareID = SeqGetLabwareId(_seqDestination);
      _intFound = StrFind(_strLabwareID, arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
      if (_intFound != -1)
      {
        if (_blnDestOffset == 0)
        {
          _blnDestOffset = 1;
          _strLabware = StrMakeLowerCopy(arrAllLabwareTypes.ElementAt( _loopCounter1 -1));
          _strJsonSearch = StrConcat8(_strLabware, Translate("Config,"), _strTipCounterSuffix, Translate("TipAngle,"), Translate("angled"), _intTiltAngle, Translate("Config"), Translate(""));
          if (_strDestinationLocation == "HHS")
          {
            _strJsonSearch = StrConcat8(_strLabware, Translate("Config,"), _strTipCounterSuffix, Translate("TipAngle,"), Translate("hhs"), Translate(""), Translate("Config"), Translate(""));
          }
          JSONSEARCH::GetJSONEntry(Translate(""), _strJsonSearch, intTrace, _arrDestOffsets, _);
          VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqDestination, _arrDestOffsets.ElementAt( 1 -1), _arrDestOffsets.ElementAt( 2 -1), _arrDestOffsets.ElementAt( 3 -1));
        }
      }
    }
  }
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, _seqSource, 0);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, _seqDestination, 0);
  MECC::TraceComment(Translate("========== Pipetting Steps =========="));
  {
    for(_loopCounter10 = 0; _loopCounter10 < _intTransferCycles;)
    {
      _loopCounter10 = _loopCounter10 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Labware cycle: "), _loopCounter10, Translate("/"), _intTransferCycles);
      if (i_blnFreshTips == 0)
      {
        _strCP = SANGERGENERAL::CreateChannelPattern(_intNumberOfActiveChannels, _loopCounter10, _intTransferCycles, _intModulusTransferCycle);
        SANGERGENERAL::TipPickup(ML_STAR, _strCP, _seqTip, _strTipCounter, blnTestingMode);
      }
      _Module_Tilt(_intSway, _intTiltAngle, _intTiltSpeed, 0, 0);
      if (_rtnCode == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with the tilt module step"), Translate(""));
        return (1);
      }
      {
        for(_loopCounter11 = 0; _loopCounter11 < _intPipettingLoops;)
        {
          _loopCounter11 = _loopCounter11 + 1;
          // To help with trace file legibility
          Trace();
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transfer loop: "), _loopCounter11, Translate("/"), _intPipettingLoops);
          if (i_blnFreshTips == 1)
          {
            _strCP = SANGERGENERAL::CreateChannelPattern(_intNumberOfActiveChannels, _loopCounter10, _intTransferCycles, _intModulusTransferCycle);
            SANGERGENERAL::TipPickup(ML_STAR, _strCP, _seqTip, _strTipCounter, blnTestingMode);
          }
          if (_intTipSize <= 1000)
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
          else
          {
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
          if (i_blnFreshTips == 1)
          {
            if (i_blnFreshTips == 0)
            {
              if (_intTipSize <= 1000)
              {
                ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              }
              else
              {
                ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
              }
            }
          }
        }
      }
      if (i_blnTipEject == 1)
      {
        if (i_blnFreshTips == 0)
        {
          if (_intTipSize <= 1000)
          {
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
          else
          {
            ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
          }
        }
      }
      _intSeqIncrement = _intNumberOfActiveChannels - _intModulusTransferCycle;
      if (_blnIncrement_Src == 1)
      {
        if (_loopCounter10 < _intTransferCycles)
        {
          SeqIncrement(_seqSource, _intNumberOfActiveChannels);
        }
        else
        {
          SeqIncrement(_seqSource, _intSeqIncrement);
        }
        _intCurrentPos = _seqSource.GetCurrentPosition();
        _intMaxPos = SeqGetTotal(_seqSource);
      }
      if (_blnIncrement_Dest == 1)
      {
        if (_loopCounter10 < _intTransferCycles)
        {
          SeqIncrement(_seqDestination, _intNumberOfActiveChannels);
        }
        else
        {
          SeqIncrement(_seqDestination, _intSeqIncrement);
        }
        _intCurrentPos = _seqDestination.GetCurrentPosition();
        _intMaxPos = SeqGetTotal(_seqDestination);
      }
      _intAvailablePos = _intMaxPos - _intCurrentPos;
      if (_intAvailablePos <= 0)
      {
        break;
      }
      else
      {
        if (_intCurrentPos == 0)
        {
          break;
        }
      }
    }
  }
  _loopCounter12 = 0;
  for(_loopCounter12 = 0; _loopCounter12 < 3;)
  {
       _loopCounter12 = _loopCounter12 + 1;
       // Invert Source Offsets
       if (_blnSrcOffset == 1)
       {
            _int = _arrSrcOffsets.GetAt(_loopCounter12 - 1) * -1;
            _arrSrcOffsets.SetAt(_loopCounter12 - 1, _int);
       }
       // Invert Destination Offsets
       if (_blnDestOffset == 1)
       {
            _int = _arrDestOffsets.GetAt(_loopCounter12 - 1) * -1;
            _arrDestOffsets.SetAt(_loopCounter12 - 1, _int);
       }
  }
  if (_blnSrcOffset == 1)
  {
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqSource, _arrSrcOffsets.ElementAt( 1 -1), _arrSrcOffsets.ElementAt( 2 -1), _arrSrcOffsets.ElementAt( 3 -1));
  }
  if (_blnDestOffset == 1)
  {
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, _seqDestination, _arrDestOffsets.ElementAt( 1 -1), _arrDestOffsets.ElementAt( 2 -1), _arrDestOffsets.ElementAt( 3 -1));
  }
  return (0);
}

private function _Module_Centrifuge(  ) void {
}

private function _Module_MediaFill(  ) void {
}

private function D_LoadInstructions( sequence & i_arrAllSequences[] ) void {
  private dialog customDialog_7;
  private variable _strLabID;
  private variable _blnTipReload;
  private variable _loopCounter1;
  private variable _intAllSeqArraySize;
  private variable _intFound;
  private sequence _seqLoadingTemp;
  private variable _intTotalPos;
  private variable _loopCounter2;
  private variable _loopCounter3;
  private variable _strPositionID;
  private variable _strLabwareID;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                          Load Instructions - Start\n\n******************************************************************************************************************************************************"));
  _intAllSeqArraySize=i_arrAllSequences.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intAllSeqArraySize;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      _strLabID = SeqGetLabwareId(i_arrAllSequences.ElementAt( _loopCounter1 -1));
      _intFound = StrFind(_strLabID, Translate("Loading"));
      if (_intFound >= 1)
      {
        SeqCopySequence(_seqLoadingTemp, i_arrAllSequences.ElementAt( _loopCounter1 -1));
        break;
      }
    }
  }
  DeckVisualize::UpdateUsedPositions(ML_STAR, _seqLoadingTemp, 6, Translate(""));
  _blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_300uLSlim, Translate("TipCounter_300uLSlim"), 8);
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_300uLSlim, 6, Translate(""));
  _blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_1000ulFiltered, Translate("TipCounter_1mLFiltered"), 8);
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_1000ulFiltered, 6, Translate(""));
  _blnTipReload = SANGERGENERAL::TipCheck(ML_STAR.Tips_4mLFiltered, Translate("TipCounter_4mLFiltered"), 8);
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_4mLFiltered, 6, Translate(""));
  if (blnSimulationMode == 0)
  {
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    rtnValue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    if (rtnValue == 2)
    {
      abort;
    }
  }
  DeckVisualize::UpdateUsedPositions(ML_STAR, _seqLoadingTemp, 5, Translate(""));
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_300uLSlim, 5, Translate(""));
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_1000ulFiltered, 5, Translate(""));
  DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.Tips_4mLFiltered, 5, Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Reset Deck Layout"), Translate(""));
  if (blnAdministrator == 1)
  {
    _intAllSeqArraySize=i_arrAllSequences.GetSize();
    {
      for(_loopCounter2 = 0; _loopCounter2 < _intAllSeqArraySize;)
      {
        _loopCounter2 = _loopCounter2 + 1;
        _strLabID = SeqGetLabwareId(i_arrAllSequences.ElementAt( _loopCounter2 -1));
        _intFound = StrFind(_strLabID, Translate("Loading"));
        if (_intFound != -1)
        {
          _intTotalPos = SANGERGENERAL::GetAvailableSeqPositions(i_arrAllSequences.ElementAt( _loopCounter2 -1));
          {
            for(_loopCounter3 = 0; _loopCounter3 < _intTotalPos;)
            {
              _loopCounter3 = _loopCounter3 + 1;
              _strLabwareID = SeqGetLabwareId(i_arrAllSequences.ElementAt( _loopCounter2 -1));
              _strPositionID = SeqGetPositionId(i_arrAllSequences.ElementAt( _loopCounter2 -1));
              DevSetBarcodeData(ML_STAR, _strLabwareID, _strPositionID, Translate("TEMP"));
              SeqIncrement(i_arrAllSequences.ElementAt( _loopCounter2 -1), 1);
            }
          }
          SeqResetSequenceIndexes(i_arrAllSequences.ElementAt( _loopCounter2 -1));
          break;
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Temporary Barcodes Assigned"), Translate(""));
  }
}

private function _GetActiveSequence( sequence & i_arrSeq[], variable i_strSearch, sequence & o_seq ) variable {
  private variable _strLabware;
  private variable _loopCounter1;
  private variable _intArraySize;
  private variable _strSeqName;
  private variable _intFound;
  { sequence __temp; o_seq = __temp; }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Running GetActiveSequence"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Search String: "), i_strSearch);
  SeqRemoveAll(o_seq);
  _intArraySize=i_arrSeq.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intArraySize;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      _strLabware = SeqGetLabwareId(i_arrSeq.ElementAt( _loopCounter1 -1));
      _intFound = StrFind(_strLabware, i_strSearch);
      if (_intFound != -1)
      {
        SeqCopySequence(o_seq, i_arrSeq.ElementAt( _loopCounter1 -1));
        _strSeqName = SeqGetName(o_seq);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Sequence Identified: "), _strSeqName);
        return (0);
      }
      _strSeqName = SeqGetName(i_arrSeq.ElementAt( _loopCounter1 -1));
      _intFound = StrFind(_strSeqName, i_strSearch);
      if (_intFound != -1)
      {
        SeqCopySequence(o_seq, i_arrSeq.ElementAt( _loopCounter1 -1));
        _strSeqName = SeqGetName(o_seq);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Sequence Identified: "), _strSeqName);
        return (0);
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not find i_strSearch: "), i_strSearch);
  return (1);
}

private function _Module_HHS( variable i_intHeat, variable i_intShake, variable i_blnPlateLock, variable i_intPositionSpecific ) variable {
  private variable _strBC;
  private variable _intHHSDeviceArraySize;
  private variable _blnOccupied;
  private variable _blnActivePos;
  private variable _loopCounter1;
  private variable _intShakingDirection;
  private variable _blnOpen;
  private variable _loopCounter2;
  private variable _intTemp;
  private variable _blnShake;
  private variable _blnHeat;
  private variable _rtnCode;
  private variable _blnClose;
  private variable _intShakingAcceleration;
  private sequence _seqTemp;
  private variable __[];
  private variable _arrOccupiedPos[];
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Running HHS Module Step"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("--- Tracing Input Variables ---"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intHeat: "), i_intHeat, Translate(" (20 - 105, 0 = off)"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intShake: "), i_intShake, Translate(" (30 - 2500, 0 = off)"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_blnPlateLock: "), i_blnPlateLock, Translate(" (2 = grip, 1 = release, 0 = ignore)"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- i_intPositionSpecific: "), i_intPositionSpecific, Translate(" (0 = every position, 0 =/= that position)"), Translate(""));
  SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_HHS);
  _arrOccupiedPos.SetSize(0);
  {
    _loopCounter1 = 0;
    while (
       (_seqTemp.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqTemp, 1);
      _loopCounter1 = _loopCounter1 + 1;
      _blnOccupied = 1;
      _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqTemp);
      if (_strBC == "")
      {
        _blnOccupied = 0;
      }
      _arrOccupiedPos.AddAsLast(_blnOccupied);
      SeqIncrement(_seqTemp, 1);
      if (
         (_seqTemp.GetCurrentPosition() > 0 && _seqTemp.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqTemp.SetMax(_seqTemp.GetTotal());
    _seqTemp.SetCurrentPosition(1);
  }
  {
    for(_loopCounter2 = 0; _loopCounter2 < 5;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      _arrOccupiedPos.AddAsLast(0);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Occupied positions"), _arrOccupiedPos);
  _intTemp = 0;
  _blnShake = 0;
  _blnHeat = 0;
  _blnOpen = 0;
  _blnClose = 0;
  if (i_intShake >= 30)
  {
    if (i_intShake <= 2500)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: StartShaker - "), i_intShake, Translate("rpm"), Translate(""));
      _blnShake = 1;
      JSONSEARCH::GetJSONEntry(Translate(""), Translate("autoflaskConfig,hhsConfig,shakingDirection"), intTrace, __, _intShakingDirection);
      JSONSEARCH::GetJSONEntry(Translate(""), Translate("autoflaskConfig,hhsConfig,shakingAccRamp"), intTrace, __, _intShakingAcceleration);
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with HHS_Action; i_intShake - value too fast"), Translate(""));
    }
  }
  if (i_intShake == -1)
  {
    _blnShake = 2;
  }
  if (i_intHeat > 0)
  {
    if (i_intHeat >= 25)
    {
      if (i_intHeat <= 105)
      {
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: SetTemp - "), i_intHeat, Translate("°C"), Translate(""));
        _blnHeat = 1;
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with HHS_Action; i_intHeat - value too high"), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Error with HHS_Action; i_intHeat - value too low"), Translate(""));
      return (1);
    }
  }
  if (i_blnPlateLock == 1)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: ReleasePlateLock"), Translate(""), Translate(""), Translate(""));
    _blnOpen = 1;
  }
  if (i_blnPlateLock == 2)
  {
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> HHS Module: ClosePlateLock"), Translate(""), Translate(""), Translate(""));
    _blnClose = 1;
  }
  _intTemp = _blnShake + _blnHeat + _blnOpen + _blnClose;
  if (_intTemp == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No Step Successfully Selected"), Translate(""));
    return (1);
  }
  if (_blnClose == 1)
  {
    if (_blnOpen == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Tilt Module Open & Close selected"), Translate(""));
      return (1);
    }
  }
  _intHHSDeviceArraySize=arrHhsDevices.GetSize();
  {
    for(_loopCounter2 = 0; _loopCounter2 < _intHHSDeviceArraySize;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (i_intPositionSpecific == 0)
      {
        _blnActivePos = _loopCounter2;
      }
      else
      {
        _blnActivePos = i_intPositionSpecific;
      }
      if (_blnHeat == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = HSLHamHeaterShaker::StartTempCtrl(arrHhsDevices.ElementAt( _loopCounter2 -1), i_intHeat, 0);
            if (_rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StartTempCtrl"), Translate(" Error Code: "), _rtnCode);
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": Heat to ", i_intHeat, "°C;");
          }
        }
      }
      if (_blnShake == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 1);
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
              HSLHamHeaterShaker::SetShakerParameter(arrHhsDevices.ElementAt( _loopCounter2 -1), _intShakingDirection, _intShakingAcceleration);
              _rtnCode = HSLHamHeaterShaker::StartShaker(arrHhsDevices.ElementAt( _loopCounter2 -1), i_intShake);
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StartShaker"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": SetPlateLock;");
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": StartShaker at ", i_intShake, "rpm;");
            }
          }
        }
      }
      if (_blnShake == 2)
      {
        if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
        {
          if (_loopCounter2 == _blnActivePos)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = HSLHamHeaterShaker::StopShaker(arrHhsDevices.ElementAt( _loopCounter2 -1));
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": StopShaker;");
            }
          }
        }
      }
      if (_blnOpen == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = HSLHamHeaterShaker::StopShaker(arrHhsDevices.ElementAt( _loopCounter2 -1));
            if (_rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("StopShaker"), Translate(" Error Code: "), _rtnCode);
              return (1);
            }
            _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 0);
            if (_rtnCode != 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": StopShaker;");
            Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": SetPlateLock;");
          }
          break;
        }
      }
      if (_blnClose == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = HSLHamHeaterShaker::SetPlateLock(arrHhsDevices.ElementAt( _loopCounter2 -1), 1);
              if (_rtnCode != 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrHhsDevices.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("SetPlateLock"), Translate(" Error Code: "), _rtnCode);
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Heater Shaker ", arrHhsDevices[_loopCounter2 - 1], ": SetPlateLock;");
            }
            break;
          }
        }
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Completed HHS Module Step"), Translate(""));
  return (0);
}

private function F_ProcessClose(  ) variable {
  private dialog customDialog_8;
  private variable _rtnValue;
  MECC::TraceComment(Translate("******************************************************************************************************************************************************\n\n                                                                        Process Close - Start\n\n******************************************************************************************************************************************************"));
  customDialog_8.InitCustomDialog("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");
  customDialog_8.ShowCustomDialog();
  _rtnValue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
  if (_rtnValue == 2)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User ended the method"), Translate(""));
    return (2);
  }
  if (_rtnValue == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User repeated a process"), Translate(""));
    return (0);
  }
}

private function _Module_Tilt( variable i_intSway, variable i_intAngle, variable i_intSpeed, variable i_blnPlateLock, variable i_intPositionSpecific ) variable {
  private variable _strBC;
  private variable _blnOccupied;
  private variable _blnActivePos;
  private variable _loopCounter1;
  private variable _blnOpen;
  private variable _loopCounter2;
  private variable _blnSway;
  private variable _blnTilt;
  private variable _intTemp;
  private variable _rtnCode;
  private variable _blnClose;
  private variable _intTiltModulesArraySize;
  private sequence _seqTemp;
  private variable _arrOccupiedPos[];
  private variable _arrPositionsToSway[];
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Running Tilt Module Step"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intSway: "), i_intSway);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intAngle: "), i_intAngle);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intSpeed: "), i_intSpeed);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_blnPlateLock: "), i_blnPlateLock);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- i_intPositionSpecific: "), i_intPositionSpecific);
  SeqCopySequence(_seqTemp, ML_STAR.AutoFlasks_Tilt);
  _arrOccupiedPos.SetSize(0);
  {
    _loopCounter1 = 0;
    while (
       (_seqTemp.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, _seqTemp, 1);
      _loopCounter1 = _loopCounter1 + 1;
      _blnOccupied = 1;
      _strBC = SANGERGENERAL::GetBarcode(ML_STAR, _seqTemp);
      if (_strBC == "")
      {
        _blnOccupied = 0;
      }
      _arrOccupiedPos.AddAsLast(_blnOccupied);
      SeqIncrement(_seqTemp, 1);
      if (
         (_seqTemp.GetCurrentPosition() > 0 && _seqTemp.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    _seqTemp.SetMax(_seqTemp.GetTotal());
    _seqTemp.SetCurrentPosition(1);
  }
  {
    for(_loopCounter2 = 0; _loopCounter2 < 5;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      _arrOccupiedPos.AddAsLast(0);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Occupied positions"), _arrOccupiedPos);
  _intTemp = 0;
  _blnSway = 0;
  _blnTilt = 0;
  _blnOpen = 0;
  _blnClose = 0;
  if (i_intSway != 0)
  {
    if (i_intSway >= 5)
    {
      if (i_intSway < 900)
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Tilt Module: Swaying Step - "), i_intSway, Translate(" s"), Translate(""), Translate(""), Translate(""));
        _blnSway = 1;
      }
      else
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSway"), Translate(" - time too long"), Translate(""), Translate(""), Translate(""), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSway"), Translate(" - time too short"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  if (i_intAngle >= 0)
  {
    if (i_intAngle <= 10)
    {
      if (i_intSpeed > 0)
      {
        if (i_intSpeed <= 10)
        {
          if (_blnSway == 0)
          {
            TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Tilt Module: Tilting Step - "), i_intAngle, Translate("° Tilt"), Translate(""), Translate(""), Translate(""));
            _blnTilt = 1;
          }
        }
        else
        {
          TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSpeed"), Translate(" - value too fast"), Translate(""), Translate(""), Translate(""), Translate(""));
          return (1);
        }
      }
      else
      {
        TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intSpeed"), Translate(" - value too slow"), Translate(""), Translate(""), Translate(""), Translate(""));
        return (1);
      }
    }
    else
    {
      TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with Tilt Module: i_intAngle"), Translate(" - value too steep"), Translate(""), Translate(""), Translate(""), Translate(""));
      return (1);
    }
  }
  if (i_blnPlateLock == 1)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Tilt Module: ReleasePlateLock"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _blnOpen = 1;
  }
  if (i_blnPlateLock == 2)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Tilt Module: ClosePlateLock"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    _blnClose = 1;
  }
  _intTemp = _blnSway + _blnTilt + _blnClose + _blnOpen;
  if (_intTemp == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No Tilt Step Selected"), Translate(""));
    return (1);
  }
  if (_blnClose == 1)
  {
    if (_blnOpen == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Tilt Module Open & Close selected"), Translate(""));
      return (1);
    }
  }
  _arrPositionsToSway.SetSize(0);
  _intTiltModulesArraySize=arrTiltingModules.GetSize();
  {
    for(_loopCounter2 = 0; _loopCounter2 < _intTiltModulesArraySize;)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (i_intPositionSpecific == 0)
      {
        _blnActivePos = _loopCounter2;
      }
      else
      {
        _blnActivePos = i_intPositionSpecific;
      }
      if (_blnClose == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltingModules.ElementAt( _loopCounter2 -1));
            if (_rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("ClampClose"), Translate(""), Translate(""));
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": Close;");
          }
          break;
        }
      }
      if (_blnOpen == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (blnSimulationMode == 0)
          {
            _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltingModules.ElementAt( _loopCounter2 -1), 10, 0);
            if (_rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("Tilt"), Translate(""), Translate(""));
              return (1);
            }
            _rtnCode = Hamilton_Tilt_Clamp_Module::ClampOpen(arrTiltingModules.ElementAt( _loopCounter2 -1));
            if (_rtnCode == 0)
            {
              TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("Tilt"), Translate(""), Translate(""));
              return (1);
            }
          }
          else
          {
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": 0° Tilt;");
            Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": Open;");
          }
          break;
        }
      }
      if (_blnTilt == 1)
      {
        if (_loopCounter2 == _blnActivePos)
        {
          if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
          {
            if (blnSimulationMode == 0)
            {
              _rtnCode = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltingModules.ElementAt( _loopCounter2 -1));
              if (_rtnCode == 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("ClampClose"), Translate(""), Translate(""));
                return (1);
              }
              _rtnCode = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltingModules.ElementAt( _loopCounter2 -1), i_intSpeed, i_intAngle);
              if (_rtnCode == 0)
              {
                TRACELEVEL::Trace_06(TRACE_LEVEL_NONE, Translate("## Error with ["), arrTiltingModules.ElementAt( _loopCounter2 -1), Translate("] Step: "), Translate("ClampClose"), Translate(""), Translate(""));
                return (1);
              }
            }
            else
            {
              Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": Close;");
              Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltingModules[_loopCounter2-1], ": ", i_intAngle, "° Tilt;");
            }
          }
        }
      }
      if (_blnSway == 1)
      {
        if (_arrOccupiedPos.ElementAt( _loopCounter2 -1) == 1)
        {
          if (_loopCounter2 == _blnActivePos)
          {
            _arrPositionsToSway.AddAsLast(arrTiltingModules.ElementAt( _loopCounter2 -1));
          }
        }
        if (_loopCounter2 == _intTiltModulesArraySize)
        {
          PARALLELSWAY::ParallelSway(_arrPositionsToSway, i_intSpeed, 0, i_intAngle, i_intSway, blnSimulationMode);
        }
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Completed Tilt Module Step"), Translate(""));
  return (0);
}
